PsychoPy2experiment version="1.62.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {'participant':'001', 'session':001}
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent updateEarnings
      Begin Experiment:
        bankedEarnings=0.0
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Each Frame:
        thisBalloonEarnings=nPumps*0.05
      End Routine:
        #calculate cash 'earned'
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:   lastBalloonEarnings=thisBalloonEarnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings
    CodeComponent setBalloonSize
      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
        print 'nPumps', 'balloonSize', 'popped'
      Each Frame:
        balloonSize=0.1+nPumps*0.015
      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
      End Routine:
        #save data
        trials.addData('nPumps', nPumps)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
        #print data for info
        print nPumps, balloonSize, popped
    PatchComponent balloonBody
      texture resolution = 512
      image = redBalloon.png
      pos [set every frame] = $[-1+balloonSize/2, 0]
      startTime = 0.0
      units = norm
      sf = 1
      size [set every frame] = $balloonSize
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    TextComponent reminderMsg
      pos = [0, -0.8]
      letterHeight = 0.05
      startTime = 0.0
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextComponent balloonValMsg
      text [set every frame] = $u"£%.2f" %thisBalloonEarnings
      pos = [0,0.05]
      letterHeight = 0.1
      startTime = 0.0
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    TextComponent bankedMsg
      text [set every frame] = $u"You have banked:\n£%.2f" %bankedEarnings
      pos = [0, 0.8]
      letterHeight = 0.1
      startTime = 0.0
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    CodeComponent checkKeys
      Each Frame:
        if event.getKeys(['space']):
          nPumps=nPumps+1
          if balloonSize>breakPoint:
            popped=True
            continueTrial=False
    KeyboardComponent bankButton
      forceEndTrial = True
      storeResponseTime = True
      startTime = 0.0
      allowedKeys = ["return"]
      store = nothing
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  Routine finalScore
    TextComponent finalScore
      text [set every repeat] = $u"Well done! You banked a total of\n£%2.f" %bankedEarnings
      letterHeight = 0.1
      startTime = 0.0
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    KeyboardComponent doneKey
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
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  Routine feedback
    CodeComponent checkPopped
      Begin Experiment:
        feedbackText=""
        from psychopy import sound
        bang = sound.Sound("bang.wav")
      Begin Routine:
        if popped==True:
          feedbackText=""
          bang.play()
        else:
          feedbackText=u"You banked £%.2f" %lastBalloonEarnings
    TextComponent feedbackMsg
      text [set every repeat] = $feedbackText
      duration = 1.0
      letterHeight = 0.1
      startTime = 0.0
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  Routine instructions
    TextComponent instrMessage
      letterHeight = 0.05
      startTime = 0.0
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      text:
        This is a game where you have to optimise your earnings in a balloon pumping competition.

        You get prize money for each balloon you pump up, according to its size. But if you pump it too far it will pop and you'll get nothing for that balloon.

        Balloons differ in their maximum size - they can occasionally reach to almost the size of the screen but most will pop well before that.

        Press;
            SPACE to pump the balloon
            RETURN to bank the cash for this balloon and move onto the next
    KeyboardComponent resp
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
    trialList = [{u'balloonColour': u'blue', u'breakPoint': 0.050000000000000003}, {u'balloonColour': u'blue', u'breakPoint': 0.10000000000000001}, {u'balloonColour': u'blue', u'breakPoint': 0.14999999999999999}, {u'balloonColour': u'blue', u'breakPoint': 0.20000000000000001}, {u'balloonColour': u'blue', u'breakPoint': 0.25}, {u'balloonColour': u'blue', u'breakPoint': 0.29999999999999999}, {u'balloonColour': u'blue', u'breakPoint': 0.34999999999999998}, {u'balloonColour': u'blue', u'breakPoint': 0.40000000000000002}, {u'balloonColour': u'blue', u'breakPoint': 0.45000000000000001}, {u'balloonColour': u'blue', u'breakPoint': 0.5}, {u'balloonColour': u'blue', u'breakPoint': 0.55000000000000004}, {u'balloonColour': u'blue', u'breakPoint': 0.59999999999999998}, {u'balloonColour': u'blue', u'breakPoint': 0.65000000000000002}, {u'balloonColour': u'blue', u'breakPoint': 0.69999999999999996}, {u'balloonColour': u'blue', u'breakPoint': 0.75}, {u'balloonColour': u'blue', u'breakPoint': 0.80000000000000004}, {u'balloonColour': u'blue', u'breakPoint': 0.84999999999999998}, {u'balloonColour': u'blue', u'breakPoint': 0.90000000000000002}, {u'balloonColour': u'blue', u'breakPoint': 0.94999999999999996}, {u'balloonColour': u'blue', u'breakPoint': 1}]
    trialListFile = balloons.xlsx
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    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine finalScore
