PsychoPy2experiment version="2023.1.0rc8"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trials
  keyboardBackend = ioHub
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Routines
  Routine fixed_interval
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine random_interval
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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  Routine blank
  Routine instruct_image
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instruct_norm
    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
