PsychoPy2experiment version="2023.1.0rc8"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Code
  keyboardBackend = ioHub
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Routines
  Routine load_conditions
    CodeComponent code_load
      Code Type = Both
      Begin JS Routine:
        myData = new TrialHandler({
        psychoJS: psychoJS,
        nReps: 1,
        method: TrialHandler.Method.SEQUENTIAL,
        extraInfo: expInfo,
        originPath: undefined,
        trialList: conditions,
        seed: undefined,
        name: 'myData'});
      Begin Routine:
        # conditionFile is set in Begin Experiment of code_allocate
        # The conditionFile will need to have already been loaded.
        myData = data.TrialHandler(
        nReps=1,
        method='sequential',
        extraInfo=expInfo,
        originPath=-1,
        trialList=data.importConditions(conditionFile),
        seed=None,
        name='myData')
    CodeComponent code_allocate
      Code Type = Auto->JS
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      Begin Experiment:
        conditionFile = "conditions.xlsx"
      Begin Routine:
        conditions = []
        for row in myData.trialList:
            conditions.append(row)
        shuffle(conditions)

        nTrials = len(myData.trialList)
  Routine skip_expInfo
    CodeComponent code_skip
      Code Type = JS
      Before JS Experiment:
        // Code by Luke Boelling
        // https://discourse.psychopy.org/t/is-there-a-way-to-skip-the-dialog-box-when-running-online/25625/4

        var checkOK = setInterval(function() { //Use basic nested setInterval for Status check of dialog
            console.log("Check if DialogBox loaded");
           if (document.getElementById("progressMsg")) { //Wait for ProgressMsg to exist
                console.log("Dialogbox exists."); //Dialog Box Ready
              var statusText = document.getElementById("progressMsg").innerHTML; //get Status of ProgressMsg
              if(statusText == "all resources downloaded.") //If status is good. Go and let JS Click the button
              {
              console.log("All resources were downloaded! Press Ok now...");
              dialogOK
              document.getElementById("dialogOK").click(); // Click on the checkbox
              clearInterval(checkOK);
              }
           }
        }, 500); // check every 500ms
  Routine start_clock
    CodeComponent code_clock
      Code Type = Both
      Begin Experiment:
        myClock = core.Clock()
        # JS myClock = new util.Clock();

        # Use Auto Python -> JS components for
        # myClock.reset()
        # myClock.getTime()
      Begin JS Experiment:
        myClock = new util.Clock();
Flow
