PsychoPy2experiment version="2023.1.0rc8"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Forms
  keyboardBackend = ioHub
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Routines
  Routine consent_form
    TextComponent title
      letterHeight = 0.075
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = CONSENT FORM
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    TextComponent Q1
      letterHeight = 0.025
      pos = (-0.2, 0.25)
      startVal [time (s)] = 0.0
      text = Have you read and understood the Information Sheet?
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    TextComponent Q2
      letterHeight = 0.025
      pos = (-0.2, 0.15)
      startVal [time (s)] = 0.0
      text = Have you had the opportunity to ask questions about the study?
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    TextComponent Q3
      letterHeight = 0.025
      pos = (-0.2, 0.05)
      startVal [time (s)] = 0.0
      text = Have all your questions been answered satisfactorily (if applicable)
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    TextComponent Q4
      letterHeight = 0.025
      pos = (-0.2, -0.05)
      startVal [time (s)] = 0.0
      text = Do you understand that you are free to withdraw from the study? (at any time and without giving a reason)
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    TextComponent Q5
      letterHeight = 0.025
      pos = (-0.2, -0.15)
      startVal [time (s)] = 0.0
      text = I give permission for my data from this study to be shared with other researchers provided that my anonymity is completely protected.
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    TextComponent Q6
      letterHeight = 0.025
      pos = (-0.2, -0.25)
      startVal [time (s)] = 0.0
      text = Do you agree to take part in the study?
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    SliderComponent resp1
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, 0.25)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp2
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, 0.15)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp3
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, 0.05)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp4
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, -0.05)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp5
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, -0.15)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp6
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, -0.25)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    MouseComponent mouse_consent
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_consent
      image = next.png
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = resp1.rating and resp2.rating and resp3.rating and resp4.rating and resp5.rating and resp6.rating
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  PavloviaSurveyRoutine survey
    surveyType = id
Flow
