PsychoPy2experiment version="2023.1.0rc8"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Misc
  keyboardBackend = ioHub
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Routines
  Routine routine_10_second_countdown
    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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  Routine load_resources
    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = []
      startVal [time (s)] = 0
  Routine check_resources
    ResourceManagerComponent resources_2
      actionType = Check Only
      checkAll = False
      forceEndRoutine = False
      resources = []
  Routine screen_scale
    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Experiment:
        # Morys-Carter, W. L. (2023, January 131). ScreenScale [Computer software]. Pavlovia. https://doi.org/10.17605/OSF.IO/8FHQK

        # Initialise variables
        oldT = 0
        screen_height=0

        x_size = 8.560 # Width of standard credit card in cm
        y_size = 5.398 # Height of standard credit card in cm

        # Start with default values
        unitText = ' height units'
        x_scale = .05 # Width units per cm
        y_scale = .05 # Height units per cm
        dBase = .0001 # Default change in scale per keypress
        vsize=1 # Height of screen
        if win.units == 'norm':
            x_scale = .05
            y_scale = .1
            dBase = .0001
            unitText = ' norm units'
            vsize = 2
        elif win.units == 'pix':
            x_scale = 60
            y_scale = 40
            dBase = .1
            unitText = ' pixels'
            vsize = win.size[1]
        elif win.units == 'cm':
            x_scale = 1
            y_scale = 1
            dBase = .01
            unitText = ' cm'
            vsize = win.size[1]
        print('begin exp',x_size,x_scale, y_size,y_scale)
      Begin Routine:
        # Clear keyboard buffer from previous routine
        print('pre image',x_size,x_scale, y_size,y_scale)
        event.clearEvents()
      Each Frame:
        keys=event.getKeys() # Check the keyboard
        if len(keys):
            if t - oldT < .5: # If new key press within 500ms
                dScale=5*dBase # Change the scale 5 times as fast
                oldT=t
            else:
                dScale=dBase
                oldT=t
            if 'space' in keys and t > 1: # Minimum 1 second
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dScale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dScale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dScale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dScale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unitText+' per cm\nY Scale = '+str(y_scale)+unitText+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        # Multiply the desired horizontal and vertical
        # sizes in cm of objects by x_scale and y_scale
        # set Every Repeat
        expInfo['xScale'] = x_scale
        expInfo['yScale'] = y_scale
        expInfo['xRes'] = win.size[0]
        expInfo['yRes'] = win.size[1]

        # Clear keyboard buffer for next routine
        event.clearEvents()
    TextComponent text_top
      letterHeight = 0.1
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.1
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = creditCard.png
      size [set every repeat] = (x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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Flow
  Routine screen_scale
