PsychoPy2experiment version="2024.1.0rc11"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Online
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine participant_counter
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    CodeComponent increase_participant
      Code Type = JS
      Begin JS Routine:
        // increase the value on the shelf by 1
        psychoJS.shelf.addIntegerValue({key: ['participant_counter'], delta: 1})
        // fetch the current value on the shelf (this variable is displayed in text)
        participantN = await psychoJS.shelf.getIntegerValue({key: ['participant_counter'], defaultVlaue: 0})

        // https://www.psychopy.org/online/shelf.html#interacting-with-integer-records
    TextComponent ppt_count_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $'Hello. You are participant number ' + participantN + ' to try out this demo!'
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  Routine multi_session
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    CodeComponent multi_sesh_code
      Code Type = JS
      Begin JS Experiment:
        // get the dictionary value

        // check the fieldnames in the dictionary - does this participant already exist?
        existing_participants = await psychoJS.shelf.getDictionaryFieldNames({key: ["session_tracker"]})

        // if not add a new fieldname to this dictionary
        if(!existing_participants.includes(expInfo['participant'])){
            psychoJS.shelf.setDictionaryFieldValue({key: ["session_tracker"], fieldName: expInfo['participant'], fieldValue :1})
            }else{//increase the number of sessions completed by this participant
                session_number = await psychoJS.shelf.getDictionaryFieldValue({key: ["session_tracker"], fieldName:expInfo['participant'], defaultValue:'no sessions detected'})
                session_number = session_number + 1
                console.log('session_number2', session_number)
                psychoJS.shelf.setDictionaryFieldValue({key: ["session_tracker"], fieldName: expInfo['participant'], fieldValue :session_number})
                }


        // if yes then use that fieldname to check how many sessions completed by that participant
        session_number = await psychoJS.shelf.getDictionaryFieldValue({key: ["session_tracker"], fieldName:expInfo['participant'], defaultValue:'no sessions detected'})
        console.log('session_number', session_number)

        // https://www.psychopy.org/online/shelf.html#interacting-with-dictionary-records
    TextComponent showsession
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $'Welcome participant ' + expInfo['participant'] + ' this is session number ' + str(session_number) + ' linked to this participant ID'
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Flow
