PsychoPy2experiment version="2022.1.0rc10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trials
  keyboardBackend = ioHub
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Routines
  Routine image_rating
    ImageComponent stimulus
      image = default.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent attractiveness
      forceEndRoutine = True
      granularity = 0.1
      labels = "Not attractive", "Neutral", "Attractive"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine images_2AFC
    PolygonComponent fixation_2AFC
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    StaticComponent ISI_load_images
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent right_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_2AFC
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine image_multiple_ratings
    ImageComponent stimulus_2
      image = default.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent valence
      forceEndRoutine = True
      labels = "Sad", "Neutral", "Happy"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent arousal
      forceEndRoutine = True
      labels = "Not Arousing", "Neutral", "Highly Arousing"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent positivity
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine images_4AFC
    PolygonComponent fixation_4AFC
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent top_left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    StaticComponent ISI_load_images_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent top_right_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_right_img
      image = default.png
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    MouseComponent mouse_4AFC
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine feedback_accuracy_key_resp
    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine feedback_accuracy_mouse_resp
    CodeComponent fb_code2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if a mouse click was correct or not.
        # This routine will need to follow another routine with a
        # mouse component in it called "mouse" and several clickable components
        # you will also need a column in your conditions file indicating the name
        # of the correct component to click.
        # If your experiment is missing these you will see an error message.

        # If a mouse component has been added (with a correct answer column) and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no mouse component found or no corrClick column- look at the Std out window for info'
        fb_col = 'black'

        try:
            if mouse.clicked_name[-1] == corrClick:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n 2. In the mouse component in the "data" tab select store data "on click".\n 3. In the conditions file have a column called "corrClicked" (where corrClicked is the name of the component to be clicked')
    TextComponent fb2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb_text
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  Routine feedback_rt_key_resp
    CodeComponent rt_fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a key response
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no key_resp component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(key_resp.rt*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n2. that data is set to store from first or last key')
    TextComponent rt_fb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine feedback_rt_mouse
    CodeComponent rt_fb_code2
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a mouse/touch response
        # This routine will need to follow another routine with a
        # mouse response component in it called "mouse"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a mouse component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no mouse component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(mouse.time[-1]*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n2. that data is set to store "on click"')
    TextComponent rt_fb2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine fixed_interval
    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine random_interval
    TextComponent fix_rand
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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  Routine demographics
    TextComponent age
      letterHeight = 0.03
      pos = (-0.5, 0.45)
      startVal [time (s)] = 0.0
      text = What age group are you in?
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    SliderComponent respAge
      forceEndRoutine = False
      granularity = 1
      labels = ("Under 16", "16-20", "21-25", "26-30", "31-35", "36-40", "Above 40")
      letterHeight = 0.035
      pos = (-0.1, 0.4)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent gender
      letterHeight = 0.03
      pos = (-0.5, 0.3)
      startVal [time (s)] = 0.0
      text = What gender are you?
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    SliderComponent genderResp1
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ("Prefer not to say", "In another way", "Non-binary", "Man", "Woman")
      letterHeight = 0.035
      pos = (-0.5, 0.15)
      size = (0.015, 0.15)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent genderResp2
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0.135, 0.11)
      size = (0.425, 0.04)
      startVal [time (s)] = 0
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    TextComponent student
      letterHeight = 0.03
      pos = (-0.55, 0)
      startVal [time (s)] = 0.0
      text = Are you a student?
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    SliderComponent studentResp
      forceEndRoutine = False
      granularity = 1
      labels = ("Undergraduate", "Taught postgraduate", "Research postgraduate", "No")
      letterHeight = 0.035
      pos = (0, -0.05)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextComponent mood
      letterHeight = 0.03
      pos = (-0.45, -0.15)
      startVal [time (s)] = 0.0
      text = What is your current mood?
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    SliderComponent moodResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Low", "Okay", "Great!")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    ImageComponent nextButton
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [condition] = respAge.rating and genderResp1.rating and studentResp.rating and moodResp.rating
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    MouseComponent mouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine consent_form
    TextComponent title
      letterHeight = 0.075
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = CONSENT FORM
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    TextComponent Q1
      letterHeight = 0.025
      pos = (-0.2, 0.25)
      startVal [time (s)] = 0.0
      text = Have you read and understood the Information Sheet?
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    TextComponent Q2
      letterHeight = 0.025
      pos = (-0.2, 0.15)
      startVal [time (s)] = 0.0
      text = Have you had the opportunity to ask questions about the study?
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    TextComponent Q3
      letterHeight = 0.025
      pos = (-0.2, 0.05)
      startVal [time (s)] = 0.0
      text = Have all your questions been answered satisfactorily (if applicable)
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    TextComponent Q4
      letterHeight = 0.025
      pos = (-0.2, -0.05)
      startVal [time (s)] = 0.0
      text = Do you understand that you are free to withdraw from the study? (at any time and without giving a reason)
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    TextComponent Q5
      letterHeight = 0.025
      pos = (-0.2, -0.15)
      startVal [time (s)] = 0.0
      text = I give permission for my data from this study to be shared with other researchers provided that my anonymity is completely protected.
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    TextComponent Q6
      letterHeight = 0.025
      pos = (-0.2, -0.25)
      startVal [time (s)] = 0.0
      text = Do you agree to take part in the study?
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    SliderComponent resp1
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, 0.25)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp2
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, 0.15)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp3
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, 0.05)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp4
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, -0.05)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp5
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, -0.15)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    SliderComponent resp6
      forceEndRoutine = False
      granularity = 1
      labels = ("yes", "no")
      letterHeight = 0.025
      pos = (0.5, -0.25)
      size = (0.15, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    MouseComponent mouse_2
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_2
      image = next.png
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = resp1.rating and resp2.rating and resp3.rating and resp4.rating and resp5.rating and resp6.rating
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Flow
