PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'gender': '', 'age': '', 'session': '004'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = bart
  logging level = warning
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Routines
  Routine trial
    CodeComponent updateEarnings
      Code Type = Py
      Before Experiment:
        # This code will run before the experiment window is opened, after importing all of the necessary packages
      Begin Experiment:
        bankedEarnings=0.0
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Each Frame:
        thisBalloonEarnings=nPumps*0.05
      End Routine:
        #calculate cash 'earned'
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:   lastBalloonEarnings=thisBalloonEarnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings
    CodeComponent setBalloonSize
      Code Type = Py
      Before Experiment:
        # This code will run before the experiment window is opened, after importing all of the necessary packages
      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
      Each Frame:
        balloonSize=0.1+nPumps*0.015
      End Routine:
        #save data
        trials.addData('nPumps', nPumps)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
    ImageComponent balloonBody
      image = redBalloon.png
      pos [set every frame] = $[-1+balloonSize/2, 0]
      size [set every frame] = $balloonSize
      startVal [time (s)] = 0.0
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    TextComponent reminderMsg
      letterHeight = 0.05
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextComponent balloonValMsg
      letterHeight = 0.1
      pos = [0,0.05]
      startVal [time (s)] = 0.0
      text [set every frame] = $u"This balloon value:\n£%.2f" %thisBalloonEarnings
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    TextComponent bankedMsg
      letterHeight = 0.1
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      text [set every frame] = $u"You have banked:\n£%.2f" %bankedEarnings
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    CodeComponent checkKeys
      Code Type = Py
      Before Experiment:
        # This code will run before the experiment window is opened, after importing all of the necessary packages
      Each Frame:
        if event.getKeys(['space']):
          nPumps=nPumps+1
          if nPumps>maxPumps:
            popped=True
            continueRoutine=False
    KeyboardComponent bankButton
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finalScore
    TextComponent finalScore_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $u"Well done! You banked a total of\n£%2.f" %bankedEarnings
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    KeyboardComponent doneKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent checkPopped
      Code Type = Py
      Before Experiment:
        # This code will run before the experiment window is opened, after importing all of the necessary packages
      Begin Experiment:
        feedbackText=""
        from psychopy import sound
        bang = sound.Sound("bang.wav")
      Begin Routine:
        if popped==True:
          feedbackText="Oops! Lost that one!"
          bang.play()
        else:
          feedbackText=u"You banked £%.2f" %lastBalloonEarnings
    TextComponent feedbackMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
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  Routine instructions
    TextComponent instrMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a game where you have to optimise your earnings in a balloon pumping competition.

        You get prize money for each balloon you pump up, according to its size. But if you pump it too far it will pop and you'll get nothing for that balloon.

        Balloons differ in their maximum size - they can occasionally reach to almost the size of the screen but most will pop well before that.

        Press;
            SPACE to pump the balloon
            RETURN to bank the cash for this balloon and move onto the next
    KeyboardComponent resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
    random seed = 1832
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    conditions:
      [{'imageFile': 'blueBalloon.png', 'maxPumps': 2},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 8},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 14},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 20},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 26},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 32},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 38},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 44},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 50},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 56},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 62},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 68},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 74},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 80},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 86},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 92},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 98},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 104},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 110},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 116}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine finalScore
