PsychoPy2experiment version="2021.1.0.dev3"
Settings
  Experiment info = {'participant': 'ID01', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = branching
  logging level = warning
  runMode = 0
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Routines
  Routine A
    TextboxComponent msgA
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You chose A (the blue pill?)
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  Routine B
    TextboxComponent msgB
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You chose B (the red pill?)
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  Routine instr
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
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      text:
        If you press 'a' you'll get 3 trials of Routine A

        If you press 'b' you'll get 3 trials of Routine B
    KeyboardComponent resp
      allowedKeys = ['a', 'b']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    VariableComponent nRepsA
      startFrameValue = int(resp.keys == 'a') * 3 # 3 if a was pressed, 0 otherwise
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    VariableComponent nRepsB
      startFrameValue = int(resp.keys == 'b') * 3 # 3 if b was pressed, 0 otherwise
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Flow
  Routine instr
  LoopInitiator repsA loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = nRepsA
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    conditions:
      [{'letterColor': 'red'},
      {'letterColor': 'green'},
      {'letterColor': 'blue'}]
    Routine A
  LoopTerminator repsA
  LoopInitiator repsB loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = nRepsB
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    conditions:
      [{'letterColor': 'red'},
      {'letterColor': 'green'},
      {'letterColor': 'blue'}]
    Routine B
  LoopTerminator repsB
