PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [800, 600]
  backgroundFit = fill
  color = black
  expName = dual_window
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine show_screens
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    TextComponent first_screen_text
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = This is the participant's window.
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    CodeComponent second_screen_setup
      Code Type = Py
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      Begin Experiment:
        ## Setup the second Window

        # Experimenter's window - change the screen number if needed, screen 0 is the screen
        # where the PsychoPy app is running
        win2 = visual.Window(
            size=[500, 500], fullscr=False, screen=0,
            winType='pyglet', allowStencil=False,
            monitor='testMonitor', color=[-1,-1,-1], colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='height', pos = [0,0])

        # Show some text in the window
        second_screen_text = visual.TextStim(win=win2, name='intro_text',
            text='This is the Experimenter window.',
            font='Arial',
            pos=(0, 0), height=0.03, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);
      Begin Routine:
        # Draw the text in the second window on every frame flip during the routine
        second_screen_text.setAutoDraw(True)
      Each Frame:
        # Flip the Experimenter's window
        win2.flip()
      End Routine:
        # Stop showing the text at the end of the routine
        second_screen_text.setAutoDraw(False)
  Routine instructions
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    TextComponent inst_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will see some words on the screen. The words will be written in red, green, or blue ink.

        Your job is to report the colour of the ink using the R, G, or B buttons on your keyboard.

        Press space to start!
    KeyboardComponent inst_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_text
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thanks for taking part!
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  Routine trial
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    TextComponent stimulus
      color [set every repeat] = $ink_col
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $word_stim
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    KeyboardComponent key_resp
      allowedKeys = 'r', 'g', 'b'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent experimenter_task_prog
      Code Type = Py
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      Begin Experiment:
        # In the experimenter window we want to show a progress bar so we set that up here
        task_prog = visual.Progress(
                win2, name='task_prog',
                progress=0.0,
                pos=(-0.2, 0), size=(0.5, 0.05), anchor='center-left', units='height',
                barColor=[-0.2549, 0.2392, 0.2549], backColor=None, borderColor='white', colorSpace='rgb',
                lineWidth=4.0, opacity=1.0, ori=0.0,
                depth=0
            )

        # Show some text with the progress bar
        task_prog_text = visual.TextStim(win=win2, name='task_prog_text',
            text='Task progress:',
            font='Arial',
            pos=(-0.38, 0), height=0.03, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);

        # Setup some text to show participant's accuracy
        accuracy_text = visual.TextStim(win=win2, name='accuracy_text',
            text='placeholder',
            font='Arial',
            pos=(0, -0.2), height=0.03, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=0.0);

        # Initialise a counter to track the accuracy
        task_acc = 0
      Begin Routine:
        # Calculate how far the participant is through the trials (we add one to the current trial number
        # to account for Python 0-indexing)
        this_prop_complete = (trials.thisN+1)/trials.nTotal

        # Update the progress bar
        task_prog.setProgress(this_prop_complete)

        # Update the accuracy text with current accuracy score
        accuracy_text.setText('Task accuracy: ' + str(task_acc) + '/' + str(trials.thisN))

        # Draw the progress bar and text
        task_prog.setAutoDraw(True)
        task_prog_text.setAutoDraw(True)
        accuracy_text.setAutoDraw(True)
      Each Frame:
        # Flip the experimenter's window
        win2.flip()
      End Routine:
        # Update the accuracy score
        task_acc += key_resp.corr
Flow
  Routine show_screens
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word_stim': 'RED', 'ink_col': 'red', 'corr_ans': 'r', 'trial_type': 'congruent'},
      {'word_stim': 'RED', 'ink_col': 'green', 'corr_ans': 'g', 'trial_type': 'incongruent'},
      {'word_stim': 'RED', 'ink_col': 'blue', 'corr_ans': 'b', 'trial_type': 'incongruent'},
      {'word_stim': 'GREEN', 'ink_col': 'red', 'corr_ans': 'r', 'trial_type': 'incongruent'},
      {'word_stim': 'GREEN', 'ink_col': 'green', 'corr_ans': 'g', 'trial_type': 'congruent'},
      {'word_stim': 'GREEN', 'ink_col': 'blue', 'corr_ans': 'b', 'trial_type': 'incongruent'},
      {'word_stim': 'BLUE', 'ink_col': 'red', 'corr_ans': 'r', 'trial_type': 'incongruent'},
      {'word_stim': 'BLUE', 'ink_col': 'green', 'corr_ans': 'g', 'trial_type': 'incongruent'},
      {'word_stim': 'BLUE', 'ink_col': 'blue', 'corr_ans': 'b', 'trial_type': 'congruent'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
