PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'s_001', 'ori':10}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = psychophysicsStaircase
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        trialClock = core.Clock()
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    GratingComponent fixation
      color = [1, 1, 1]
      mask = none
      sf = 1
      size = [3, 3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = none
      units = pix
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    GratingComponent gabor
      color [set every repeat] = $[level, level, level]
      mask = gauss
      ori = $expInfo['ori']
      phase [set every frame] = $trialClock.getTime()*2
      sf = 0.1
      size = [128,128]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      tex = sin
      units = pix
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    KeyboardComponent resp
      allowedKeys = 'up', 'down'
      correctAns = up
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine instr
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    TextComponent instructions
      color = [1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        This exp measures your detection threshold using a staircase procedure.

        Press 'up' if you see the stimulus, 'down' if you didn't.

        Any key to start
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
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Flow
  Routine instr
  LoopInitiator trials loopType="StairHandler"
    N down = 3
    N reversals = 0
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 30
    start value = 0.5
    step sizes = [0.8,0.8,0.4,0.4,0.2]
    step type = log
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    Routine trial
  LoopTerminator trials
