PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = interleaved_SF_contrast
  runMode = 0
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Routines
  Routine trial
    CodeComponent setSide
      Code Type = Py
      Begin Routine:
        if random()>0.5:
            pos = [-5,0] #this is deg visual angle
            correctAns = 'left'
        else:
            pos = [+5,0]
            correctAns = 'right'
      End Routine:
        trials.addOtherData('side',correctAns)
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
    GratingComponent grating
      color [set every repeat] = $level
      durationEstim = 0.16
      mask = gauss
      pos [set every repeat] = pos
      sf [set every repeat] = sf
      size = 4
      startVal [time (s)] = 0.5
      stopVal [duration (frames)] = 10
      tex = sin
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    GratingComponent fixation
      color = black
      mask = gauss
      sf = None
      size = 1
      startVal [time (s)] = 0.25
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  Routine thanks
    TextComponent thanksMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = You're done! Fun, wasn't it!? ;-)
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  Routine instructions
    TextComponent instrText
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Press the left and right cursor keys to indicate whether the grating was on the left or right (there is always a correct answer).

        If you don't see anything then guess!


        Press any key to continue
    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="MultiStairHandler"
    conditionsFile = stairDefinitions.xlsx
    loopType = interleaved staircases
    nReps = 40
    stairType = simple
    switchMethod = random
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    conditions:
      [{u'startVal': 0.001, u'sf': 2, u'label': u'low_2'},
      {u'startVal': 0.1, u'sf': 2, u'label': u'high_2'},
      {u'startVal': 0.001, u'sf': 8, u'label': u'low_8'},
      {u'startVal': 0.1, u'sf': 8, u'label': u'high_8'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
