PsychoPy2experiment version="2021.1.0.dev4"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = blockedTrials
  runMode = 0
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5,0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      units = height
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  Routine readyMessage
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $readyMsg
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = chooseBlock.xlsx
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [{'condsFile': 'facesBlock.xlsx', 'readyMsg': 'Some faces'},
      {'condsFile': 'housesBlock.xlsx', 'readyMsg': 'Some houses'}]
    Routine readyMessage
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
