PsychoPy2experiment version="2024.1.0rc10"
Settings
  Audio lib = ptb
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['spreadsheets/balloons.xlsx', 'spreadsheets/trialTypes.xlsx', 'assets/bang.wav', 'assets/blueBalloon.png', 'assets/greenBalloon.png', 'assets/redBalloon.png', 'assets/bang.mp3']
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1.0000, 0.6157, 0.6392]
  expName = bart
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    ImageComponent background_2
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent bankButton
      allowedKeys = 'return', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent updateEarnings
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the overall earnings
        bankedEarnings=0.0

        # some text to show the earnings on screen (starts empty)
        balloonEarnings = ''

        # and some text to show the banked earnings (starts blank)
        bankedText = ''

        #initialize the earnings on the last balloon
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Begin Routine:
        # you earn £0.05 per pump (until it pops)
        thisBalloonEarnings=(pump.thisN+1)*0.05 # "pump" corresponds to the name of this loop

        #update the text to show onscreen the actual earnings in this trial and the banked earnings
        balloonEarnings = "This balloon value:\n£" + str(round(thisBalloonEarnings, 2))
        bankedText = "You have banked:\n£" + str(round(bankedEarnings, 2))
      End Routine:
        #if the pump number exceeds the max pumps... then set popped to True
        if pump.thisN+1 == maxPumps:
            popped = True
        else:
            popped = False

        # if balloon popped reset the earnings on this trial to 0
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:
            lastBalloonEarnings=thisBalloonEarnings

        # if the user presses return end this loop
        if 'return' in bankButton.keys:
            pump.finished = True
    TextboxComponent reminder
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextboxComponent balloonValTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $balloonEarnings
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    TextboxComponent bankedTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $bankedText
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    CodeComponent setBalloonSize
      Code Type = Auto->JS
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonBody.setPos([0, balloonSize/2-.5])
        balloonBody.setSize(balloonSize)
      Each Frame:
        balloonSize=0.1+(pump.thisN+1)*0.015
      End Routine:
        #save data
        trials.addData('nPumps', pump.thisN+1)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
    ImageComponent balloonBody
      image = assets/redBalloon.png
      ori = -90
      pos [set every frame] = [0, balloonSize/2-.5]
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
      units = height
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    TextboxComponent trialcount
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Ballon number: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine finalScore
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    ImageComponent background_4
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent finalScoreCode
      Code Type = Auto->JS
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      Begin Routine:
        scoreText="Well done! You banked a total of\n£"+str(round(bankedEarnings, 2))
    TextboxComponent scoremsg
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      size = (1, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $scoreText
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  Routine feedback
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    ImageComponent background_3
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent checkPopped
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
      Begin Routine:
        # update the banked earnings with the earnings of the last balloon
        bankedEarnings = bankedEarnings+lastBalloonEarnings

        # update the text
        balloonEarnings = "This balloon value:\n£" + str(round(thisBalloonEarnings, 2))
        bankedText = "You have banked:\n£" + str(round(bankedEarnings, 2))

        # set the volume of the pop sound to 1
        pop_sound.setVolume(1)

        # play the pop sound
        if popped==True:
            # if popped, play the balloon sound and show some text
            feedbackText="Oops! Lost that one!"
            pop_sound.play()
        else:
            # if not popped show the earnings banked
            feedbackText="You banked £" + str(round(lastBalloonEarnings, 2))
    TextboxComponent feedbacktxt
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
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    TextboxComponent bankedTxt_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $bankedText
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    TextboxComponent balloonValTxt_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $balloonEarnings
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    TextboxComponent reminder_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextboxComponent trialcount_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'Ballon number: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine instructions
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    ImageComponent background
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instrtxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        This is a game where you have to optimise your earnings in a balloon pumping competition.

        You get prize money for each balloon you pump up, according to its size. But if you pump it too far it will pop and you'll get nothing for that balloon.

        Balloons differ in their maximum size - they can occasionally reach to almost the size of the screen but most will pop well before that.

        Press
            SPACE to pump the balloon
            RETURN to bank the cash for this balloon and move onto the next
    SoundComponent pop_sound
      sound = assets/bang.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0
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  Routine reset_balloon
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # the starting size of the balloon in height units
        balloonSize=0.08

        # has the balloon popped? starts at false
        popped=False

        # how many pumps have taken place? (starts at 0)
        nPumps=0
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = spreadsheets/conditions.xlsx
    loopType = random
    nReps = 1
    random seed = 1832
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    conditions:
      [{'maxPumps': 2},
      {'maxPumps': 8},
      {'maxPumps': 14},
      {'maxPumps': 20},
      {'maxPumps': 26},
      {'maxPumps': 32},
      {'maxPumps': 38},
      {'maxPumps': 44},
      {'maxPumps': 50},
      {'maxPumps': 56},
      {'maxPumps': 62},
      {'maxPumps': 68},
      {'maxPumps': 74},
      {'maxPumps': 80},
      {'maxPumps': 86},
      {'maxPumps': 92},
      {'maxPumps': 98},
      {'maxPumps': 104},
      {'maxPumps': 110},
      {'maxPumps': 116}]
    Routine reset_balloon
    LoopInitiator pump loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = maxPumps
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      Routine trial
    LoopTerminator pump
    Routine feedback
  LoopTerminator trials
  Routine finalScore
