PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = BFI
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Routines
  Routine demographics
    TextboxComponent demogInstr
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please answer the following questions:
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    FormComponent demog
      Data Format = rows
      Item Padding = 0.06
      Items = demographics.xlsx
      Randomize = False
      Style = light
      Text Height = 0.025
      fillColor = None
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    CodeComponent contButton1
      Code Type = Auto->JS
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      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.45))
      Each Frame:
        continueButton.draw()

        if demog.complete:
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
  Routine TIPI
    TextboxComponent formInstructs
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (1.5, 0.15)
      size = (0, 0.5)
      startVal [time (s)] = 0.0
      text = Here are a number of characteristics that may or may not apply to you. For example, do you agree that you are someone who likes to spend time with others? Please select the appropriate rating next to each statement to indicate the extent to which you agree or disagree with that statement.
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    FormComponent TIPIForm
      Data Format = rows
      Item Padding = 0.05
      Items = TIPI.xlsx
      Randomize = False
      Style = light
      Text Height = 0.025
      fillColor = None
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    CodeComponent contButton2
      Code Type = Auto->JS
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      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.45))
      Each Frame:
        continueButton.draw()

        if TIPIForm.complete:
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
Flow
  Routine demographics
  Routine TIPI
