PsychoPy2experiment version="2024.1.0rc10"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1, -1, -1]
  expName = gng
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $this_image
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine intro
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    TextboxComponent introtxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Press space if you see a tick, do not press anything if you see a cross.

        Press the "S" key to start
    KeyboardComponent start_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent go_example
      image = go.png
      pos = (0.6, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent nogo_example
      image = nogo.png
      pos = (0.6, -0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_counter = 0
      Begin Routine:
        if key_resp.corr:
            fb = 'Correct!'
        else:
            fb = 'Incorrect'

        correct_counter += key_resp.corr
    TextboxComponent fbtxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb
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  Routine end
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    CodeComponent set_endtxt
      Code Type = Auto->JS
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      Begin Routine:
        endtxt = 'You scored ' + str(correct_counter) + ' correct!'
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $endtxt
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'this_image': 'go.png', 'corr_ans': 'space'},
      {'this_image': 'go.png', 'corr_ans': 'space'},
      {'this_image': 'go.png', 'corr_ans': 'space'},
      {'this_image': 'nogo.png', 'corr_ans': None}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine end
