PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'Would you like to try the updated or archived version?': '["updated (local only)", "archived (local and online)"]'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 800]
  expName = drag_and_drop
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
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    TextboxComponent instruct
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the drag and drop demo!

        In this demo, you would need to drag squares to complete the given shape.

        Click NEXT to start the task!
    TextComponent next_text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = NEXT
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    MouseComponent instruct_mouse
      clickable = next_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent branching_code
      Code Type = Auto->JS
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      Begin Experiment:
        show_updated = 0
        show_archived = 0
        intro_word = ""

        if expInfo["Would you like to try the updated or archived version?"] == "updated (local only)":
            show_updated = 1
            show_archived = 0
            intro_word = "updated local only"
        else:
            show_updated = 0
            show_archived = 1
            intro_word = "archived"
  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $"You have reached the end of the demo. \n\n This demo will end in " + str(int(4-t)) + " seconds."
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  Routine feedback
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    CodeComponent fb_code
      Code Type = Both
      Begin Experiment:
        fb = ""
      Begin JS Experiment:
        fb = "";
      Begin JS Routine:
        if (((white_correct + pink_correct) === 2)) {
            fb = ("Correct! Your time taken to complete the grid was " + time_taken.toFixed(3);
        } else {
            if (((white_correct + pink_correct) === 1)) {
                fb = "Oops! You got one of the grids wrong.";
            } else {
                if (((white_correct + pink_correct) === 0)) {
                    fb = "Oops! You got both grids wrong.";
                }
            }
        }
      Begin Routine:
        if white_correct + pink_correct == 2:
            fb = "Correct! Your time taken to complete the grid was " + str(round(time_taken, 3))
        elif white_correct + pink_correct == 1:
            fb = "Oops! You got one of the grids wrong."
        elif white_correct + pink_correct == 0:
            fb = "Oops! You got both grids wrong."
    TextComponent fb_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $fb
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  Routine updated_local_demo
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # create a list of grids to check where the square has been dropped
        grids = [grid1, grid2, grid3, grid4, grid5, grid6, grid7, grid8, grid9]

        # create a list of response squares
        resps = [resp_white, resp_pink]

        # set the response square to be draggable
        # new draggable attribute allows component to be dragged
        # even if the mouse is out of bounds of the dragging component
        for resp in resps:
            resp.draggable = True

        # reset the response square at the beginning of each trial
        resp_white.pos = [-0.65, -0.25]
        resp_pink.pos = [-0.45, -0.25]

        # variable to check which response is being made
        selected_resp_type = ""

        # variable to save which grid the square was dropped in
        white_grid_dropped = ""
        pink_grid_dropped = ""

        # only show the submit button when a square has been dropped
        showSubmit = False

        # variable to store if the trial was correct
        white_correct = 0
        pink_correct = 0

        # variable to store time taken to complete trial
        time_taken = 0
      Each Frame:
        # check through the different response types
        for resp in resps:
            # keep track of which colour response square is currently being used
            if mouse.isPressedIn(resp):
                selected_resp_type = resp.name

            # if a response square is clicked
            if selected_resp_type:
                # check through each response grid
                for grid in grids:
                    # if the mouse is within a grid and left click is pressed
                    if grid.contains(mouse) and mouse.getPressed()[0]:
                        if "white" in selected_resp_type:
                            # snap white square to nearest grid and save the grid
                            resp_white.setPos(grid.pos)
                            white_grid_dropped = grid.name
                        elif "pink" in selected_resp_type:
                            # snap pink square to nearest grid and save the grid
                            resp_pink.setPos(grid.pos)
                            pink_grid_dropped = grid.name
                        showSubmit = True

        # end the routine when the submit button is clicked
        # and record how long it took to complete trial
        if mouse.isPressedIn(submit_button) and t > 1:
            time_taken = t # fetch current time of trial
            continueRoutine = False
      End Routine:
        # save the grid where the square was dropped in to csv
        thisExp.addData("white_grid_dropped", white_grid_dropped)
        thisExp.addData("pink_grid_dropped", pink_grid_dropped)

        #print(trials.thisN+1, grid_dropped)


        if white_grid_dropped == white_correct_answer:
            white_correct = 1
        else:
            white_correct = 0

        if pink_grid_dropped == pink_correct_answer:
            pink_correct = 1
        else:
            pink_correct = 0

        # save correct variable and time taken
        thisExp.addData("white_correct", white_correct)
        thisExp.addData("pink_correct", pink_correct)
        thisExp.addData("time_taken", time_taken)

        print("white_correct:", white_correct)
        print("pink_correct:", pink_correct)
    ImageComponent stim
      image [set every repeat] = $stims
      pos = (-0.5, 0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent grid1
      fillColor = black
      lineColor = black
      pos = (0.3, 0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid2
      fillColor = black
      lineColor = black
      pos = (0.475, 0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid3
      fillColor = black
      lineColor = black
      pos = (0.65, 0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid4
      fillColor = black
      lineColor = black
      pos = (0.3, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid5
      fillColor = black
      lineColor = black
      pos = (0.475, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid6
      fillColor = black
      lineColor = black
      pos = (0.65, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid7
      fillColor = black
      lineColor = black
      pos = (0.3, -0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid8
      fillColor = black
      lineColor = black
      pos = (0.475, -0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid9
      fillColor = black
      lineColor = black
      pos = (0.65, -0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent resp_white
      fillColor = white
      pos = (-0.65, -0.25)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent resp_pink
      fillColor = pink
      lineColor = pink
      pos = (-0.45, -0.25)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent submit_button
      bold = False
      editable = False
      fillColor = lightseagreen
      letterHeight = 0.05
      pos = (0.6, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = showSubmit
      text = Submit
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  Routine archived_demo
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # create a list of grids to check where the square has been dropped
        grids = [grid1_2, grid2_2, grid3_2, grid4_2, grid5_2, grid6_2, grid7_2, grid8_2, grid9_2]

        # reset the response square at the beginning of each trial
        resp_2.pos = [-0.5, -0.25]

        # variable to save which grid the square was dropped in
        grid_dropped = ""

        # only show the submit button when a square has been dropped
        showSubmit = False

        # variable to store if the trial was correct
        correct = 0

        # variable to store time taken to complete trial
        time_taken = 0
      Each Frame:
        # create dragging effect
        if mouse_2.isPressedIn(resp_2):
            resp_2.pos = mouse_2.getPos()

        # check each grid
        for grid in grids:
            # if mouse is hovering over each grid
            if grid.contains(mouse_2):
                # if the left click is pressed down
                if mouse_2.getPressed()[0]:
                    # drop/snap the response square to that grid
                    resp_2.setPos(grid.pos)
                    # fetch which grid the square was dropped in
                    grid_dropped = grid.name
                    # show the submit button
                    showSubmit = True

        # end the routine when the submit button is clicked
        # and record how long it took to complete trial
        if mouse_2.isPressedIn(submit_button_2) and t > 1:
            time_taken = t # fetch current time of trial
            continueRoutine = False
      End Routine:
        # save the grid where the square was dropped in to csv
        thisExp.addData("grid_dropped", grid_dropped)

        #print(trials.thisN+1, grid_dropped)

        if grid_dropped == correct_answer:
            correct = 1
        else:
            correct = 0

        # save correct variable and time taken
        thisExp.addData("correct", correct)
        thisExp.addData("time_taken", time_taken)

        print("correct:", correct)
    ImageComponent stim_2
      image [set every repeat] = $stims
      pos = (-0.5, 0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent grid1_2
      fillColor = black
      lineColor = black
      pos = (0.3, 0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid2_2
      fillColor = black
      lineColor = black
      pos = (0.475, 0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid3_2
      fillColor = black
      lineColor = black
      pos = (0.65, 0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid4_2
      fillColor = black
      lineColor = black
      pos = (0.3, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid5_2
      fillColor = black
      lineColor = black
      pos = (0.475, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid6_2
      fillColor = black
      lineColor = black
      pos = (0.65, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid7_2
      fillColor = black
      lineColor = black
      pos = (0.3, -0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid8_2
      fillColor = black
      lineColor = black
      pos = (0.475, -0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent grid9_2
      fillColor = black
      lineColor = black
      pos = (0.65, -0.175)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent resp_2
      fillColor = white
      pos = (-0.5, -0.25)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent submit_button_2
      bold = False
      editable = False
      fillColor = lightseagreen
      letterHeight = 0.05
      pos = (0.6, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = showSubmit
      text = Submit
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  Routine intro
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You will now see the " + intro_word + " version. \n\n Click anywhere to start"
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    MouseComponent intro_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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Flow
  Routine instructions
  LoopInitiator updated_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = show_updated
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    Routine intro
    LoopInitiator updated_local_trials loopType="TrialHandler"
      conditionsFile = updated_conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'stims': 'stimuli/grid_image_1.png', 'white_correct_answer': 'grid9', 'pink_correct_answer': 'grid1'},
        {'stims': 'stimuli/grid_image_2.png', 'white_correct_answer': 'grid8', 'pink_correct_answer': 'grid4'},
        {'stims': 'stimuli/grid_image_3.png', 'white_correct_answer': 'grid3', 'pink_correct_answer': 'grid4'},
        {'stims': 'stimuli/grid_image_4.png', 'white_correct_answer': 'grid8', 'pink_correct_answer': 'grid9'},
        {'stims': 'stimuli/grid_image_5.png', 'white_correct_answer': 'grid8', 'pink_correct_answer': 'grid2'},
        {'stims': 'stimuli/grid_image_6.png', 'white_correct_answer': 'grid7', 'pink_correct_answer': 'grid4'},
        {'stims': 'stimuli/grid_image_7.png', 'white_correct_answer': 'grid9', 'pink_correct_answer': 'grid3'},
        {'stims': 'stimuli/grid_image_8.png', 'white_correct_answer': 'grid1', 'pink_correct_answer': 'grid5'},
        {'stims': 'stimuli/grid_image_9.png', 'white_correct_answer': 'grid8', 'pink_correct_answer': 'grid4'},
        {'stims': 'stimuli/grid_image_10.png', 'white_correct_answer': 'grid6', 'pink_correct_answer': 'grid4'}]
      Routine updated_local_demo
      Routine feedback
    LoopTerminator updated_local_trials
  LoopTerminator updated_loop
  LoopInitiator archived_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = show_archived
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    Routine intro
    LoopInitiator archived_trials loopType="TrialHandler"
      conditionsFile = archived_conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'stims': 'local_stimuli/grid_image_1.png', 'correct_answer': 'grid7_2'},
        {'stims': 'local_stimuli/grid_image_2.png', 'correct_answer': 'grid3_2'},
        {'stims': 'local_stimuli/grid_image_3.png', 'correct_answer': 'grid9_2'},
        {'stims': 'local_stimuli/grid_image_4.png', 'correct_answer': 'grid8_2'},
        {'stims': 'local_stimuli/grid_image_5.png', 'correct_answer': 'grid1_2'}]
      Routine archived_demo
      Routine feedback
    LoopTerminator archived_trials
  LoopTerminator archived_loop
  Routine end
