PsychoPy2experiment version="3.2.0"
Settings
  Audio latency priority = Use prefs
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'rows': '[2,3]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = shapeMaker
  runMode = 0
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        baseShape = visual.Rect(win, units="pix", size=(600,600), fillColor="white")

        def randCol():
            if random() >=.5:
                return "black"
            return "white"

        def createGrid(rows, size, pos, names):
            inc = (size/rows)/2
            if rows == 2:
                rowStart = pos[0] - size/4
                colStart = pos[1] + size/4
            else:
                rowStart = pos[0] - size/2
                colStart = pos[1] + size/2
            row, col = rowStart/rows, colStart/rows
            counter = 0

            grid = []
            for i in range(rows):
                for j in range(rows):
                    grid.append(visual.Rect(win, name=names[counter], units='pix', size = [size/rows, size/rows], pos= [row,col], lineColor= 'lightgrey', fillColor=randCol()))
                    row += inc
                    counter += 1
                col -= inc
                row = rowStart/rows
            return grid

        def drawGrid(grid):
            for i in grid:
                i.draw()

        imageCounter = 0
      Begin Routine:
        grid = createGrid(int(expInfo['rows']), 600, (0,0), names=[1,2,3,4,5,6,7,8,9])
        captured = False
      Each Frame:
        for i in range(60):
            baseShape.draw()
            drawGrid(grid)
            if i == 20 and not captured:
                win.getMovieFrame(buffer='back')
                captured = True
      End Routine:
        win.saveMovieFrames('design{}_{}pieces.jpg'.format(imageCounter,int(expInfo['rows'])**2))
        imageCounter += 1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
