PsychoPy2experiment version="2025.1.0"
Settings
  Audio latency priority = Use prefs
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'rows': '[2,3]'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [304, 304]
  color = black
  expName = shapeMaker
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
    RoutineSettingsComponent trial
      durationEstim = 0.05
      stopVal [frame N] = 3
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    CodeComponent takeScreenshot
      Code Type = Py
      Each Frame:
        # take a screenshot of the current window after 1 frame
        if frameN == 2:
            win.screenshot.save(targetImg)
    ImageComponent grid
      image = stimuli/blank_grid.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent pinkSquare
      draggable = True
      fillColor = pink
      lineColor = grey
      lineWidth = 8
      pos [set every repeat] = pinkSquarePos[0]/0.6, pinkSquarePos[1]/0.6
      shape = rectangle
      size = (1/3, 1/3)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent whiteSquare
      draggable = True
      fillColor = white
      lineColor = grey
      lineWidth = 8
      pos [set every repeat] = whiteSquarePos[0]/0.6, whiteSquarePos[1]/0.6
      shape = rectangle
      size = (1/3, 1/3)
      startVal [time (s)] = 0.0
      units = height
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = solutions.xlsx
    loopType = random
    nReps = int(not PILOTING)
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    conditions:
      [{'whiteSquarePos': (0.2, -0.2), 'pinkSquarePos': (-0.2, 0.2), 'targetImg': 'stimuli/solution_1.png'},
      {'whiteSquarePos': (0, -0.2), 'pinkSquarePos': (-0.2, 0), 'targetImg': 'stimuli/solution_2.png'},
      {'whiteSquarePos': (0.2, 0.2), 'pinkSquarePos': (-0.2, 0), 'targetImg': 'stimuli/solution_3.png'},
      {'whiteSquarePos': (0, -0.2), 'pinkSquarePos': (0.2, -0.2), 'targetImg': 'stimuli/solution_4.png'},
      {'whiteSquarePos': (0, -0.2), 'pinkSquarePos': (0, 0.2), 'targetImg': 'stimuli/solution_5.png'},
      {'whiteSquarePos': (-0.2, -0.2), 'pinkSquarePos': (-0.2, 0), 'targetImg': 'stimuli/solution_6.png'},
      {'whiteSquarePos': (0.2, -0.2), 'pinkSquarePos': (0.2, 0.2), 'targetImg': 'stimuli/solution_7.png'},
      {'whiteSquarePos': (-0.2, 0.2), 'pinkSquarePos': (0, 0), 'targetImg': 'stimuli/solution_8.png'},
      {'whiteSquarePos': (0, -0.2), 'pinkSquarePos': (-0.2, 0), 'targetImg': 'stimuli/solution_9.png'},
      {'whiteSquarePos': (0.2, 0), 'pinkSquarePos': (-0.2, 0), 'targetImg': 'stimuli/solution_10.png'}]
    Routine trial
  LoopTerminator trials
