PsychoPy2experiment version="2023.2.0rc6"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 800]
  backgroundFit = cover
  backgroundImg = assets/background.png
  color = grey
  expName = progressBar
  keyboardBackend = ioHub
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [condition] = target.status == FINISHED
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    ImageComponent ally
      anchor = top-left
      image = assets/ally.png
      interpolate = nearest
      pos = (-0.7, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ProgressComponent allyHealthBar
      anchor = bottom-left
      color = green
      fillColor = black
      lineWidth = 4
      pos = (-0.7, 0)
      progress = 0.5
      size = (0.3, 0.02)
      startVal [time (s)] = 0
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    ImageComponent enemy
      anchor = top-left
      image = assets/enemy.png
      interpolate = nearest
      pos = (0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ProgressComponent enemyHealthBar
      anchor = bottom-left
      color = red
      fillColor = black
      lineWidth = 4
      pos = (0.4, 0)
      progress = 0.5
      size = (0.3, 0.02)
      startVal [time (s)] = 0
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    ImageComponent doorClosed
      image = assets/door_closed.png
      interpolate = nearest
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent doorOpen
      image = assets/door_open.png
      interpolate = nearest
      size = (0.4, 0.4)
      startVal [time (s)] = $onset
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    ImageComponent target
      image [set every repeat] = $stim
      interpolate = nearest
      size = (0.4, 0.4)
      startVal [time (s)] = $onset
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $onset
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    CodeComponent doHealth
      Code Type = Auto->JS
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      End Routine:
        if ans and key_resp.keys:
            # if good and pressed, heal self
            allyHealthBar.progress += 0.1
        elif ans:
            # if good and missed, heal enemy
            enemyHealthBar.progress += 0.1
        elif key_resp.keys:
            # if bad and pressed, hurt self
            allyHealthBar.progress -= 0.1
        else:
            # if bad and missed, hurt enemy
            enemyHealthBar.progress -= 0.1

        # cap health at 1
        if allyHealthBar.progress > 1:
            allyHealthBar.progress = 1
        if enemyHealthBar.progress > 1:
            enemyHealthBar.progress = 1

        if allyHealthBar.progress <= 0:
            # if ally is 0hp, you lost
            success = False
            trials.finished = True

        if enemyHealthBar.progress <= 0:
            # if enemy is at 0hp, you won
            success = True
            trials.finished = True
  Routine congrat
    RoutineSettingsComponent congrat
      skipIf = not success
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    TextboxComponent congratMsg
      bold = False
      editable = False
      fillColor = $(-1, -1, -1, 0.5)
      letterHeight = 0.1
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Well done!
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  Routine comis
    RoutineSettingsComponent comis
      skipIf = success
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    TextboxComponent comisMsg
      bold = False
      editable = False
      fillColor = $(-1, -1, -1, 0.5)
      letterHeight = 0.1
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Too bad!
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  Routine instr
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    CodeComponent startVal
      Code Type = Auto->JS
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      Begin Routine:
        success = None
    TextboxComponent instrMsg
      bold = False
      editable = False
      fillColor = $(-1, -1, -1, 0.5)
      letterHeight = 0.04
      padding = 0.2
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        When you see a pig carrying a crate, press SPACE to heal yourself. If you miss it, it will heal the enemy.

        Do not press SPACE when you see a pig carrying a bomb, as it will hurt you. If you let it go, it will hurt the enemy.

        Keep your health above 0 and reduce the enemy's health to 0 to win.

        Press any key to begin.
    KeyboardComponent beginKeys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conds.xlsx
    loopType = random
    nReps = 100
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    conditions:
      [{'onset': 1, 'stim': 'assets/go.png', 'ans': True},
      {'onset': 2, 'stim': 'assets/go.png', 'ans': True},
      {'onset': 3, 'stim': 'assets/go.png', 'ans': True},
      {'onset': 4, 'stim': 'assets/go.png', 'ans': True},
      {'onset': 5, 'stim': 'assets/go.png', 'ans': True},
      {'onset': 1, 'stim': 'assets/nogo.png', 'ans': False},
      {'onset': 2, 'stim': 'assets/nogo.png', 'ans': False},
      {'onset': 3, 'stim': 'assets/nogo.png', 'ans': False},
      {'onset': 4, 'stim': 'assets/nogo.png', 'ans': False},
      {'onset': 5, 'stim': 'assets/nogo.png', 'ans': False}]
    Routine trial
  LoopTerminator trials
  Routine congrat
  Routine comis
