PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '', 'age': '', 'session': '03'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = black
  expName = NavonTask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixate
      color = $[1, 1, 1]
      letterHeight = 2
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
      units = cm
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    ImageComponent stimulus
      image [set every repeat] = $stimFile
      mask = none
      pos [set every repeat] = $[xPos, yPos]
      size = [200,200]
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.2
      units = pix
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    ImageComponent mask
      image = mask.png
      mask = none
      pos [set every repeat] = $[xPos, yPos]
      size = [200,200]
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 5.0
      units = pix
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    KeyboardComponent resp
      allowedKeys = 's', 'h'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 7.0
      storeCorrect = True
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  Routine instrPractice
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    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be presented with a large letter made up of smaller letters. Your task is to

        Respond by pressing;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        There will be a number of practice trials in which you will be given feedback.

        Press any key when you are ready to proceed.
  Routine instrMain
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    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
  Routine feedback
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    CodeComponent message
      Code Type = Auto->JS
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      Before Experiment:
        # This code will run before the experiment window is opened, after importing all of the necessary packages
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=" + str(round(resp.rt*1000)) + 'ms'
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine thanks
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    TextComponent thanksMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = You're done! Fun, wasn't it!? ;-)
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Flow
  Routine instrPractice
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    conditions:
      [{'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'},
      {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'},
      {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'},
      {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'},
      {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}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
    Routine trial
    Routine feedback
  LoopTerminator practiceTrials
  Routine instrMain
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'},
      {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'},
      {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'},
      {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'},
      {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
