PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '02'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[0, 0, 0]
  expName = sternberg
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentSet
      letterHeight = 0.1
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $numberSet
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    TextComponent presentTarget
      letterHeight = 0.1
      startVal [time (s)] = 4.7
      text [set every repeat] = $target
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    KeyboardComponent resp
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 4.7
      storeCorrect = True
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    TextboxComponent trial_counter
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(currentLoop.thisN) + '/' + str(currentLoop.nTotal)
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (1, 0.2)
      startVal [time (s)] = 5.7
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      text:
        Respond with the keys;
         - LEFT if the number was NOT in the sequence
         - RIGHT if the number WAS in the sequence
  Routine practInstruct
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    KeyboardComponent OK1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent instrtxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be presented with a sequence of between 1 and 6 randomly ordered numbers.

        Following a short delay you will then be presented with a single number and you will have to decide whether this new number was a member of the sequence.

        Respond with the keys;
         - LEFT if the number was NOT in the sequence
         - RIGHT if the number WAS in the sequence

        There will be a number of practice trials in which you will be given feedback.  Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
  Routine feedback
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    CodeComponent message
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=" + str(round(resp.rt*1000)) + 'ms'
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine mainInstruct
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    KeyboardComponent OK2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent instr_txt2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        OK, ready to start the main experiment?

        Remember:
         - LEFT for NOT in the sequence
         - RIGHT for IN the sequence
        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
  Routine thanks
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    TextComponent thanksMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Thanks for taking part!
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  Routine end
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    TextboxComponent endtxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Thanks for taking part!
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Flow
  Routine practInstruct
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = pracTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'numberSet': 6, 'target': 6, 'corrAns': 9, 'posInSet': 1, 'setSize': 1, 'present': 'y'},
      {'numberSet': 5, 'target': 3, 'corrAns': 1, 'posInSet': '--', 'setSize': 1, 'present': 'n'},
      {'numberSet': '4 8', 'target': 4, 'corrAns': 9, 'posInSet': 1, 'setSize': 2, 'present': 'y'},
      {'numberSet': '2 1', 'target': 5, 'corrAns': 1, 'posInSet': '--', 'setSize': 2, 'present': 'n'},
      {'numberSet': '2 9 4', 'target': 4, 'corrAns': 9, 'posInSet': 3, 'setSize': 3, 'present': 'y'},
      {'numberSet': '4 1 5', 'target': 2, 'corrAns': 1, 'posInSet': '--', 'setSize': 3, 'present': 'n'},
      {'numberSet': '1 5 2 9', 'target': 5, 'corrAns': 9, 'posInSet': 2, 'setSize': 4, 'present': 'y'},
      {'numberSet': '3 1 9 4', 'target': 6, 'corrAns': 1, 'posInSet': '--', 'setSize': 4, 'present': 'n'},
      {'numberSet': '1 7 9 8 5', 'target': 8, 'corrAns': 9, 'posInSet': 4, 'setSize': 5, 'present': 'y'},
      {'numberSet': '9 6 7 4 5', 'target': 3, 'corrAns': 1, 'posInSet': '--', 'setSize': 5, 'present': 'n'},
      {'numberSet': '4 3 1 7 9 8', 'target': 4, 'corrAns': 9, 'posInSet': 1, 'setSize': 6, 'present': 'y'},
      {'numberSet': '5 7 8 4 1 2', 'target': 6, 'corrAns': 1, 'posInSet': '--', 'setSize': 6, 'present': 'n'}]
    Routine trial
    Routine feedback
  LoopTerminator pracTrials
  Routine mainInstruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mainTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'numberSet': 5, 'target': 8, 'corrAns': 'left', 'posInSet': '--', 'setSize': 1, 'present': 'n'},
      {'numberSet': 9, 'target': 6, 'corrAns': 'left', 'posInSet': '--', 'setSize': 1, 'present': 'n'},
      {'numberSet': 1, 'target': 7, 'corrAns': 'left', 'posInSet': '--', 'setSize': 1, 'present': 'n'},
      {'numberSet': 4, 'target': 4, 'corrAns': 'right', 'posInSet': 1, 'setSize': 1, 'present': 'y'},
      {'numberSet': 7, 'target': 7, 'corrAns': 'right', 'posInSet': 1, 'setSize': 1, 'present': 'y'},
      {'numberSet': 8, 'target': 8, 'corrAns': 'right', 'posInSet': 1, 'setSize': 1, 'present': 'y'},
      {'numberSet': '8 9', 'target': 5, 'corrAns': 'left', 'posInSet': '--', 'setSize': 2, 'present': 'n'},
      {'numberSet': '6 8', 'target': 9, 'corrAns': 'left', 'posInSet': '--', 'setSize': 2, 'present': 'n'},
      {'numberSet': '7 9', 'target': 1, 'corrAns': 'left', 'posInSet': '--', 'setSize': 2, 'present': 'n'},
      {'numberSet': '6 2', 'target': 6, 'corrAns': 'right', 'posInSet': 1, 'setSize': 2, 'present': 'y'},
      {'numberSet': '2 3', 'target': 2, 'corrAns': 'right', 'posInSet': 1, 'setSize': 2, 'present': 'y'},
      {'numberSet': '3 4', 'target': 3, 'corrAns': 'right', 'posInSet': 1, 'setSize': 2, 'present': 'y'},
      {'numberSet': '7 1', 'target': 8, 'corrAns': 'left', 'posInSet': '--', 'setSize': 2, 'present': 'n'},
      {'numberSet': '4 1', 'target': 6, 'corrAns': 'left', 'posInSet': '--', 'setSize': 2, 'present': 'n'},
      {'numberSet': '5 2', 'target': 7, 'corrAns': 'left', 'posInSet': '--', 'setSize': 2, 'present': 'n'}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
    Routine trial
  LoopTerminator trials
  Routine end
