PsychoPy2experiment version="2021.2.0"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '01', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = stroop
  logging level = warning
  runMode = 0
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Routines
  Routine trial
    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextboxComponent word
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.2
      size = (None, None)
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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  Routine instruct
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
  Routine thanks
    TextboxComponent thanksText
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      [{'text': 'red', 'congruent': 1, 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 0, 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 1, 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 0, 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 1, 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 0, 'corrAns': 'left', 'letterColor': 'red'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
