PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {'participant':'', 'session':'01'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [2560, 1440]
  color = black
  expName = stroop
  logging level = warning
  runMode = 0
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent resp
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please press;
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Let's start with a few practice trials

        Press any key to continue
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent message
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
