PsychoPy2experiment version="2021.2.0"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [800, 600]
  expName = vvk
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Routines
  Routine playback_speech
    SoundComponent playback
      sound [set every repeat] = record.lastClip
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextboxComponent feedback
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $"You were shown {}, you said {}".format(word, record.lastScript)
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  Routine get_speech
    TextboxComponent prompt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $word
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    MicrophoneComponent record
      channels = stereo
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      transcribe = True
      transcribeBackend = BUILT-IN
      transcribeLang = en-US
      transcribeWords = [entry['word'] for entry in trials.trialList]
      trimSilent = False
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  Routine the_end
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        The end.

        Data and recordings are in folder "data/..."
  Routine instructions
    KeyboardComponent progress1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instr
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Task: Read each word out loud within
        2 seconds. There will be 3 trials.

        Press any key to start.
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'vowel_plosive': 'ah pa'},
      {'vowel_plosive': 'ee ka'},
      {'vowel_plosive': 'oo ta'}]
    Routine get_speech
    Routine playback_speech
  LoopTerminator trials
  Routine the_end
