PsychoPy2experiment version="2024.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = buttonBoxDemo
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ButtonBoxComponent buttonBox
      deviceBackend = keyboard
      deviceLabel = demoButtonBox
      forceEndRoutine = False
      kbButtonAliases = 'q', 'w', 'e', 'r', 't'
      registerOn = True
      startVal [time (s)] = 0.0
      store = first
      storeCorrect = False
      syncScreenRefresh = False
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    PolygonComponent button0
      fillColor [set every frame] = $buttonBox.getState(0)
      lineWidth = 4
      pos = (-0.4, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent button1
      fillColor [set every frame] = $buttonBox.getState(1)
      lineWidth = 4
      pos = (-0.2, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent button2
      fillColor [set every frame] = $buttonBox.getState(2)
      lineWidth = 4
      pos = (0.0, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent button3
      fillColor [set every frame] = $buttonBox.getState(3)
      lineWidth = 4
      pos = (0.2, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent button4
      fillColor [set every frame] = $buttonBox.getState(4)
      lineWidth = 4
      pos = (0.4, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextboxComponent instr
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text = Press some buttons! You should see the corresponding circle turn white when you press it.
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    TextboxComponent instrEnd
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text = Press ENTER to finish.
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    KeyboardComponent ender
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
