PsychoPy2experiment version="2024.1.0rc10"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = counterbalance
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = False
    nGroups = 2
    nReps = 1
    nSlots = 10
    saveData = True
    saveRemaining = True
    specMode = uniform
  Routine trial
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    TextboxComponent finishedLbl
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Is counterbalancing done? {counterbalance.finished}"
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    TextboxComponent remainingLbl
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Remaning slots in this condition: {counterbalance.remaining}"
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    TextboxComponent groupLbl
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (1, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"You are in group: {counterbalance.group}"
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent instr
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text = Press SPACE to finish. Try running again to see the counter decrease!
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Flow
  CounterbalanceRoutine counterbalance
  Routine trial
