PsychoPy2experiment version="2021.3.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 1024]
  expName = eyetracking
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine trial
    RegionOfInterestComponent roi
      debug = False
      endRoutineOn = look at
      lookDur = 5
      nVertices = 4
      ori = 0
      pos [set every repeat] = (random()/2, random()/2)
      save = every look
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent progress
      fillColor = white
      pos = (-0.5, -0.4)
      shape = custom polygon...
      size [set every frame] = (roi.currentLookTime/5, 0.1)
      startVal [time (s)] = 0.0
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    PolygonComponent target
      fillColor = black
      lineColor = None
      lineWidth = 10
      opacity = 0.2
      pos [set every repeat] = roi.pos
      shape = circle
      size [set every repeat] = roi.size
      startVal [time (s)] = 0.0
      vertices = roi.vertices
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    PolygonComponent gazeCursor
      fillColor [set every frame] = $("lightgreen" if roi.isLookedIn else "white")
      lineColor = None
      pos [set every frame] = eyetracker.getPos()
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent send_trial_msgs
      Code Type = Py
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      Begin Routine:
        ioServer.sendMessageEvent("TRIAL_START")
      End Routine:
        ioServer.sendMessageEvent("TRIAL_END")
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine instr
    TextboxComponent instructions
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        This experiment shows off the eyetracking capabilities of Builder.

        In each trial, to move on, look at the dark circle for 5 seconds. The bar at the bottom will show how long you've been looking at it for, the cross will move with your eyes and will turn green when you're looking in the circle.

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stop_record
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    EyetrackerRecordComponent etRecord_3
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
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  Routine fixate
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    EyetrackerRecordComponent etRecord_2
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  EyetrackerCalibrationRoutine calibration
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixate
    Routine trial
    Routine stop_record
  LoopTerminator trials
