PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = visualSearch
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = ('RIGHT_BUTTON',)
  mgSaccade = 0.5
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Routines
  Routine instructions
    EyetrackerRecordComponent instructions_record
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextboxComponent instr
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (1, 0.6)
      startVal [time (s)] = 0.0
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      text:
        Fixate on the blue circle.

        Then fixate on the hexagon as
        quickly as possible.

        Press ESCAPE at any time to exit the experiment.
        Press any key to start.
    TextboxComponent progress
      bold = False
      editable = False
      fillColor = blue
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      text = Look here to move on
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    RegionOfInterestComponent progress_roi
      debug = False
      endRoutineOn = look at
      lookDur = 500
      nVertices = 4
      ori = 0
      pos = (0, -0.3)
      save = every look
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent instructions_gaze_cursor
      fillColor = blue
      ori = 45
      pos [set every frame] = instructions_record.pos
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine fixation
    EyetrackerRecordComponent fix_record
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    RegionOfInterestComponent fix_roi
      debug = False
      endRoutineOn = look at
      lookDur = 300
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent fix
      fillColor = blue
      lineColor = None
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_gaze_cursor
      fillColor = blue
      ori = 45
      pos [set every frame] = fix_record.pos
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine trial
    EyetrackerRecordComponent trial_record
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent target
      fillColor [set every repeat] = $target_color
      nVertices = 6
      pos [set every repeat] = (x_positions[0], y_positions[0])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    RegionOfInterestComponent target_roi
      debug = False
      endRoutineOn = look at
      lookDur = 300
      nVertices = 6
      ori = 0
      pos [set every repeat] = (x_positions[0], y_positions[0])
      save = every look
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    CodeComponent show_hide_distractors
      Code Type = Auto->JS
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      Begin Routine:
        # Show / hide distractors according to the number needed this trial
        for obj in distractors[:n_distractors]:
            obj.opacity = 1
        for obj in distractors[n_distractors:]:
            obj.opacity = 0
    VariableComponent distractors
      startRoutineValue = [distractor_1, distractor_2, distractor_3, distractor_4, distractor_5, distractor_6, distractor_7, distractor_8] # List of all distractors
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    PolygonComponent distractor_1
      fillColor [set every repeat] = $distractor_color
      nVertices = 6
      pos [set every repeat] = (x_positions[1], y_positions[1])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent distractor_2
      fillColor [set every repeat] = $distractor_color
      nVertices = 6
      pos [set every repeat] = (x_positions[2], y_positions[2])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent distractor_3
      fillColor [set every repeat] = $distractor_color
      nVertices = 6
      pos [set every repeat] = (x_positions[3], y_positions[3])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent distractor_4
      fillColor [set every repeat] = $distractor_color
      nVertices = 6
      pos [set every repeat] = (x_positions[4], y_positions[4])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent distractor_5
      fillColor [set every repeat] = $distractor_color
      nVertices = 6
      pos [set every repeat] = (x_positions[5], y_positions[5])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent distractor_6
      fillColor [set every repeat] = $distractor_color
      nVertices = 6
      pos [set every repeat] = (x_positions[6], y_positions[6])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent distractor_7
      fillColor [set every repeat] = $distractor_color
      nVertices = 6
      pos [set every repeat] = (x_positions[7], y_positions[7])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent distractor_8
      fillColor [set every repeat] = $distractor_color
      nVertices = 6
      pos [set every repeat] = (x_positions[8], y_positions[8])
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    VariableComponent y_positions
      startExpValue = [-0.4, -0.3, -0.2, -0.1, 0, 0.1, 0.2, 0.3, 0.4]
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    VariableComponent x_positions
      startExpValue = [-0.4, -0.3, -0.2, -0.1, 0, 0.1, 0.2, 0.3, 0.4]
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    CodeComponent shuffle_positions
      Code Type = Auto->JS
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      Begin Experiment:
        shuffle(x_positions)
        shuffle(y_positions)
      Begin Routine:
        shuffle(x_positions)
        shuffle(y_positions)
    PolygonComponent trial_gaze_cursor
      fillColor = blue
      ori = 45
      pos [set every frame] = trial_record.pos
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = white
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 3
    innerFillColor = red
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.25
    outerRadius = 0.025
    progressMode = time
    randomisePos = True
    targetDelay = 1.25
    targetDur = 1
    targetLayout = NINE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_params.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 8},
      {'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 7},
      {'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 6},
      {'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 5},
      {'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 4},
      {'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 3},
      {'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 2},
      {'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 1},
      {'target_color': 'black', 'distractor_color': 'red', 'n_distractors': 0},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 8},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 7},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 6},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 5},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 4},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 3},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 2},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 1},
      {'target_color': 'red', 'distractor_color': 'black', 'n_distractors': 0}]
    Routine fixation
    Routine trial
  LoopTerminator trials
