PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 1024]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = True
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = eyetracking_eyelink_custom_cal
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine trial
    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 2.5
      nVertices = 4
      ori = 0
      pos [set every repeat] = (random()/2, random()/2)
      save = every look
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent progress
      fillColor = white
      pos = (-0.5, -0.4)
      shape = custom polygon...
      size [set every frame] = (roi.currentLookTime/5, 0.1)
      startVal [time (s)] = 0.0
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    PolygonComponent target
      fillColor = black
      lineColor = None
      lineWidth = 10
      opacity = 0.2
      pos [set every repeat] = roi.pos
      shape = circle
      size [set every repeat] = roi.size
      startVal [time (s)] = 0.0
      vertices = roi.vertices
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    PolygonComponent gazeCursor
      fillColor [set every frame] = $("lightgreen" if roi.isLookedIn else "white")
      lineColor = None
      pos [set every frame] = eyetracker.getPos()
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine instr
    TextboxComponent instructions
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        This experiment shows off the eyetracking capabilities of Builder.

        In each trial, to move on, look at the dark circle for 5 seconds. The bar at the bottom will show how long you've been looking at it for, the cross will move with your eyes and will turn green when you're looking in the circle.

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixate
    TextComponent fixationCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    EyetrackerRecordComponent startRecording
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine stopRecord
    TextComponent fixTargetEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    EyetrackerRecordComponent stopRecording
      actionType = Stop Only
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
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  Routine calib_custom
    CodeComponent code
      Code Type = Py
      Before Experiment:
        from psychopy.iohub.util import hideWindow, showWindow
      Begin Routine:
        # Define the custom target graphics class to use for calibration
        targ_dict = dict(custom=dict(module_name='psychopy.visual',
                                     class_name='MovieStim3',
                                     class_kwargs=dict(filename='Bullseye_grey.MOV',
                                                       units=win.units,
                                                       size = 0.1,
                                                       loop=True)))

        # Update the eye tracker calibration settings
        calib_config = dict(type='NINE_POINTS',
                            screen_background_color=win.color,
                            target_type='CUSTOM',
                            unit_type=win.units,
                            target_attributes = targ_dict)

        # Hide the psychopy experiment window
        hideWindow(win)

        # Show the iohub eye tracker camera setup / calibration window
        # and run the eye tracker calibration etc...
        result = eyetracker.runSetupProcedure(calib_config)
        print("Calibration returned: ", result)

        # Show the psychopy experiment window and continue with experiment
        showWindow(win)
Flow
  Routine calib_custom
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixate
    Routine trial
    Routine stopRecord
  LoopTerminator trials
