PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = EnvelopeGratingExample
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Routines
  Routine trial
    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = raisedCos
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 4.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Isotropic
      opacity = 0.5
      pos = (5, -5)
      sf = 1/10
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
      units = deg
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    EnvGratingComponent ModNoise
      beat = False
      blendmode = add
      carrier [set every repeat] = $noise.tex
      contrast = 0.2
      envelope = sin
      envori = 0.0
      envphase [set every frame] = sin(t)
      envsf = 1.0
      mask = raisedCos
      moddepth = 1
      pos = (-5, 5)
      power = 1.0
      sf = 1/10
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
      units = deg
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    EnvGratingComponent ModSin
      beat = False
      blendmode = add
      carrier = sin
      contrast = 0.5
      envelope = sin
      envori [set every frame] = -t*5
      envphase = 0.0
      envsf = 1.0
      mask = raisedCos
      moddepth = 1.0
      ori [set every frame] = t*5
      pos = (5, 5)
      power = 1.0
      sf = 8.0
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
      units = deg
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    EnvGratingComponent Beat
      beat = True
      blendmode = add
      carrier = sin
      envelope = sin
      envori = 0.0
      envphase = 0
      envsf = 1.0
      mask = raisedCos
      moddepth = 1.0
      ori = 90
      pos = (-5, -5)
      power = 1.0
      sf = 8
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
      units = deg
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    EnvGratingComponent NoiseAddBeat
      beat = True
      blendmode = add
      carrier [set every repeat] = $noise.tex
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      mask = raisedCos
      moddepth = 1.0
      pos = (5, -5)
      power = 1.0
      sf = 1.0/10
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    TextComponent ModNoiseText
      letterHeight = 0.5
      pos = (-5, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Contrast modulated noise
      units = deg
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    TextComponent MosSinText
      letterHeight = 0.5
      pos = (5, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Contrast modulated sinewave
      units = deg
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    TextComponent BeatText
      letterHeight = 0.5
      pos = (-5, -10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Sine wave beat
      units = deg
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    TextComponent BeatNoiseText
      letterHeight = 0.5
      pos = (5, -10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Beat of noise added to same noise to make contrast modulated noise
      units = deg
      wrapWidth = 10
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  Routine Intro_text
    TextComponent text
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = This demo makes various types of contrast modulated stimulus. Including examples of contrast modulates sine waves, sine wave beat stimuli, contrast modulated noise using a noise stimulus component as the carrier texture and adding a beat based on a noise carrier back to the noise sample to create contrast modulated noise.
      units = deg
      wrapWidth = 10
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Flow
  Routine Intro_text
  Routine trial
