PsychoPy2experiment version="2021.1.0"
Settings
  Audio latency priority = 4
  Audio lib = pygame
  Enable Escape = False
  Experiment info = {'session': '1', 'participant': '001', 'Eye Tracker Config': 'eyelink_config.yaml'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = visualsearch_eyetracker
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Routines
  Routine fixation
    PolygonComponent fixation_target
      fillColor = $[-1,-1,1]
      lineColor = $[-1,-1,1]
      nVertices = 99
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent get_eye_pos
      Code Type = Auto->JS
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      Begin Routine:
        # Clear any keyboard events
        # received before start of trial.
        event.clearEvents()

        #Start collecting eye tracker data
        eye_tracker.setRecordingState(True)

        missed_samples = 0
        fixation_started = False
      Each Frame:
        gaze_pos = eye_tracker.getPosition()

        if type(gaze_pos) not in [list, tuple]:
            missed_samples = missed_samples + 1
        else:
            gaze_x, gaze_y = gaze_pos
            distance_from_centre = sqrt(gaze_x ** 2 + gaze_y ** 2)
            if distance_from_centre <= 60:
                if not fixation_started:
                    fixation_started = True
                    fixation_start_time = t
                elif t - fixation_start_time > 0.3:
                    continueRoutine = False
            else:
                fixation_started = False

        # Check for 'escape' key,
        # indicating paricipant ended experiment.
        keys = event.getKeys()
        if keys:
            if 'escape' in keys:
                eye_tracker.setRecordingState(False)
                eye_tracker.setConnectionState(False)
                print("Exiting experiment, ESCAPE was presssed.")
                io.quit()
                core.quit()
      End Routine:
        #print('Could not read eye position on ' + str(missed_samples) + ' frames during fixation period of experiment.')
    PolygonComponent gaze_position
      lineColor = $[-1,-1,1]
      nVertices = 99
      pos [set every frame] = (gaze_x, gaze_y)
      shape = regular polygon...
      size = (30, 30)
      startVal [time (s)] = 0.0
      units = pix
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  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        x_pos = [-400, -300, -200, -100, 0, 100, 200, 300, 400]
        y_pos = [-200, -150, -100, -50, 0, 50, 100, 150, 200]

        #x_pos = [-0.4, -0.3, -0.2, -0.1, 0.0, 0.1, 0.2, 0.3, 0.4]
        #y_pos = [-0.4, -0.3, -0.2, -0.1, 0.0, 0.1, 0.2, 0.3, 0.4]

        #correct_sound = sound.Sound(u'A', secs = 0.4)
        #correct_sound.setVolume(1)
        #wrong_sound = sound.Sound(u'D', secs = 0.4)
      Begin Routine:
        shuffle(x_pos)
        shuffle(y_pos)

        missed_samples = 0
      Each Frame:
        gaze_pos = eye_tracker.getPosition()

        try:
            gaze_x, gaze_y = gaze_pos
        except:
            gaze_pos = None
            missed_samples = missed_samples + 1

        # Check for 'escape' key,
        # indicating paricipant ended experiment.
        keys = event.getKeys()
        if keys:
            if 'escape' in keys:
                eye_tracker.setRecordingState(False)
                eye_tracker.setConnectionState(False)
                print("Exiting experiment, ESCAPE was presssed.")
                io.quit()
                core.quit()

        if gaze_pos:
            if target.contains(gaze_x, gaze_y):
                thisExp.addData('RT', t)
                continueRoutine = False
            else:
                for distractor in [distract_1, distract_2, distract_3, distract_4, distract_5, distract_6, distract_7, distract_8]:
                    if distractor.contains(gaze_x, gaze_y) and distractor.opacity > 0.99:
                        pass#wrong_sound.play()
      End Experiment:
        eye_tracker.setConnectionStae(False)
      End Routine:
        eye_tracker.setRecordingState(False)
        #win.getMovieFrame()
        #win.saveMovieFrames('data/pngs/search_{}.png'.format(trials.thisN), codec='png')
        #print('Eye position could not be read on ' + str(missed_samples) + ' frames during the trial.')
    PolygonComponent target
      fillColor [set every repeat] = $target_color
      lineWidth = 0
      nVertices = 6
      ori = 30
      pos [set every repeat] = (x_pos[0], y_pos[0])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_1
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_1
      pos [set every repeat] = (x_pos[1], y_pos[1])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_2
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_2
      pos [set every repeat] = (x_pos[2], y_pos[2])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_3
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_3
      pos [set every repeat] = (x_pos[3], y_pos[3])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_4
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_4
      pos [set every repeat] = (x_pos[4], y_pos[4])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_5
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_5
      pos [set every repeat] = (x_pos[5], y_pos[5])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_6
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_6
      pos [set every repeat] = (x_pos[6], y_pos[6])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_7
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_7
      pos [set every repeat] = (x_pos[7], y_pos[7])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_8
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_8
      pos [set every repeat] = (x_pos[8], y_pos[8])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent gaze_position_1
      lineColor = $[-1,-1,1]
      nVertices = 99
      pos [set every frame] = (gaze_x, gaze_y)
      shape = regular polygon...
      size = (30, 30)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instruct
    TextComponent instructs
      color = blue
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Fixate on the blue circle.

        Then fixation the hexagon as
        quickly as possible.

        Press ESCAPE at any time to exit experiment.
        Press any key to start.
    KeyboardComponent proceed_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent only_run_each18
      Code Type = Auto->JS
      Begin Routine:
        if trials.thisN % 18 != 0:
            continueRoutine = False
    TextComponent block_info
      color = blue
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Block: ' + str(trials.thisRepN)
      units = norm
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  Routine tracker_setup
    CodeComponent tracker_code
      Code Type = Auto->JS
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      Begin Experiment:
        eye_tracker = None
        gaze_x = gaze_y = 0.0
        io = None
        # get the name of the eye tracker
        # config file from the expInfo dialog:
        config_file = expInfo['Eye Tracker Config']

        # only proceed if the filename points to a valid file:
        if os.path.isfile(config_file):
            # import some needed libraries from ioHub:
            from psychopy.iohub import util, launchHubServer

            et_config = util.readConfig(config_file)
            io = launchHubServer(**et_config)
            eye_tracker = io.getDevice('tracker')
        else:
            print("Quit because eye tracker config {} could not be loaded.".format(config_file))
            core.quit()

        if not eye_tracker:
            print("Quit because couldn't connect to eye tracker.")
            io.quit()
            core.quit()
      End Experiment:
        io.quit()
      End Routine:
        # Minimize experiment window
        win.winHandle.minimize()

        # Run eye tracker setup / calibration
        # which opens a seperate full screen
        # window.
        eye_tracker.runSetupProcedure()

        # Eye tracker setup complete.
        # Maximize experiment window.
        win.winHandle.activate()
        win.winHandle.maximize()
    TextComponent tracker_message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Press any key to start
        Eye Tracker setup / calibration.
    KeyboardComponent proceed
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    PolygonComponent target_2
      fillColor = green
      lineWidth = 0
      nVertices = 6
      ori = 30
      pos [set every repeat] = (x_pos[0], y_pos[0])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent distract
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_1
      pos [set every repeat] = (x_pos[1], y_pos[1])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent distract_9
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_2
      pos [set every repeat] = (x_pos[2], y_pos[2])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent distract_10
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_3
      pos [set every repeat] = (x_pos[3], y_pos[3])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent distract_11
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_4
      pos [set every repeat] = (x_pos[4], y_pos[4])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent distract_12
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_5
      pos [set every repeat] = (x_pos[5], y_pos[5])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent distract_13
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_6
      pos [set every repeat] = (x_pos[6], y_pos[6])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent distract_14
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_7
      pos [set every repeat] = (x_pos[7], y_pos[7])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent distract_15
      fillColor = $[-1,-1,-1]
      interpolate = nearest
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_8
      pos [set every repeat] = (x_pos[8], y_pos[8])
      shape = regular polygon...
      size = (40,40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent gaze_position_2
      lineColor = $[-1,-1,1]
      nVertices = 99
      pos [set every frame] = (gaze_x, gaze_y)
      shape = regular polygon...
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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Flow
  Routine tracker_setup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = search_conditions.xlsx
    loopType = random
    nReps = 20
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    conditions:
      "[{u'opacity_7': 1L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 8L, u'opacity_8': 1L},
      {u'opacity_7': 1L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 7L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 6L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 5L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 4L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 0L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 3L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 0L, u'opacity_3': 0L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 2L, u'opacity_8': 0L}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
    Routine instruct
    Routine fixation
    Routine trial
    Routine feedback
  LoopTerminator trials
