PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = microphone
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Routines
  Routine proseRecord
    TextboxComponent prosePrompt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $phrase
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    PolygonComponent timer
      fillColor = white
      pos = (-1, -1)
      shape = custom polygon...
      size [set every frame] = (t/5*2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    MicrophoneComponent mic
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      transcribe = True
      transcribeBackend = Google Cloud
      transcribeLang = en-US
      trimSilent = False
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  Routine proseFeedback
    TextboxComponent proseScript
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You said...\n\n" + str(mic.lastScript) + "\n\nPress SPACE to continue"
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = phrases.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'phrase': 'She sells sea shells by the sea shore'},
      {'phrase': 'Peter Piper picked a peck of pickled peppers'},
      {'phrase': 'How much wood would a wood chuck chuck if a wood chuck could chuck wood?'},
      {'phrase': 'How can a clam cram into a clean cream can?'},
      {'phrase': 'I saw Susie sitting in a shoeshine shop'}]
    Routine proseRecord
    Routine proseFeedback
  LoopTerminator trials
