PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pronunciationChecker
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Routines
  Routine check
    TextboxComponent feedback
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $"The phrase was:\n" + phrase + "\nYou said:\n" + " ".join(mic.lastScript)
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    KeyboardComponent progress2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine record
    MicrophoneComponent mic
      channels = stereo
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      transcribe = True
      transcribeBackend = GOOGLE
      transcribeLang = fr
      trimSilent = False
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    TextboxComponent phraseToRead
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $phrase
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    KeyboardComponent progress1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will be presented with a series of phrases in French, please read these out loud and then press "SPACE" to progress. After each, you will be shown how accurate you were, according to the Microphone component's transcription.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine inst
  LoopInitiator phraseLoop loopType="TrialHandler"
    conditionsFile = phrases.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'phrases': 'C’est simple comme bonjour\xa0'},
      {'phrases': 'On n’est pas sorti de l’auberge'},
      {'phrases': 'Être dans la galère'},
      {'phrases': 'Mettre les points sur les i'},
      {'phrases': 'À qui mieux mieux'},
      {'phrases': 'Il ne faut pas pousser mémé dans les orties'},
      {'phrases': 'Ça ne casse pas trois pattes à un canard'},
      {'phrases': 'Pisser dans un violon'},
      {'phrases': 'Chacun voit midi à sa porte'},
      {'phrases': 'Au petit bonheur la chance'}]
    Routine record
    Routine check
  LoopTerminator phraseLoop
