PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = movie
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine movie_playback
    RoutineSettingsComponent movie_playback
      desc = Contains a Movie Component and controls for its playback.
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie = default.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent navbar
      borderColor = darkgrey
      fillColor = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      labels = "", ""
      letterHeight = 0.05
      pos = (0.1, -0.4)
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 1)
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    ButtonComponent button
      bold = True
      font = JetBrains Mono
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.45, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text [set every frame] = $"||" if movie.isPlaying else "▶"
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      callback:
        if movie.isPlaying:
            movie.pause()
        else:
            movie.play()
    CodeComponent playbackCode
      Code Type = Auto->JS
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      Each Frame:
        if navbar._dragging:
            # pause the movie while the navbar is being dragged
            movie.pause()
        elif navbar.rating is not None:
            # if slider has been set, navigate to that point in the video then resume
            movie.seek(
                navbar.rating * movie.duration
            )
            movie.play()
            # reset slider
            navbar.reset()
        else:
            # update slider with movie timestamp each frame
            navbar.markerPos = movie.pts / max(movie.duration, 0.0001)
Flow
  Routine movie_playback
