PsychoPy2experiment version="2022.3.0dev5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  blendMode = nofbo
  expName = panorama2
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    PanoramaComponent pan
      downKey = d
      image = panImg.jpg
      inKey = up
      leftKey = s
      outKey = down
      posCtrl = drag
      posSensitivity = 1
      rightKey = f
      smooth = True
      startVal [time (s)] = 0
      stopKey = space
      upKey = e
      zoom [set every frame] = t
      zoomCtrl = wheel
      zoomSensitivity = 1
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    TextboxComponent textbox
      alignment = center-left
      anchor = bottom-left
      bold = False
      editable = False
      fillColor = black
      font = Courier New
      letterHeight = 0.02
      opacity = 0.8
      padding = (0.05, 0)
      pos = (-1, -1)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        St Mary Magdalene Church, Newark-on-Trent, UK.
        Photograph by Todd Parsons for Open Science Tools, taken on a Fairphone 4 via Google Streetview for Android.
Flow
  Routine trial
