PsychoPy2experiment version="2024.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = pilotMode
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine autoKb
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    KeyboardComponent keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent autoKbTxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue (or if you're in pilot mode, just wait 0.5s!)
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    CodeComponent makePress
      Code Type = Auto->JS
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      Each Frame:
        # if piloting, send a dummy keypress after 0.5s
        if PILOTING and t > 0.5:
            keyResp.device.makeResponse(code="space", tDown=t)

        # no more tedious key mashing!
  Routine skipped
    RoutineSettingsComponent skipped
      skipIf = PILOTING
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    TextboxComponent skipTxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This trial will be skipped in piloting mode. Check the Routine Settings to see how!
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  Routine autoSlider
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Yes", "No", "I am a robot"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2)
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    CodeComponent makeRating
      Code Type = Auto->JS
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      Each Frame:
        # if piloting, make a dummy response after 0.5s
        if PILOTING and t > 0.5:
            slider.rating = 2

        # no more tedious clicking!
    TextboxComponent autoSliderTxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Choose to continue (or if you're in pilot mode, just wait 0.5s!)
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  Routine skippedSection
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    TextboxComponent skippedSectionTxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = This entire loop is skipped in piloting mode!
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Flow
  Routine autoKb
  Routine autoSlider
  Routine skipped
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5 * (not PILOTING)
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    Routine skippedSection
  LoopTerminator trials
