PsychoPy2experiment version="2023.2.0rc6"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = cornflowerblue
  expName = progressBar
  keyboardBackend = ioHub
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 15
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    TextboxComponent timer10label
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text = A 10 second timer:
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    ProgressComponent timer10
      anchor = center left
      borderColor = grey
      color = grey
      fillColor = black
      lineWidth = 4
      pos = (-0.5, 0.3)
      progress [set every frame] = min(t/10, 1)
      size = (1, 0.1)
      startVal [time (s)] = 0
      units = height
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    TextboxComponent timer5label
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text = A 5 second timer:
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    ProgressComponent timer5
      anchor = center left
      borderColor = darkgrey
      color = darkgrey
      fillColor = black
      lineWidth = 4
      pos = (-0.5, 0.1)
      progress [set every frame] = min(t/5, 1)
      size = (1, 0.1)
      startVal [time (s)] = 0
      units = height
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    TextboxComponent timer1label
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.0)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text = A 1 second timer:
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    ProgressComponent timer1
      anchor = center left
      borderColor = lightgrey
      color = lightgrey
      fillColor = black
      lineWidth = 4
      pos = (-0.5, -0.1)
      progress [set every frame] = min(t, 1)
      size = (1, 0.1)
      startVal [time (s)] = 0
      units = height
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    TextboxComponent trialCtrLabel
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text = Trials complete:
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    ProgressComponent trialCtr
      anchor = center left
      borderColor = dodgerblue
      color = dodgerblue
      fillColor = white
      lineWidth = 4
      pos = (-0.5, -0.3)
      progress [set every repeat] = trials.thisN/5
      size = (1, 0.1)
      startVal [time (s)] = 0
      units = height
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    TextboxComponent nextLbl
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text = Press SPACE to go to the next trial
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    KeyboardComponent nextBtn
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
