PsychoPy2experiment version="2021.1.0.dev4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 720]
  expName = sliders2
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Routines
  Routine dynamic_stim
    GratingComponent testStim
      mask = circle
      ori [set every frame] = ori.value or 0
      pos [set every frame] = (pos.value or 0.2, 0)
      sf = 8
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 256
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    TextboxComponent oriLabel
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.2, -0.4)
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      text = Ori
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    SliderComponent ori
      borderColor = white
      color = white
      fillColor = darkred
      forceEndRoutine = False
      granularity = 0
      labels = (0, 180)
      letterHeight = 0.05
      pos = (-0.2, -0.05)
      size = (0.1, 0.6)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 45, 90, 135, 180)
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    TextboxComponent posLabel
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.5, -0.4)
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      text = xPos
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    SliderComponent pos
      borderColor = white
      color = white
      fillColor = darkred
      forceEndRoutine = False
      granularity = 0
      labels = 0.1, 0.5
      letterHeight = 0.05
      ori = ori.value or 0
      pos = (-0.5, -0.05)
      size = (0.1, 0.6)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 0.1, 0.2, 0.3, 0.4, 0.5
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    TextboxComponent dynoInst
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
      text = Use the orientation and position sliders to move the stimulus.
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    ButtonComponent dynoDone
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (0.65, -0.45)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.1
      text = Continue >
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  Routine fruit_rating
    TextboxComponent fruitLabel
      bold = False
      editable = False
      letterHeight = 0.1
      pos = (0, 0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fruitName
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    SliderComponent sourness
      borderColor = yellow
      color = white
      fillColor = green
      forceEndRoutine = False
      granularity = 0.5
      labels = ('sour','','neutral','','sweet')
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent yumminess
      borderColor = purple
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 0.5
      labels = 'yucky','yummy'
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = triangleMarker
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent fruitDone
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (0.65, -0.45)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.1
      text = Continue >
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  Routine slider_styles
    VariableComponent colorNames
      startExpValue = ['red', 'orange', 'green', 'salmon']
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    TextboxComponent stylesInst
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.45)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      text = Click on some sliders to see their markers
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    SliderComponent categ
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 1
      labels = *colorNames
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = *list(range(len(colorNames)))
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    PolygonComponent categShape
      fillColor [set every frame] = $colorNames[int(categ.rating or 0)]
      lineColor = None
      opacity [set every frame] = leftLabels.value or 1
      pos [set every frame] = (0, (rightLabels.value or 0.3)-0.4)
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    SliderComponent leftLabels
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 0
      labels = 'left','hand','labels'
      letterHeight = 0.05
      pos = (-0.5, 0)
      size = (0.05, 0.6)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 0.001, 0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1.0
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    SliderComponent rightLabels
      borderColor = white
      color = white
      fillColor = red
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('flip', 'for', 'right-hand')
      letterHeight = 0.05
      pos = (0.5, 0)
      size = (0.05, 0.6)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0.1, 0.7)
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    ButtonComponent stylesDone
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (0.65, -0.45)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text = Continue >
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  Routine customMarker
    SliderComponent customSlider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      styles = triangleMarker
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent finger
      bold = False
      color = black
      editable = False
      font = Noto Sans JP
      letterHeight = 0.1
      padding = 0.03
      size = (0.15,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = ☝
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    CodeComponent setMarker
      Code Type = Auto->JS
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      Begin Routine:
        # Set finger as the object to use as the slider's marker
        customSlider.marker = finger
    TextboxComponent customInst
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.5)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text = Did you know you can use any component with a draw() function as a custom marker for a Slider?
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    ButtonComponent customDone
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      padding = 0.02
      pos = (0.65, -0.45)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.1
      text = End
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Flow
  Routine slider_styles
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fruitConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'fruitName': 'apple'},
      {'fruitName': 'grapefruit'},
      {'fruitName': 'banana'},
      {'fruitName': 'satsuma'}]
    Routine fruit_rating
  LoopTerminator trials
  Routine dynamic_stim
  Routine customMarker
