PsychoPy2experiment version="2025.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visualValidator
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor [set every repeat] = $randchoice(["yellow", "green", "blue", "purple", "red", "orange"])
      ori [set every repeat] = randint(0, 365)
      pos [set every repeat] = (random()-0.5, random()-0.5)
      shape = star7
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      validator = visualVal
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.035
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Can you see the light sensor patch? It should be white when the star is on screen and black otherwise
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  VisualValidatorRoutine visualVal
    channel = 0
    deviceBackend = screenbuffer
    deviceLabel = demoLightSensor
    findSensor = True
    findThreshold = True
    sensorPos = (1, 1)
    sensorSize = (0.1, 0.1)
    sensorUnits = norm
    threshold = 0.5
Flow
  VisualValidatorRoutine visualVal
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine trial
  LoopTerminator trials
