PsychoPy2experiment version="2024.1.0rc11"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = EEG_triggers_serial_code
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This demo will send the following triggers:

        1 - On the onset of a stimulus
        2 - On a key press

        It illustrates how you can use code components to send triggers via a serial port.

        Press any key to start
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_trigger_values_code
      Code Type = Auto->JS
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      Begin Experiment:
        stimulus_on = 1
        key_pressed = 2
  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You should see a trigger with the value 5. This marks the end of the experiment. 
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent end_trigger
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [time (s)] = 0.0
      startdata = $end_demo
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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    ParallelOutComponent end_trigger_par
      address = 0x0378
      register = EIO
      startData = end_demo
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine serial_code_trials
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    CodeComponent setup_serial
      Code Type = Auto->JS
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      Begin Experiment:
        my_port = serial.Serial('COM3') #Change 'COM3' here to your serial port address
    TextComponent stimulus_response_text_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You should now see a trigger with the value 2, appearing at the same time as the triangle. You should see a trigger with the value 3, that appears when you press the space bar.
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    PolygonComponent stimulus_code
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
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    KeyboardComponent code_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
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    CodeComponent send_serial_triggers
      Code Type = Py
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      Begin Routine:
        #Mark the stimulus onset triggers as "not sent"
        #at the start of the trial
        stimulus_pulse_started = False
        stimulus_pulse_ended = False

        #Mark the key press triggers as "not sent"
        #at the start of the trial
        key_pulse_started = False
        key_pulse_ended = False
      Each Frame:
        ##STIMULUS TRIGGERS##
        #Check to see if the stimulus is presented this frame
        #and send the trigger if it is
        if stimulus_code.status == STARTED and not stimulus_pulse_started: #Change 'stimulus_code' to match the name of the component that you want to send the trigger for
            win.callOnFlip(my_port.write, str.encode(stimulus_on))
            stimulus_pulse_start_time = globalClock.getTime()
            stimulus_pulse_started  = True
        #If it's time to end the pulse, reset the value to "0"
        #so that we don't continue sending triggers on every frame
        if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                    win.callOnFlip(my_port.write,  str.encode('0'))
                    stimulus_pulse_ended = True


        ##KEY TRIGGERS##
        #Check to see if a key is pressed this frame
        #and send the trigger if it is
        if code_key.keys and not key_pulse_started: #Change 'code_key' to match the name of the component that you want to send the trigger for
            win.callOnFlip(my_port.write, str.encode(key_pressed))
            key_pulse_start_time = globalClock.getTime()
            key_pulse_started  = True
        #If it's time to end the pulse, reset the value to "0"
        #so that we don't continue sending triggers on every frame
        if key_pulse_started and not key_pulse_ended:
                if globalClock.getTime() - key_pulse_start_time >= 0.005:
                    win.callOnFlip(my_port.write,  str.encode('0'))
                    key_pulse_ended = True
      End Routine:
        #Close the connection to the serial port
        my_port.close()
Flow
  Routine instructions
  LoopInitiator serial_code_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine serial_code_trials
  LoopTerminator serial_code_loop
  Routine end
