PsychoPy2experiment version="2024.1.0rc11"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = EEG_triggers_serial_comp
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This demo will send the following triggers:

        1 - At the start of a block
        2 - On the onset of a stimulus
        3 - On a key press
        4 - On a mouse click
        5 - At the end of the demo

        Remember you'll need to set up the address of your serial port in the serial port components!

        Press any key to start
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_trigger_values_code
      Code Type = Auto->JS
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      Begin Experiment:
        start_block = 1
        stimulus_on = 2
        key_pressed = 3
        mouse_clicked = 4
        end_demo = 5
  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You should see a trigger with the value 5. This marks the end of the experiment. 
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent end_trigger
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [time (s)] = 0.0
      startdata = $end_demo
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine stimulus_trials
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    TextComponent stimulus_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
      text = You should now see a trigger with the value 2, appearing at the same time as the triangle.
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    PolygonComponent stimulus
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.0
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    SerialOutComponent stim_on_trigger
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [condition] = stimulus.status == STARTED
      startdata = $stimulus_on
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine start_block
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    TextComponent start_block_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You should see a trigger with the value 1, this marks the start of a block (this demo will move on in 5 seconds)
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    SerialOutComponent start_block_trigger
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [time (s)] = 0.0
      startdata = $start_block
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine stimulus_mouse_trials
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    TextComponent stimulus_response_text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You should now see a trigger with the value 4, that appears when you click the star.
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    PolygonComponent stimulus_mouse
      fillColor = white
      shape = star
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
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    MouseComponent mouse
      clickable = stimulus_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    SerialOutComponent mouse_click_trigger
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [condition] = mouse.isPressedIn(stimulus_mouse)
      startdata = $mouse_clicked
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine stimulus_key_trials
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    TextComponent stimulus_response_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You should now see a trigger with the value 3, that appears when you press the space bar.
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    KeyboardComponent key_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
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    SerialOutComponent key_resp_trigger
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [condition] = key_response.keys
      startdata = $key_pressed
      stopVal [duration (s)] = 0.1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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Flow
  Routine instructions
  Routine start_block
  LoopInitiator stimulus_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine stimulus_trials
  LoopTerminator stimulus_loop
  LoopInitiator stimulus_key_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine stimulus_key_trials
  LoopTerminator stimulus_key_loop
  LoopInitiator stimulus_mouse_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine stimulus_mouse_trials
  LoopTerminator stimulus_mouse_loop
  Routine end
