PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '01', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [600, 400]
  color = black
  expName = stroop
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextboxComponent word
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.2
      size = (None, None)
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        #Import Netstation library
        from egi_pynetstation.NetStation import NetStation

        #IP address of NetStation - CHANGE THIS TO MATCH THE IP ADDRESS OF YOUR NETSTATION
        IP_ns = '10.10.10.42'

        #IP address of amplifier (if using 300
        #series, this is the same as the IP address of
        #NetStation. If using newer series, the amplifier
        #has its own IP address)
        IP_amp = '10.10.10.51'

        #Port configured for ECI in NetStation - CHANGE THIS IF NEEDED
        port_ns = 55513

        #Start recording and send trigger to show this
        eci_client = NetStation(IP_ns, port_ns)
        eci_client.connect(ntp_ip = IP_amp)
        eci_client.begin_rec()
        eci_client.send_event(event_type = 'STRT', start = 0.0)
      Begin Routine:
        triggerSent = False
        eci_client.resync()
      Each Frame:
        if word.status == STARTED and not triggerSent: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(eci_client.send_event, event_type = Stim, desc=myDesc, label=myLabel) #Send the trigger, synced to the screen refresh
            triggerSent = True #The trigger has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Experiment:
        eci_client.end_rec()
        eci_client.disconnect()
      End Routine:
        eci_client.send_event(event_type = 'resp', label='resp', desc='response')
  Routine instruct
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
  Routine thanks
    TextboxComponent thanksText
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypesEEG.csv
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('text', 'red'), ('letterColor', 'red'), ('corrAns', 'left'), ('congruent', 1), ('Stim', 'cng+'), ('myLabel', 'RR'), ('myDesc', 'RedRed')]),
      OrderedDict([('text', 'red'), ('letterColor', 'green'), ('corrAns', 'down'), ('congruent', 0), ('Stim', 'ing+'), ('myLabel', 'RG'), ('myDesc', 'RedGrn')]),
      OrderedDict([('text', 'green'), ('letterColor', 'green'), ('corrAns', 'down'), ('congruent', 1), ('Stim', 'cng+'), ('myLabel', 'GG'), ('myDesc', 'GrnGrn')]),
      OrderedDict([('text', 'green'), ('letterColor', 'blue'), ('corrAns', 'right'), ('congruent', 0), ('Stim', 'ing+'), ('myLabel', 'GB'), ('myDesc', 'GrnBlu')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'blue'), ('corrAns', 'right'), ('congruent', 1), ('Stim', 'cng+'), ('myLabel', 'BB'), ('myDesc', 'BluBlu')]),
      OrderedDict([('text', 'blue'), ('letterColor', 'red'), ('corrAns', 'left'), ('congruent', 0), ('Stim', 'ing+'), ('myLabel', 'BR'), ('myDesc', 'BluRed')])]
    Routine trial
  LoopTerminator trials
  Routine thanks
