PsychoPy2experiment version="2022.2.0a5"
Settings
  Data filename = "data"
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = [1707, 960]
  expName = camera
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    CameraComponent cam
      device = default
      mic = Default
      saveFile = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    ImageComponent liveCamView
      anchor = top-center
      image = $cam
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextboxComponent instr1
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.04
      size = (1, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = The camera is on! Because we set the image in "liveCamView" to be the name of the camera, the image is continuously updated to be the current frame of the webcam. Go on, give us a wave!
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    TextboxComponent trialNo
      anchor = bottom-left
      bold = False
      editable = False
      letterHeight = 0.05
      padding = 0.1
      pos = (-1, -1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $trials.thisN
      units = norm
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  Routine retrospect
    MovieComponent movie
      anchor = top-center
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $cam
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextboxComponent instr2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.04
      size = (1, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = If you use the Camera component as the input to a Movie component, you can view the footage from the last recording. Look, it's you from 5 seconds ago!
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
