PsychoPy2experiment version="2024.1.0rc11"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.3
  Window size (pixels) = [1920, 1080]
  expName = lsl_triggers_demo
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
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    CodeComponent begin_exp
      Code Type = Py
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      Begin Experiment:
        '''
        Example program to demonstrate how to send string-valued markers into LSL.
        '''
        import random
        import time

        # install the "psylsl" pacakge to Python and import

        from pylsl import StreamInfo, StreamOutlet

        # first create a new stream info. This needs to be done only once in
        # the entire experiment

        info = StreamInfo('MyMarkerStream', 'Markers', 1, 0, 'string', 'myuidw43536')

        # next make an outlet port
        outlet = StreamOutlet(info)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This demo illustrates how you can send triggers via Lab Streaming Layer (LSL).

        You will see a triangle, you should press space when you see it. You should see a trigger is being sent when the triangle appears.

        Press any key to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent stimulus
      fillColor = 1.0000, 0.6863, -1.0000
      lineColor = 0.7098, 0.2941, -0.7490
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = $randint(1,5)
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    CodeComponent stimulus_trigger
      Code Type = Py
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      Begin Routine:
        stimulus_pulse_started = False
      Each Frame:
        if stimulus.status == STARTED and not stimulus_pulse_started:
                win.callOnFlip(outlet.push_sample, 'start_trig')
                stimulus_pulse_started  = True
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Please press space when the triangle appears.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to exit.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine trial
  LoopTerminator trials
  Routine thanks
