PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = microphone
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine proseRecord
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    TextboxComponent prosePrompt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $phrase
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    PolygonComponent timer
      fillColor = white
      pos = (-1, -1)
      shape = custom polygon...
      size [set every frame] = (t/5*2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    MicrophoneComponent mic
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      transcribe = True
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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  Routine proseFeedback
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    TextboxComponent proseScript
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You said...\n\n" + str(mic.lastScript) + "\n\nPress SPACE to continue"
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine load_dictionary
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    TextboxComponent prosePrompt_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = Please wait while the dictionary is loaded
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    MicrophoneComponent mic_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      transcribe = True
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = tiny.en
      trimSilent = False
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  Routine fixation
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this microphone demo!

        To use this demo, you would need to change all the mic component's Device type to the one specific to your setup (i.e. where you're collecting responses from).

        Press space to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine load_dictionary
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = phrases.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'phrase': 'She sells sea shells by the sea shore'},
      {'phrase': 'Peter Piper picked a peck of pickled peppers'},
      {'phrase': 'How much wood would a wood chuck chuck if a wood chuck could chuck wood?'},
      {'phrase': 'How can a clam cram into a clean cream can?'},
      {'phrase': 'I saw Susie sitting in a shoeshine shop'}]
    Routine fixation
    Routine proseRecord
    Routine proseFeedback
  LoopTerminator trials
