PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = clockFace
  runMode = 0
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Routines
  Routine trial
    PolygonComponent hour
      fillColor = white
      ori [set every frame] = times[0]/60*360
      shape = custom polygon...
      size = (0.05, 0.8)
      startVal [time (s)] = 0.0
      vertices = [ [0, -0.1], [-0.5, 0], [0, 0.5], [0.5, 0] ]
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    PolygonComponent minute
      fillColor = white
      ori [set every frame] = times[1]/60*360
      shape = custom polygon...
      size = (0.03, 1)
      startVal [time (s)] = 0.0
      vertices = [ [0, -0.1], [-0.5, 0], [0, 0.5], [0.5, 0] ]
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    PolygonComponent second
      fillColor = white
      ori [set every frame] = times[2]/60*360
      shape = custom polygon...
      size = (0.01, 1)
      startVal [time (s)] = 0.0
      vertices = [ [0, -0.1], [-0.5, 0], [0, 0.5], [0.5, 0] ]
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    VariableComponent times
      startExpValue = [0,0,0]
      startFrameValue = [t/60**2, t/60, t]
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Flow
  Routine trial
