PsychoPy2experiment version="2023.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 720]
  expName = colors
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    SliderComponent spaceCtrl
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = 'named', 'hex', 'rgb', 'rgb1', 'rgb255', 'hsv', 'lms', 'dkl'
      letterHeight = 0.03
      pos = (0, 0.4)
      size = (1.2, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = 0,1,2,3,4,5,6,7
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    TextboxComponent valueCtrl
      bold = False
      editable = True
      fillColor = black
      font = JetBrains Mono
      letterHeight = 0.05
      pos = (-0.3, 0.1)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text = white
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    TextboxComponent colorBox
      bold = False
      borderColor = white
      editable = False
      fillColor [set every frame] = $col
      letterHeight = 0.05
      padding = 0.05
      pos = (-0.3, -0.2)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $"" if col else "invalid color"
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    TextboxComponent instrBox
      bold = False
      editable = False
      letterHeight = 0.03
      padding = 0.05
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        This demo shows how to define colors in PsychoPy - type a value into the textbox to the left, choose a color space and the box below will appear in the color and space you have chosen. For more info on the different spaces, check out the documentation:
        psychopy.org/general/colours.html
    ButtonComponent endBtn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      text = End
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Default color value is False (i.e. invalid)
        col = None
      Begin Routine:
        spaceCtrl.value = 0
      Each Frame:
        # Try to make a fillColor, make it False if failed
        try:
            val = valueCtrl.text
            # If input looks like a number, convert it
            if val.isnumeric():
                val = float(val)
            # If input looks like an array, un-stringify it
            if "," in val:
                val = eval(val)
            # Get color space from radio slider
            space = spaceCtrl.labels[int(spaceCtrl.markerPos)]
            col = colors.Color(val, space)
        except:
            spaceCtrl.labels[int(spaceCtrl.markerPos)]
            col = None
Flow
  Routine trial
