PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1080, 720]
  expName = unitDemo2
  logging level = debug
  runMode = 0
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Routines
  Routine rectMover
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        mags = {
            'height': 0.1,
            'norm': 0.1,
            'pix': 100,
            'cm': 1,
            'deg': pi/10,
        }
        unitCodes = {
            'h': 'height',
            'n': 'norm',
            'p': 'pix',
            'c': 'cm',
            'd': 'deg'
        }
      Each Frame:
        keys = event.getKeys()
        if keys:
            # Get key
            if 'escape' in keys:
                continueRoutine = False
                break
            key = keys.pop()
            pol = (key in ['right', 'up', 'equal'])*2-1  # Polarity: Whatever dimension, move up or down?
            mag = mags[stim.units]  # Magnitude to move by
            if key in ['left', 'right']:
                # Move along the x axis
                stim.pos = (stim.pos[0] + mag*pol,
                            stim.pos[1])
            if key in ['up', 'down']:
                # Move along the y axis
                stim.pos = (stim.pos[0],
                            stim.pos[1] + mag*pol)
            if key in ['equal', 'minus']:
                # Move along the size axis
                if stim.size[0] + mag*pol>=0: # only if size greater than 0
                    stim.size = (stim.size[0] + mag*pol,
                                stim.size[1] + mag*pol)
            if key in ['h', 'p', 'n', 'c', 'd']:
                # Set units
                stim.units = unitCodes[key]
                poslog.units = unitCodes[key]
            if key in ['r']:
                # Reset
                stim.units = 'height'
                stim.size = (0.1, 0.1)
                stim.pos = (0, 0)
    PolygonComponent stim
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent inst
      color = black
      letterHeight = 0.025
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Move: up, down, left, right
        Scale: minus = shrink, equals = grow
        Units: p = pix, h = height, n = norm, c = cm, d = deg
        Reset: r
    TextComponent poslog
      color = black
      letterHeight = 0.05
      pos [set every frame] = stim.pos
      startVal [time (s)] = 0.0
      text [set every frame] = $f"pos: ({stim.pos[0]:.2f}, {stim.pos[1]:.2f})\nsize: ({stim.size[0]:.2f}, {stim.size[1]:.2f})\nunits: {stim.units}"
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Flow
  Routine rectMover
