PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = gazeCursor
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = ('RIGHT_BUTTON',)
  mgSaccade = 0.5
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Routines
  Routine trial
    PolygonComponent target
      fillColor = blue
      pos [set every repeat] = randPos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    RegionOfInterestComponent target_roi
      debug = False
      endRoutineOn = look at
      lookDur = 1000
      nVertices = 4
      ori = 0
      pos [set every repeat] = randPos
      save = every look
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent gaze_cursor
      fillColor = white
      opacity = 0.5
      pos [set every frame] = eyes.getPos()
      shape = circle
      size [set every frame] = (fixSize, fixSize)
      startVal [time (s)] = 0.0
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    VariableComponent randPos
      startExpValue = (0.2, 0.2)
      startRoutineValue = (random()/2, random()/2)
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    EyetrackerRecordComponent eyes
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    VariableComponent fixSize
      startExpValue = 0
      startFrameValue = 0.05+(1-target_roi.currentLookTime)/10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
