PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = clockFace
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Routines
  Routine trial
    PolygonComponent hour
      fillColor = white
      ori [set every frame] = 0
      shape = triangle
      size = (0.05, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent minute
      fillColor = white
      ori [set every frame] = 0
      shape = triangle
      size = (0.025, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent second
      fillColor = white
      ori [set every frame] = 0
      shape = triangle
      size = (0.01, 0.3)
      startVal [time (s)] = 0.0
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    VariableComponent times
      startExpValue = [0,0,0]
      startFrameValue = [t/60**2, t/60, t]
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Set the desired width and length of each hand
        sizes = {
            hour: (0.04, 0.3),
            minute: (0.02, 0.4),
            second: (0.005, 0.4)
        }

        for obj in [hour, minute, second]:
            # For each hand, set its vertices (positions of each point relative to the shape's origin) such that it will rotate around the hand's base
            w, h = sizes[obj]
            obj.vertices = [ [0, h-w/2], [-w/2, 0], [0, -w/2], [w/2, 0] ]
      Each Frame:
        hour.ori = times[0]/60*360
        minute.ori = times[1]/60*360
        second.ori = times[2]/60*360
Flow
  Routine trial
