PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 1080]
  expName = dragNdrop
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Routines
  Routine duplicate
    PolygonComponent parent
      fillColor = white
      lineColor = darkgrey
      lineWidth = 20
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    VariableComponent children
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = [] # An empty array to store child objects in
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent moverCloner
      Code Type = Auto->JS
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      Begin Routine:
        wasPressed = False
      Each Frame:
        if not wasPressed:
            if mouse.isPressedIn(parent):
                # If participant clicked on the parent shape, make a child shape
                child = visual.Rect(
                    win=win, name='child',
                    size=parent.size, pos=parent.pos, ori=parent.ori,
                    lineWidth=parent.lineWidth, colorSpace=parent.colorSpace,
                    lineColor=parent._borderColor, fillColor=parent._fillColor,
                    opacity=parent.opacity, autoDraw=True
                )
                # Store that child shape in the children array
                children.append(child)
                # Mark that mouse has been pressed
                wasPressed = True
            for child in children:
                if mouse.isPressedIn(child):
                    # If participant clicked on any of the child shapes, move it with their mouse
                    child.pos = mouse.getPos()
        else:
            for obj in children + [parent]:
                if mouse.isPressedIn(obj):
                    obj.pos = mouse.getPos()
    ButtonComponent endBtn
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text = End
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  Routine button
    ButtonComponent movableBtn
      bold = True
      borderColor = darkgrey
      borderWidth = 20
      callback = movableBtn.pos = movableBtn.listener.getPos()
      color = None
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ButtonComponent nextBtn1
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text = Next ->
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  Routine single
    PolygonComponent movableRect
      fillColor = white
      lineColor = darkgrey
      lineWidth = 20
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent rectMover
      Code Type = Auto->JS
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      Each Frame:
        if mouse.isPressedIn(movableRect):
            # If participant clicked on the shape, move it with their mouse
            movableRect.pos = mouse.getPos()
    ButtonComponent nextBtn2
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text = Next ->
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Flow
  Routine button
  Routine single
  Routine duplicate
