PsychoPy2experiment version="2021.1.3"
Settings
  Audio latency priority = 4
  Audio lib = pygame
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [720, 720]
  expName = drawPolygon
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Routines
  Routine building
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        polygon.vertices = asarray([[999, 999]])[1:,:]
        isPressed = False
        wasPressed = False
      Each Frame:
        # If left click, add to polygon vertices
        isPressed = mouse.getPressed()[0]
        if isPressed and not wasPressed:
            polygon.vertices = np.vstack((
                polygon.vertices,
                asarray(mouse.getPos())*2
            ))
        wasPressed = isPressed
        # If right click, remove from polygon vertices
        isRightPressed = mouse.getPressed()[2]
        if isRightPressed and not wasRightPressed:
            polygon.vertices = polygon.vertices[:-1,:]
        wasRightPressed = isRightPressed
      End Routine:
        thisExp.addData("vertices", str(polygon.vertices))
    KeyboardComponent ender
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = None
      lineColor = red
      lineWidth = 5
      nVertices = 1
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextboxComponent base
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 5
      editable = False
      letterHeight = 0.03
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = This box represents the size of the polygon - the coordinates of your shape are all relative to the midpoint and dimensions of this box. Left click to add a point, right click to remove the last one. Press space when you're finished.
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    TextboxComponent output
      anchor = center-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.2, 1)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $f"Your vertices:\n{polygon.vertices.round(2)}"
  Routine playtime
    KeyboardComponent ender2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextboxComponent instr
      anchor = top-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (-0.5, 0.5)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      text = Your object has been created! You can find its vertices in the data folder. Use the sliders below to play with its position, size and orientation. Press space to save and quit.
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    PolygonComponent base2
      fillColor = (1,1,1,0.5)
      nVertices = 1
      ori [set every frame] = oriCtrl.value or 0
      pos [set every frame] = (xPosCtrl.value or 0, yPosCtrl.value or 0)
      saveStartStop = False
      shape = rectangle
      size [set every frame] = (szCtrl.value or 0.1, szCtrl.value or 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon2
      fillColor = None
      lineColor = red
      lineWidth = 5
      nVertices = 1
      opacity = 0.8
      ori [set every frame] = oriCtrl.value or 0
      pos [set every frame] = (xPosCtrl.value or 0, yPosCtrl.value or 0)
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = (szCtrl.value or 0.1, szCtrl.value or 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent vertsetter
      Code Type = Auto->JS
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      Begin Routine:
        # Duplicate the shape created earlier
        polygon2.vertices = polygon.vertices
    TextboxComponent posLbl
      anchor = bottom-left
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-0.5, -0.5)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = pos
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    SliderComponent xPosCtrl
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (-0.05, -0.475)
      saveStartStop = False
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (-0.4, 0, 0.3)
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    SliderComponent yPosCtrl
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (-0.475, 0)
      saveStartStop = False
      size = (0.05, 0.8)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (-0.4, 0, 0.4)
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    TextboxComponent szLbl
      anchor = top-center
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.03
      pos [set every repeat] = (szCtrl.pos[0], 0.5)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = size
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    SliderComponent szCtrl
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.45, 0)
      saveStartStop = False
      size = (0.05, 0.8)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = slider
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9)
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    TextboxComponent oriLbl
      anchor = top-center
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.03
      pos [set every repeat] = (oriCtrl.pos[0], 0.5)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = ori
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    SliderComponent oriCtrl
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.35, 0)
      saveStartStop = False
      size = (0.05, 0.8)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = slider
      ticks = (0, 90, 180, 270, 360)
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Flow
  Routine building
  Routine playtime
