PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Would you like to see the updated progress bar demo or the archived one?': '["Updated", "Archived"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = progressBarDemo
  keyboardBackend = ioHub
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Routines
  Routine archived_progress
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    VariableComponent progress
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 0
      startRoutineValue = archived_trials.thisN/archived_trials.nTotal # Trial number as percentage of total
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    PolygonComponent progBar
      anchor = center-left
      fillColor = white
      pos = (-0.4, -0.4)
      shape = rectangle
      size [set every repeat] = (progress, 0.1)
      startVal [time (s)] = 0.0
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    TextboxComponent progLabel
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      text = Progress:
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    TextboxComponent instr
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      saveStartStop = False
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text = Click anywhere  to move on to the next trial
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine updated_progress
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        current_progress = (updated_trials.thisN+1)/updated_trials.nTotal
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is trial " + str(updated_trials.thisN + 1) + " out of " + str(updated_trials.nTotal) + "\n\n Click anywhere to proceed"
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    ProgressComponent prog
      anchor = center-left
      borderColor = white
      color = pink
      fillColor = None
      lineWidth = 4
      pos = (-0.5, -0.35)
      progress [set every repeat] = current_progress
      size = (1, 0.1)
      startVal [time (s)] = 0
      units = height
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent branch_code
      Code Type = Auto->JS
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      Begin Experiment:
        show_updated = 0
        show_archived = 0

        if expInfo["Would you like to see the updated progress bar demo or the archived one?"] == "Updated":
            show_updated = 1
            show_archived = 0
        else:
            show_updated = 0
            show_archived = 1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the progress bar demo!

        Click anywhere to start
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator updated_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = show_updated
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    LoopInitiator updated_trials loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine updated_progress
    LoopTerminator updated_trials
  LoopTerminator updated_loop
  LoopInitiator archived_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = show_archived
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    LoopInitiator archived_trials loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine archived_progress
    LoopTerminator archived_trials
  LoopTerminator archived_loop
