PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = touchTyping
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = ('RIGHT_BUTTON',)
  mgSaccade = 0.5
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Routines
  Routine trial
    EyetrackerRecordComponent trial_record
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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    RegionOfInterestComponent trial_roi
      debug = False
      endRoutineOn = look away
      lookDur = 100
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = rectangle
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent gaze_cursor
      fillColor = white
      opacity = 0.5
      pos [set every frame] = trial_record.getPos()
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent odyssey
      sound [set every repeat] = $clip
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent transcripton
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.03
      size = (1, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextboxComponent lvl_indicator
      anchor = bottom-right
      bold = False
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (0.5, -0.3)
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $"%sx speed... " % speed
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    PolygonComponent progress_bar
      fillColor = white
      pos = (-0.5, -0.3)
      shape = custom polygon...
      size [set every frame] = (t/60, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = height
      vertices = [[0, 1],[1, 1],[1, 0],[0, 0]]
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = red
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = white
    innerFillColor = green
    innerRadius = 0.0033
    movementAnimation = True
    movementDur = 1.25
    outerRadius = 0.1
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.25
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = white
    innerFillColor = green
    innerRadius = 0.0033
    movementAnimation = True
    movementDur = 1.25
    outerRadius = 0.1
    progressMode = time
    randomisePos = True
    targetDelay = 1.25
    targetDur = 1.5
    targetLayout = NINE_POINTS
    units = from exp settings
  Routine feedback
    CodeComponent update_msg
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg = ""
      Begin Routine:
        if 0 < trial_roi.lastLookTime < 59:
            feedback_msg = "Gotcha! You peeked!"
        else:
            feedback_msg = "Well done, you touch typed the whole thing!"
    TextboxComponent feedback_textbox
      bold = False
      editable = False
      letterHeight = 0.05
      padding = 0.1
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $feedback_msg
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  Routine instructions
    TextboxComponent instr
      bold = False
      editable = False
      letterHeight = 0.03
      padding = 0.1
      startVal [time (s)] = 0.0
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      text:
        This experiment will test your touch typing ability - you will hear passages from The Odyssey at varying speeds, please try your best to type out what you hear, all the while keeping your eyes on the box in the middle of the screen. If you look away, you'll lose that round!

        Good luck and have fun.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      padding = 0.05
      pos = (0, -0.35)
      size = (0.6, 0.2)
      startVal [time (s)] = 0
      text = Click here to begin
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  Routine copyright
    SoundComponent copyright_info
      sound = copyright.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 26
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    TextboxComponent countdown
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 26
      text [set every frame] = $"Get ready, the trials will begin in %s..." % (26-int(t))
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Flow
  Routine instructions
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine copyright
  LoopInitiator levels loopType="TrialHandler"
    conditionsFile = levels.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [{'speed': 0.5, 'clip': 'lvl1.wav'},
      {'speed': 0.75, 'clip': 'lvl2.wav'},
      {'speed': 1, 'clip': 'lvl3.wav'},
      {'speed': 1.5, 'clip': 'lvl4.wav'},
      {'speed': 2, 'clip': 'lvl5.wav'}]
    Routine trial
    Routine feedback
  LoopTerminator levels
