PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = keyNameFinder2
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Routines
  Routine trial
    TextboxComponent instructions
      anchor = bottom-center
      bold = False
      editable = False
      flipHoriz = True
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text = Press any key to view its name in the box below.
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    KeyboardComponent key_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextboxComponent key_name
      anchor = top-center
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      padding = 0.1
      size = (0.4, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = $lastKey
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    CodeComponent sanitisation
      Code Type = Auto->JS
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      Begin Experiment:
        lastKey = ""
      Each Frame:
        # Get currently pressed key
        currentKey = event.getKeys()
        # If it is not nothing, update last pressed
        if currentKey:
            lastKey = currentKey[-1]
        # This key checking will override the usual listener for ESCAPE, so add it back in manually
        if lastKey == "escape":
            continueRoutine = False
            # Wait 5s so that the key name for escape is shown
            psychopy.core.wait(5)
Flow
  Routine trial
