PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'trials': '20', 'particles': '10000'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = DARC Demo Experiment
  logging level = debug
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Routines
  Routine trial
    CodeComponent do_not_edit
      Code Type = Py
      Begin Experiment:
        # ** THIS CODE COMPONENT SHOULD BE AT THE TOP IN THE BUILDER VIEW **
        # All code in this code component should be fully generic to any
        # Bayesian Adaptive Design experiment and so should not be edited
        # unless you know what you are doing.


        ## Point Python to code we want to use which is external to what is
        ## provided by PsychoPy here. Use the sys.path.insert function:
        #import sys
        #bad_darc_location = '../..'  # relative coding of 'up' two folders
        #sys.path.insert(0, bad_darc_location)

        from darc.utils import was_last_response_B


        # Set up a logger for BAD related debugging
        import logging
        logging.basicConfig(filename=filename+'_BAD.log',
            level=logging.DEBUG,
            format='%(asctime)s:%(levelname)s:%(funcName)s:%(message)s')


        # We will tell the PsychoPy trial loop thing that we will have an
        # arbitrarily high number of trials. We specify number of trials through
        # the Experiment Settings GUI. The trial routine is ended when our
        # design generator returns None
        max_trials = 666


        # we start with no previous response
        last_response_chose_B = None
      Begin Routine:
        # DESIGN GENERATOR =================================================
        design = design_thing.get_next_design(model)

        # If we are out of designs, then break out of the trial loop
        if design is None:
            print('Breaking out of trial loop now')
            break

        # NOTE TO EXPERIMENTER: if we want to do any adjustments to the design,
        # such as rounding up significant figures etc, we should do that here to
        # the actual design itself rather than just the text displayed to
        # participants. That way the data we output will correspond exactly to the
        # prospects actually shown to participants.
      End Experiment:
        # export parameter summary
        model.θ.describe().to_csv(filename+'_parameter_summary.csv')

        # export all particles, full posterior
        model.θ.to_csv(filename+'_parameter_all_particles.csv')

        # visualise posterior distributions
        try:
            model.export_posterior_histograms(filename)
        except Exception as err:
            print('FAILED to export posterior histograms as .pdf')
            print(f'Error {err}')
      End Routine:
        # Clear screen as soon as we press the button. Useful because the code
        # below can take a moment to run before things are cleared, which leads to
        # crappy responsivity
        win.flip()

        # Turn the response from PsychoPy into a True/False, did they choose B?
        # `response` is the name of a PsychoPy keyboard component.
        last_response_chose_B = was_last_response_B(response.keys)

        design_thing.enter_trial_design_and_response(design, last_response_chose_B)

        model.update_beliefs(design_thing.get_df())
    CodeComponent darc
      Code Type = Py
      Begin Experiment:
        # Import our DARC design code
        from darc import Prospect, Design
        from darc.utils import days_to_string
        from darc.data_plotting import data_plotter
        from darc.delayed import models
        from darc.designs import BayesianAdaptiveDesignGeneratorDARC, DesignSpaceBuilder


        # Process experimenter inputs from experiment settings GUI -------------
        # Number of trials obtained from the PsychoPy GUI is stored as a string
        # so we need to convert that to an integer.
        expInfo['trials'] = int(expInfo['trials'])
        # Convert number of particles from the GUI to an integer
        expInfo['particles'] = int(expInfo['particles'])


        # Now we will chose our (design, model) combination.
        model = models.Hyperbolic(n_particles=expInfo['particles'])
        D = DesignSpaceBuilder.delayed().build()
        design_thing = BayesianAdaptiveDesignGeneratorDARC(D, max_trials=expInfo['trials'])


        # If you want to customise the location and filename of saved data, then
        # edit that in Experiment Settings > Data tab.
        # OR you can overwrite that with the following line, adapted for your
        # goals
        #     filename = _thisDir + os.sep + u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])


        def design_to_display_strings(design):
            '''A function to convert a design into strings available for PsychoPy
            to print to screen.
            Experimenters can edit this code to customise how the stimuli are
            presented to participants. For example, you can change from £ to
            whatever your local currency symbol is.'''
            # rewards -------------------------
            text_RA = f'£{design.ProspectA.reward:0.2f}'
            text_RB = f'£{design.ProspectB.reward:0.2f}'

            # delays --------------------------
            text_DA = days_to_string(design.ProspectA.delay)
            text_DB = days_to_string(design.ProspectB.delay)

            # probabilities -------------------
            text_PA = f'{design.ProspectA.prob*100:3.0f}%'
            text_PB = f'{design.ProspectB.prob*100:3.0f}%'
            return (text_RA, text_RB, text_DA, text_DB, text_PA, text_PB)
      Begin Routine:
        # convert the design into meaningful strings
        text_RA, text_RB, text_DA, text_DB, text_PA, text_PB = design_to_display_strings(design)
      End Experiment:
        # visualise the data (designs and responses)
        try:
            data_plotter(design_thing.get_df(), filename)
        except Exception as err:
            print('FAILED to export plot of response data')
            print(f'Error: {err}')
      End Routine:
        # add DARC specific data, eventually exported by PsychoPy as a .csv
        # note: the name here (ie `trials` has to match the PsychoPy trial
        # loop object name
        trials.addData('RA', design.ProspectA.reward)
        trials.addData('DA', design.ProspectA.delay)
        trials.addData('PA', design.ProspectA.prob)

        trials.addData('RB', design.ProspectB.reward)
        trials.addData('DB', design.ProspectB.delay)
        trials.addData('PB', design.ProspectB.prob)

        if last_response_chose_B:
            trials.addData('R', 'B')
        else:
            trials.addData('R', 'A')
    TextComponent RAitem
      font = Calibri
      letterHeight = 0.1
      pos = (-0.4, 0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $text_RA
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    TextComponent DAitem
      font = Calibri
      letterHeight = 0.1
      pos = (-0.4, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $text_DA
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    TextComponent PAitem
      font = Calibri
      letterHeight = 0.1
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $text_PA
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    TextComponent RBitem
      font = Calibri
      letterHeight = 0.1
      pos = (0.4,0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $text_RB
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    TextComponent DBitem
      font = Calibri
      letterHeight = 0.1
      pos = (0.4, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $text_DB
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    TextComponent PBitem
      font = Calibri
      letterHeight = 0.1
      pos = (0.4, -0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $text_PB
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    KeyboardComponent response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.15
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    TextComponent instruction_text
      letterHeight = 0.1
      pos = (0,0.8)
      startVal [time (s)] = 0.0
      text = left or right keys to chose
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  Routine bye
    TextComponent goodbye
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for taking part in science!
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  Routine instructions
    TextComponent text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        You will be presented with choices between 2 amounts of money.
        Some will be delivered at different points in time.
        Some have a certain probability of being recieved. If not, you recieve nothing.

        Your job is to consider which you prefer and choose using the LEFT or RIGHT keys.

        There is no correct or incorrect response, please emphasise accuracy in which choice you prefer, no need to rush!

        Press SPACE to continue.
    KeyboardComponent space_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 666
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    Routine trial
  LoopTerminator trials
  Routine bye
