PsychoPy2experiment version="2020.2.9"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = anchorDemo
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Routines
  Routine trial
    PolygonComponent shape
      fillColor = $[1,1,1]
      ori [set every frame] = ori
      pos = (0, 0.1)
      shape = rectangle
      size [set every frame] = (sz, sz)
      startVal [time (s)] = 0.0
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    PolygonComponent anchor
      fillColor = red
      lineColor = None
      pos = (0, 0.1)
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    TextboxComponent anchor_x_lbl
      anchor = center-right
      bold = False
      borderColorSpace = rgb
      editable = False
      letterHeight = 0.025
      padding = None
      pos = (-0.5, -0.3)
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      text = Anchor X:
      units = height
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    SliderComponent anchor_x
      forceEndRoutine = False
      granularity = 0
      labels = (-1, 0, 1)
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = (-1, 0, 1)
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    TextboxComponent anchor_y_lbl
      anchor = center-right
      bold = False
      borderColorSpace = rgb
      editable = False
      letterHeight = 0.025
      padding = None
      pos = (-0.5, -0.4)
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      text = Anchor Y:
      units = height
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    SliderComponent anchor_y
      forceEndRoutine = False
      granularity = 0
      labels = (-1, 0, 1)
      pos = (0, -0.4)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = (-1, 0, 1)
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    SliderComponent spin_ctrl
      forceEndRoutine = False
      granularity = 1
      labels = ("static", "spinning")
      pos = (0, 0.4)
      size = (0.25, 0.025)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = (0, 1)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Set initial values for controls
        anchor_x.rating = 0
        anchor_y.rating = 0
        spin_ctrl.rating = 0
      Each Frame:
        # Get x and y offset values from sliders
        x = (anchor_x.rating or 0)/2
        y = (anchor_y.rating or 0)/2
        # Adjust vertices so that the anchor is in the desired position
        shape.vertices = [
            [-0.5-x,  0.5-y],
            [ 0.5-x,  0.5-y],
            [ 0.5-x, -0.5-y],
            [-0.5-x, -0.5-y]
        ]
    VariableComponent ori
      startExpValue = 0
      startFrameValue = (sin(t)+1)*180*(spin_ctrl.rating or 0)
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    VariableComponent sz
      startExpValue = 0
      startFrameValue = (sin(t)+1)/4
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Flow
  Routine trial
