PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {'participant':'ID01', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1024, 768]
  expName = branching
  logging level = warning
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Routines
  Routine A
    TextComponent msgA
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You chose A (the blue pill?)
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  Routine B
    TextComponent msgB
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You chose B (the red pill?)
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  Routine instr
    TextComponent instrText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        If you press 'a' you'll get 3 trials of Routine A

        If you press 'b' you'll get 3 trials of Routine B
    KeyboardComponent resp
      allowedKeys = ['a', 'b']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent chooseBranch
      Code Type = Py
      End Routine:
        if resp.keys=='a':
            nRepsA=1
            nRepsB=0
        else:
            nRepsA=0
            nRepsB=1
Flow
  Routine instr
  LoopInitiator repsA loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = nRepsA
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    conditions:
      [{u'letterColor': u'red'},
      {u'letterColor': u'green'},
      {u'letterColor': u'blue'}]
    Routine A
  LoopTerminator repsA
  LoopInitiator repsB loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = nRepsB
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    conditions:
      [{u'letterColor': u'red'},
      {u'letterColor': u'green'},
      {u'letterColor': u'blue'}]
    Routine B
  LoopTerminator repsB
