PsychoPy2experiment version="2020.2.9"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = clock
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Routines
  Routine trial
    PolygonComponent hour
      fillColor = $[1,1,1]
      ori [set every frame] = times[0]/60*360
      shape = triangle
      size = (0.05, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent minute
      fillColor = $[1,1,1]
      ori [set every frame] = times[1]/60*360
      shape = triangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent second
      fillColor = $[1,1,1]
      ori [set every frame] = times[2]/60*360
      shape = triangle
      size = (0.01, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent anchor
      Code Type = Auto->JS
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      Begin Routine:
        # Set the desired width and length of each hand
        sizes = {
            hour: (0.04, 0.3),
            minute: (0.02, 0.4),
            second: (0.005, 0.4)
        }

        for obj in [hour, minute, second]:
            # For each hand, set its vertices (positions of each point relative to the shape's origin) such that it will rotate around the hand's base
            w, h = sizes[obj]
            obj.vertices = [ [0, h-w/2], [-w/2, 0], [0, -w/2], [w/2, 0] ]
    VariableComponent times
      startExpValue = [0, 0, 0]
      startFrameValue = [t/60**2, t/60, t]
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Flow
  Routine trial
