PsychoPy2experiment version="3.2.0"
Settings
  Audio latency priority = Use prefs
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = puzzleDB
  exportHTML = manually
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Routines
  Routine designA
    ImageComponent masterPatternA
      color = $[1.000,1.000,1.000]
      image [set every repeat] = $design1
      pos = (0, 200)
      size [set every repeat] = size_design
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[0,0,0]
      pos = (0, -100)
      shape = rectangle
      size [set every repeat] = size
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent whitePiece
      image = white.png
      pos [set every repeat] = (-400, 0)
      size [set every repeat] = size / nRows1
      startVal [time (s)] = 0.0
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    ImageComponent blackPiece
      image = black.png
      pos [set every repeat] = (400, 0)
      size [set every repeat] = size / nRows1
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = end
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        def createPiece(piece, pos, name):
            return visual.ImageStim(win, image=piece.image, name=name, size=piece.size, pos=pos)

        def drawPicked(picked):
            for each in picked:
                each.draw()

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        return piece

        def createGrid(rows, size, pos, names):
            inc = (size/rows)
            rowStart = pos[0] - size/2
            colStart = pos[1] + size/2
            row, col = rowStart  + inc/2, colStart - inc/2
            counter = 0

            grid = []
            for i in range(rows):
                for j in range(rows):
                    grid.append(visual.Rect(win, name=names[counter], units='pix', size = [size/rows, size/rows], pos= [row,col], lineColor= 'lightgrey'))
                    row += inc
                    counter += 1
                col -= inc
                row = rowStart + inc/2
            return grid

        def drawGrid(grid):
            for i in grid:
                i.draw()

        def checkAnswer(grid, pieces):
            # Get names of pieces that were picked
            picNames = [pic.image for pic in pieces]
            correctPieces = []
            for cell in grid:
                # Check if piece has been picked
                if cell.name in picNames:

                    for name in range(0, len(picNames)):
                        if cell.name == picNames[name]:
                            if cell.contains(pieces[name].pos):
                                correctPieces.append(True)
                                break  # Piece found, go to next cell
                else:
                    return False  # Correct piece not picked
            return len(correctPieces) == len(grid)
      Begin JS Experiment:
        createPiece = function(piece, pos, name){
          return new visual.ImageStim({win : psychoJS.window,
                                        image: piece.image,
                                        name: name,
                                        size: piece.size,
                                        pos: pos})
        }

        drawPicked = function(picked, draw) {
          if (picked.length > 0) {
            for(let each of picked) {
              each.autoDraw = draw;
            }
          }
        }

        movePicked = function(picked, mouse, grabbed) {
          if (grabbed != 'undefined' &&  mouse.getPressed()[0] === 1) {
            grabbed.pos = mouse.getPos();
            return grabbed
          } else {
              for (let piece of picked) {
                if (piece.contains(mouse) &&  mouse.getPressed()[0] === 1 && grabbed === 'undefined'){
                  piece.pos = mouse.getPos();
                  return piece;
                }
              }
           return 'undefined'
          }
        }

        createGrid = function(rows, size, pos, names) {
            var inc = (size/rows);
            var rowStart = pos[0] - size/2;
            var colStart = pos[1] + size/2;
            var row = rowStart  + inc/2;
            var col = colStart - inc/2;
            var counter = 0;
            var grid = [];

            for (let i = 0; i < rows; i++) {
                for (let j = 0; j < rows; j++) {
                    grid.push(new visual.Rect({win : psychoJS.window,
                                                name: names[counter],
                                                units: 'pix',
                                                lineColor: new util.Color([1,1,0]),
                                                size: [size/rows, size/rows],
                                                pos: [row,col]}))
                    row += inc
                    counter += 1
                }
                col -= inc
                row = rowStart + inc/2
            }
            return grid
        }


        drawGrid = function(grid, draw) {
            for (let i of grid) {
                i.autoDraw = draw;
            }
        }

        checkAnswer = function(grid, pieces) {
            var picNames = pieces.map((pic) => pic.name)
            var correctPieces = []
            for (let cell of grid) {
                if (picNames.includes(cell.name)) {
                    for (let name = 0; name < picNames.length; name++) {
                        if (cell.name === picNames[name]) {
                            if (cell.contains(pieces[name])) {
                                correctPieces.push(true)
                                break
                            }
                        }
                    }
                } else {
                    return false
                }
            }
            return correctPieces.length === grid.length
        }

        picNameDict = {whitePiece: "white.png",
                       blackPiece: "black.png"}
      Begin JS Routine:
        pieces = [whitePiece, blackPiece]
        answers = [a1,a2,a3,a4,a5,a6,a7,a8,a9]
        picked = []
        newPiece = 'undefined'
        movingPiece = 'undefined'
        grid = createGrid(nRows1, size, polygon.pos, answers)
      Begin Routine:
        pieces = [whitePiece, blackPiece]
        answers = [a1,a2,a3,a4,a5,a6,a7,a8,a9]
        picked = []
        newPiece = None
        movingPiece = None
        grid = createGrid(nRows1, size, polygon.pos, answers)
        polygon.setFillColor(None)
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and newPiece == None:
                newPiece = createPiece(piece, mouse.getPos(), piece.image)
                picked.append(newPiece)


        if newPiece is not None and mouse.getPressed()[0] == 0:
            newPiece = None

        movingPiece = movePicked(picked, mouse, movingPiece)
        drawGrid(grid)
        drawPicked(picked)
      Each JS Frame:
        for (let piece of pieces) {
            if (piece.contains(mouse) && mouse.getPressed()[0] === 1 && newPiece === 'undefined') {
                newPiece = createPiece(piece, mouse.getPos(), picNameDict[piece.name])
                picked.push(newPiece)
            }
        }


        if (newPiece !== 'undefined' && mouse.getPressed()[0] === 0) {
            newPiece = 'undefined'
        }

        movingPiece = movePicked(picked, mouse, movingPiece)
        drawGrid(grid, true)
        drawPicked(picked, true)
      End JS Routine:
        designATime = parseInt(designAClock.getTime())
        correctA = checkAnswer(grid, picked)
        drawPicked(picked, false)
        drawGrid(grid, false)
      End Routine:
        designATime = int(designAClock.getTime())
        correctA = checkAnswer(grid, picked)
    ImageComponent end
      image = continueButton.png
      pos = (0, -400)
      size = (110, 40)
      startVal [time (s)] = 0.0
      units = pix
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  Routine result
    TextComponent resultAccuracy
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
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    TextComponent resultTextA
      letterHeight = 25
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        resultAccuracy.text = correctA ? "Correct!\n" : "Incorrect!\n"


        resultTextA.text = "Time taken: " + designATime + " seconds\n"

        psychoJS.experiment.addData('correctA', correctA);
        psychoJS.experiment.addData('p1Actual', designATime);
      Begin Routine:
        if correctA:
            resultTextA.text = "Correct!\n"
        else:
            resultTextA.text = "Incorrect!\n"

        resultTextA.text += f"Time taken: {designATime} seconds\n"

        thisExp.addData('correctA', correctA)
        thisExp.addData('p1Actual', designATime)
    KeyboardComponent endFB
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent trialEnd
      image = continueButton.png
      pos = (0, -400)
      size = (110, 40)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent endTrialMouse
      clickable = trialEnd
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine InstructionsRoutine
    TextComponent introText
      letterHeight = 25
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 800
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      text:
        This task shows you the drag and drop capabilities of PsychoPy and PsychoJS.

        The demonstration uses a drag and drop puzzle game.
        The task requires you to drag and drop the black and white
        pieces into the empty square, in order to match the
        puzzle design above.

        When you have finished, press the "END" button to
        see whether or not you were correct, and how long the
        the trial took.

        Click or tap continue to begin.
    ImageComponent start
      image = continueButton.png
      pos = (0, -400)
      size = (110, 40)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent startMouse
      clickable = start
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine InstructionsRoutine
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('design1', 'design_41.png'), ('size', 300), ('size_design', 200), ('nPieces1', 4), ('nRows1', 2), ('a1', 'white.png'), ('a2', 'black.png'), ('a3', 'black.png'), ('a4', 'black.png'), ('a5', None), ('a6', None), ('a7', None), ('a8', None), ('a9', None)]),
      OrderedDict([('design1', 'design_42.png'), ('size', 300), ('size_design', 200), ('nPieces1', 4), ('nRows1', 2), ('a1', 'white.png'), ('a2', 'white.png'), ('a3', 'black.png'), ('a4', 'black.png'), ('a5', None), ('a6', None), ('a7', None), ('a8', None), ('a9', None)]),
      OrderedDict([('design1', 'design_43.png'), ('size', 300), ('size_design', 200), ('nPieces1', 4), ('nRows1', 2), ('a1', 'white.png'), ('a2', 'black.png'), ('a3', 'black.png'), ('a4', 'white.png'), ('a5', None), ('a6', None), ('a7', None), ('a8', None), ('a9', None)]),
      OrderedDict([('design1', 'design_91.png'), ('size', 300), ('size_design', 200), ('nPieces1', 9), ('nRows1', 3), ('a1', 'white.png'), ('a2', 'black.png'), ('a3', 'white.png'), ('a4', 'black.png'), ('a5', 'white.png'), ('a6', 'black.png'), ('a7', 'white.png'), ('a8', 'black.png'), ('a9', 'black.png')]),
      OrderedDict([('design1', 'design_92.png'), ('size', 300), ('size_design', 200), ('nPieces1', 9), ('nRows1', 3), ('a1', 'white.png'), ('a2', 'black.png'), ('a3', 'white.png'), ('a4', 'black.png'), ('a5', 'black.png'), ('a6', 'black.png'), ('a7', 'white.png'), ('a8', 'black.png'), ('a9', 'black.png')])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
    Routine designA
    Routine result
  LoopTerminator trials
