PsychoPy2experiment version="1.73.05"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {'participant':'demo', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    RatingScaleComponent RS_calm_left
      startVal [time (s)] = 0.0
      forceEndRoutine = False
      singleClick = True
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      customize_everything:
        scale='1 = calm . . . 7 = agitated',
        mouseOnly=True,
        pos=(-0.35,-0.2),
        markerStyle='circle',
        displaySizeFactor=0.85,
        singleClick=True,
        disappear=True
    RatingScaleComponent RS_deep_right
      startVal [time (s)] = 0.0
      forceEndRoutine = False
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      customize_everything:
        scale='1 = deep . . . 7 = shallow',
        mouseOnly=True,
        pos=(0.35,-0.2),
        markerColor='DarkGreen',
        displaySizeFactor=0.85,
        singleClick=True,
        disappear=True
    TextComponent stimulus_to_rate
      text [set every repeat] = $thing
      stopVal [duration (s)] = 5
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent timeout_after_5s
      Each Frame:
        if trialClock.getTime() > 5:
            continueRoutine = False
  Routine instr
    TextComponent text_2
      wrapWidth = .6
      text = This demo will show two rating scales at the same time, one for 'calm' and one for 'deep'. These will be presented for each of two things-to-be-rated, drawn from a list. Hit any key to continue.
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank
    KeyboardComponent key_resp
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.pkl
    loopType = sequential
    nReps = 1
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    conditions:
      [{'thing': u'thing-1'},
      {'thing': u'thing-2'}]
    Routine trial
    Routine blank
  LoopTerminator trials
