PsychoPy2experiment version="1.90.2"
Settings
  expName = EnvelopeGratingExample
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
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Routines
  Routine trial
    NoiseStimComponent noise
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      opacity = 0.5
      pos = (5, -5)
      size = (10, 10)
      noiseImage = None
      mask = raisedCos
      sf = 1/10
      texture resolution = 512
      interpolate = nearest
      noiseType = Isotropic
      noiseElementSize = 0.0625
      noiseBaseSf = 4.0
      noiseBW = 1
      noiseBWO = 1
      noiseFractalPower = 0.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFilterLower = 1.0
      noiseClip = 3.0
      noiseNewSample = None
      noiseNewSampleWhen = 1
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    EnvGratingComponent ModNoise
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (-5, 5)
      size = (10, 10)
      carrier [set every repeat] = $noise.tex
      mask = raisedCos
      contrast = 0.2
      sf = 1/10
      texture resolution = 512
      envelope = sin
      envsf = 1.0
      envphase [set every frame] = sin(t)
      envori = 0.0
      moddepth = 1
      beat = False
      blendmode = add
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    EnvGratingComponent ModSin
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (5, 5)
      size = (10, 10)
      ori [set every frame] = t*5
      carrier = sin
      mask = raisedCos
      contrast = 0.5
      sf = 8.0
      texture resolution = 512
      envelope = sin
      envsf = 1.0
      envphase = 0.0
      envori [set every frame] = -t*5
      moddepth = 1.0
      beat = False
      blendmode = add
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    EnvGratingComponent Beat
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (-5, -5)
      size = (10, 10)
      ori = 90
      carrier = sin
      mask = raisedCos
      sf = 8
      texture resolution = 512
      envelope = sin
      envsf = 1.0
      envphase = 0
      envori = 0.0
      moddepth = 1.0
      beat = True
      blendmode = add
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    EnvGratingComponent NoiseAddBeat
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      pos = (5, -5)
      size = (10, 10)
      carrier [set every repeat] = $noise.tex
      mask = raisedCos
      contrast = 0.5
      sf = 1.0/10
      envelope = sin
      envsf = 1.0
      envphase = 0.0
      envori = 0.0
      moddepth = 1.0
      beat = True
      blendmode = add
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    TextComponent ModNoiseText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      pos = (-5, 10)
      text = Contrast modulated noise
      letterHeight = 0.5
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    TextComponent MosSinText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      pos = (5, 10)
      text = Constrast nodulated sinewave
      letterHeight = 0.5
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    TextComponent BeatText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      pos = (-5, -10)
      text = Sine wave beat
      letterHeight = 0.5
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    TextComponent BeatNoiseText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      pos = (5, -10)
      text = Beat of noise added to same noise to make contrast modulated noise
      letterHeight = 0.5
      wrapWidth = 10
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  Routine Intro_text
    TextComponent text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      text = This demo makes various types of contrast modulated stimulus. Including examples of contrast modulates sine waves, sine wave beat stimuli, contrast modulated noise using a noise stimulus component as the carrier texture and adding a beat based on a noise carrier back to the noise sample to create contrast modulated noise.
      letterHeight = 0.5
      wrapWidth = 10
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Flow
  Routine Intro_text
  Routine trial
