PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  JS libs = remote
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = blockedTrials
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $stimFile
      size = [512, 512]
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  Routine readyMessage
    TextComponent text
      text [set every repeat] = $readyMsg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = chooseBlock.csv
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [{'readyMsg': u'This is a block of faces', 'condsFile': u'facesBlock.csv'},
      {'readyMsg': u'This is a block of houses', 'condsFile': u'housesBlock.csv'}]
    Routine readyMessage
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
