PsychoPy2experiment version="1.78.01"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = False
  Experiment info = {u'Eye Tracker': u'SMI_iview_std.yaml', u'Participant': u''}
  expName = stroop
  logging level = warning
  Units = pix
  Screen = 1
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Routines
  Routine trial
    TextComponent stimulus
      color [set every repeat] = $stimColor
      text [set every repeat] = $stimText
      startVal [time (s)] = 0.5
      letterHeight = 100
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    GratingComponent fixation
      opacity = .7
      tex = sin
      mask = circle
      units = pix
      startVal [time (s)] = 0
      sf = 40
      size = [16,16]
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    GratingComponent gaze_cursor
      opacity [set every frame] = $display_gaze
      tex = sin
      color = $[0.004,0.004,1.000]
      mask = circle
      pos [set every frame] = $[x,y]
      units = pix
      startVal [time (s)] = 0.0
      sf = 40
      size [set every frame] = $mean_pupil_size
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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    CodeComponent eye_track_code
      Begin Experiment:
        maintain_fix_pix_boundary=66.0
        eyetracker =False#will change if we get one!
        PUP_SZ_BUFF_LEN=5
        PUPIL_SZ_MULT=10.0
        pupil_size_mw=None
        last_sample_id=None
        mean_pupil_size=[20,20]

        if expInfo['Eye Tracker']:
            try:
                from psychopy.iohub import EventConstants,ioHubConnection,load,Loader
                from psychopy.iohub.util import NumPyRingBuffer
                from psychopy.data import getDateStr
                # Load the specified iohub configuration file converting it to a python dict.
                io_config=load(file(expInfo['Eye Tracker'],'r'), Loader=Loader)

                # Add / Update the session code to be unique. Here we use the psychopy getDateStr() function for session code generation
                session_info=io_config.get('data_store').get('session_info')
                session_info.update(code="S_%s"%(getDateStr()))

                # Create an ioHubConnection instance, which starts the ioHubProcess, and informs it of the requested devices and their configurations.
                io=ioHubConnection(io_config)

                iokeyboard=io.devices.keyboard
                mouse=io.devices.mouse
                if io.getDevice('tracker'):
                    eyetracker=io.getDevice('tracker')

                    pupil_size_mw=NumPyRingBuffer(PUP_SZ_BUFF_LEN)

                    win.winHandle.minimize()
                    eyetracker.runSetupProcedure()
                    win.winHandle.activate()
                    win.winHandle.maximize()

            except Exception, e:
               import sys
               print "!! Error starting ioHub: ",e," Exiting..."
               sys.exit(1)

            display_gaze=False
            x,y=0,0
      Each Frame:
        if eyetracker:
            # check for 'g' key press to toggle gaze cursor visibility
            iokeys=iokeyboard.getEvents(EventConstants.KEYBOARD_PRESS)
            for iok in iokeys:
                if iok.key==u'g':
                    display_gaze=not display_gaze

            # get /eye tracker gaze/ position
            gpos=eyetracker.getPosition()
            if type(gpos) in [list,tuple]:
                x,y=gpos[0], gpos[1]
                d=np.sqrt(x**2+y**2)
                if d>maintain_fix_pix_boundary:
                    heldFixation = False #unless otherwise

            # get latest Eye Sample for pupil size data
            lsamp=eyetracker.getLastSample()
            if lsamp and lsamp[3]!= last_sample_id:
                lsamp=io._eventListToNamedTuple(lsamp)
                last_sample_id=lsamp.event_id
                pl=lsamp.left_pupil_measure1
                pr=lsamp.right_pupil_measure1

                pupil_sz=0.0
                if pl > 0.0 and pr > 0.0:
                    pupil_sz=(pl+pr)/2.0
                elif pl > 0.0:
                    pupil_sz=pl
                elif pr > 0.0:
                    pupil_sz=pr

                if pupil_sz>0.0:
                    pupil_size_mw.append(pupil_sz)
                    mean_pupil_size=pupil_size_mw.mean()*PUPIL_SZ_MULT
                    mean_pupil_size=[mean_pupil_size,mean_pupil_size]
                else:
                    mean_pupil_size=[20,20]
      Begin Routine:
        if eyetracker:
            heldFixation = True #unless otherwise
            io.clearEvents('all')
            eyetracker.setRecordingState(True)
      End Routine:
        if eyetracker:
            eyetracker.setRecordingState(False)
            #add eye-track data to data file
            trials.addData("heldFixation", heldFixation)
            trials.addData("pupil_size", pupil_size_mw.mean())
            pupil_size_mw.clear()
      End Experiment:
        if eyetracker:
            eyetracker.setConnectionState(False)
            io.quit()
  Routine instruct
    TextComponent instrText
      wrapWidth = 800
      color = $[1, 1, 1]
      units = pix
      startVal [time (s)] = 0
      letterHeight = 50
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      text:
        OK. Ready?

        Remember:
        1) Stay fixated on the central white dot.
        2) Ignore the word itself; press:
        	- Left for red LETTERS
        	- Down for green LETTERS
        	- Right for blue LETTERS
        	- (Esc will quit)
        3) To toggle gaze position visibility, press 'g'.

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      wrapWidth = 800
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 50
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
    conditions:
      [{u'stimColor': u'red', u'stimText': u'red', u'congruent': 1, u'corrAns': u'left'},
      {u'stimColor': u'green', u'stimText': u'red', u'congruent': 0, u'corrAns': u'down'},
      {u'stimColor': u'green', u'stimText': u'green', u'congruent': 1, u'corrAns': u'down'},
      {u'stimColor': u'blue', u'stimText': u'green', u'congruent': 0, u'corrAns': u'right'},
      {u'stimColor': u'blue', u'stimText': u'blue', u'congruent': 1, u'corrAns': u'right'},
      {u'stimColor': u'red', u'stimText': u'blue', u'congruent': 0, u'corrAns': u'left'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
