PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Participant': u''}
  Units = pix
  Window size (pixels) = [1680, 1050]
  Full-screen window = False
  expName = stroop
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    TextComponent stimulus
      color [set every repeat] = $stimColor
      text [set every repeat] = $stimText
      startVal [time (s)] = 0.5
      letterHeight = 100
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    CodeComponent iohub_keyboard
      Begin Experiment:
        try:
            from psychopy.iohub.client import ioHubConnection,yload,yLoader
            from psychopy.iohub.constants import EventConstants,KeyboardConstants
            from psychopy.data import getDateStr
            # Load the iohub device config, file converting it to a python dict.
            io_config=yload(open('iohub_config.yaml','r'), Loader=yLoader)

            # Add / Update the session code to be unique. Here we use the psychopy getDateStr() function for session code generation
            session_info=io_config.get('data_store').get('session_info')
            session_info.update(code="S_%s"%(getDateStr()))

            # Create an ioHubConnection instance, which starts the ioHubProcess, and informs it of the requested devices and their configurations.
            io=ioHubConnection(io_config)
            iokeyboard=io.devices.keyboard
            iomouse=io.devices.mouse
        except Exception as e:
           print("!! Error starting ioHub: ",e," Exiting...")
           core.quit()
      Begin Routine:
        response_event=None
        trial_start=0
        io.clearEvents()
      End Routine:
        trials.addData("trial_start_time", trial_start)
        if response_event:
            trials.addData("resp.time", response_event.time)
            trials.addData("resp.rt", response_event.time-trial_start)
            trials.addData("resp.duration", response_event.duration)
            trials.addData('resp.keys',response_event.key)
            trials.addData('resp.corr', response_event.key.lower()==corrAns)
        else:
            trials.addData("resp.time",-1.0)
            trials.addData("resp.rt", -1.0)
            trials.addData("resp.duration", -1.0)
            trials.addData('resp.keys','None')
            trials.addData('resp.corr', False)
      End Experiment:
        io.quit()
      Each Frame:
        if frameN == 0:
            io.clearEvents('all')
            trial_start=core.getTime()
        else:
            iokeys=iokeyboard.getEvents(EventConstants.KEYBOARD_PRESS)
            for iok in iokeys:
                if iok.key in [u'down',u'left',u'right']:
                    response_event=iok
                    continueRoutine = False
                    break
  Routine instruct
    TextComponent instrText
      wrapWidth = 800
      color = $[1, 1, 1]
      units = pix
      startVal [time (s)] = 0
      letterHeight = 50
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      text:
        OK. Ready?

        Remember:
        1) Stay fixated on the central white dot.
        2) Ignore the word itself; press:
         - Left for red LETTERS
         - Down for green LETTERS
         - Right for blue LETTERS
         - (Esc will quit)
        3) To toggle gaze position visibility, press 'g'.

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      wrapWidth = 800
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 50
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
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    conditions:
      [{u'stimColor': u'red', u'stimText': u'red', u'congruent': 1, u'corrAns': u'left'},
      {u'stimColor': u'green', u'stimText': u'red', u'congruent': 0, u'corrAns': u'down'},
      {u'stimColor': u'green', u'stimText': u'green', u'congruent': 1, u'corrAns': u'down'},
      {u'stimColor': u'blue', u'stimText': u'green', u'congruent': 0, u'corrAns': u'right'},
      {u'stimColor': u'blue', u'stimText': u'blue', u'congruent': 1, u'corrAns': u'right'},
      {u'stimColor': u'red', u'stimText': u'blue', u'congruent': 0, u'corrAns': u'left'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
