PsychoPy2experiment version="3.0.1"
Settings
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1040, 800]
  expName = MentalRot
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Routines
  Routine plot_data
    CodeComponent plot_data_array
      Code Type = Py
      Begin Experiment:
        from matplotlib import pyplot
        import pandas as pd
      Begin Routine:
        def plotYX(yaxis, xaxis, description=''):
            pyplot.grid(True)
            pyplot.title(description)
            pyplot.xlabel('Angle')
            pyplot.ylabel('Response time (s)')
            pyplot.xlim([0, 315])
            #slope,inter = np.polyfit(xaxis[:5],yaxis[:5],1)
            pyplot.plot(xaxis, yaxis) #, xaxis[:5], np.array(xaxis[:5]) * slope + inter)
            pyplot.draw()
            pyplot.show()

        filename = 'mental_rotation_data.csv'
        with open(filename, 'wb') as fd:
            fd.write(data_string)

        data = pd.read_csv(filename)
        data = data[data['rt'] < 4]  # trim RT at 4 sec
        mrt = data.loc[:,'rt']
        correct = data.loc[:, 'corr']
        angle = data.loc[:, 'angle']

        dfsum = data.groupby('angle', as_index=False).mean()
        m = dfsum.loc[:, 'rt']
        a = dfsum.loc[:, 'angle']

        scored_data = zip(a, m)
        print('average time (sec) at each rotation:')
        print("  0  45  90  135 180 225 270 315")
        print("--> %s <--" % repr([round(i,3) for i in m]).strip('[]').replace(',', '  '))
        print("\n% correct        :", 100 * correct.mean())
        print("overall speed (s):", mrt.mean())

        plotYX(m, a)

        with open(filename, 'a+b') as fd:
            fd.write('\n\n' + repr(scored_data))
  Routine pause
    TextComponent mini_pause
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if trials.thisN == 4 and expInfo['participant'] == 'JRG':
            trials.finished = True
  Routine Intructions_1
    TextComponent text_4
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = .8
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      text:
        Welcome. You will see two letters on the screen that have been rotated. For each pair of letters, indicate if they are mirror images of each other when they two letters are in their normal upright position. (Ignore the rotations.)

        Press 'm' if they are mirror images of each other. Press 'n' if they are the same (not mirror images).

        Press the 'm' to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intructions_2
    KeyboardComponent key_resp_6
      allowedKeys = 'n'
      correctAns = $same
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_L_3
      image [set every repeat] = FR.png
      mask = raisedCos
      ori [set every repeat] = 0
      pos = [-.25, .2]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    ImageComponent image_R_3
      image [set every repeat] = F.png
      mask = raisedCos
      ori [set every repeat] = -90
      pos = [0.25, .2]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      wrapWidth = .8
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      text:
        Here, the letter on the right is a mirror image of the letter on the left. They would still be different after mentally rotating them to line up. So press 'm' (different). If they are the same, you would press 'n'.

        Try to respond as accurately as you can. Also try to be fast, but emphasize being accurate. Press 'n' to start.
  Routine Practice
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if same == 'n':
            limage = 'F.png'
            rimage = 'FR.png'
            if random() > .5:
               rimage, limage = limage, rimage
        else:
            limage = rimage = 'F.png'
            if random() > .5:
                limage = rimage = 'FR.png'
    KeyboardComponent key_resp_5
      allowedKeys = 'n','m'
      correctAns = $same
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_L_2
      image [set every repeat] = $limage
      mask = raisedCos
      ori [set every repeat] = leftori
      pos = [-.25, 0]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    ImageComponent image_R_2
      image [set every repeat] = $rimage
      mask = raisedCos
      ori [set every repeat] = rightori
      pos = [0.25, 0]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      pos = [0, -.3]
      startVal [time (s)] = 0.0
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      text:
        'm' if mirror images of each other
        'n' if both are the same
  Routine the_end
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The end.

        Press space to see your data.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if same == 'n':
            limage = 'F.png'
            rimage = 'FR.png'
            if random() > .5:
               rimage, limage = limage, rimage
        else:
            limage = rimage = 'F.png'
            if random() > .5:
                limage = rimage = 'FR.png'
    KeyboardComponent Response
      allowedKeys = 'n','m'
      correctAns = ('n','m')[$same=='n']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_L
      image [set every repeat] = $limage
      mask = raisedCos
      ori [set every repeat] = leftori
      pos = [-.25, 0]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    ImageComponent image_R
      image [set every repeat] = $rimage
      mask = raisedCos
      ori [set every repeat] = rightori
      pos = [0.25, 0]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.03
      pos = [0, -.3]
      startVal [time (s)] = 0.0
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      text:
        'm' for "different"
        'n' for "same"
    CodeComponent add_data
      Code Type = Py
      Begin Experiment:
        data_string = 'angle,rt,corr\n'
      End Routine:
        data_string += '%d,%.3f,%d\n' % (abs(angle), Response.rt, Response.corr)
    TextComponent trial_count
      color = black
      letterHeight = 0.03
      pos = [.4, -.4]
      startVal [time (s)] = 0.0
      text [set every repeat] = $trials.thisN
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  Routine pause_start
    TextComponent mini_pause_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text =  +
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  Routine licence
    TextComponent licence_info
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        AUTHORS: Jeremy R. Gray & Nathaniel R. Pasmanter
        CONTACT: jrgray@gmail.com

        COPYRIGHT (c) 2013 MICHIGAN STATE UNIVERSITY BOARD OF TRUSTEES
        ALL RIGHTS RESERVED

        PERMISSION IS GRANTED TO USE, COPY, CREATE DERIVATIVE WORKS AND REDISTRIBUTE
        THIS SOFTWARE AND SUCH DERIVATIVE WORKS FOR ANY PURPOSE, SO LONG AS NO FEE IS
        CHARGED, AND SO LONG AS THE AUTHORSHIP AND COPYRIGHT NOTICE ABOVE, THIS GRANT
        OF PERMISSION, AND THE DISCLAIMER BELOW APPEAR IN ALL COPIES MADE; AND SO LONG
        AS THE NAME OF MICHIGAN STATE UNIVERSITY IS NOT USED IN ANY ADVERTISING OR
        PUBLICITY PERTAINING TO THE USE OR DISTRIBUTION OF THIS SOFTWARE WITHOUT
        SPECIFIC, WRITTEN PRIOR AUTHORIZATION.

        THIS SOFTWARE IS PROVIDED AS IS, WITHOUT REPRESENTATION FROM MICHIGAN STATE
        UNIVERSITY AS TO ITS FITNESS FOR ANY PURPOSE, AND WITHOUT WARRANTY BY MICHIGAN
        STATE UNIVERSITY OF ANY KIND, EITHER EXPRESS OR IMPLIED, INCLUDING WITHOUT
        LIMITATION THE IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A
        PARTICULAR PURPOSE. THE MICHIGAN STATE UNIVERSITY BOARD OF TRUSTEES SHALL NOT
        BE LIABLE FOR ANY DAMAGES, INCLUDING SPECIAL, INDIRECT, INCIDENTAL, OR
        CONSEQUENTIAL DAMAGES, WITH RESPECT TO ANY CLAIM ARISING OUT OF OR IN
        CONNECTION WITH THE USE OF THE SOFTWARE, EVEN IF IT HAS BEEN OR IS HEREAFTER
        ADVISED OF THE POSSIBILITY OF SUCH DAMAGES.
Flow
  Routine Intructions_1
  Routine Intructions_2
  Routine pause_start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = MentalRot.csv
    loopType = random
    nReps = 6
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    conditions:
      [{'angle': 0, 'rightori': 0, 'leftori': 0, 'same': 'n'},
      {'angle': 0, 'rightori': 0, 'leftori': 0, 'same': 'y'},
      {'angle': 45, 'rightori': 45, 'leftori': 0, 'same': 'n'},
      {'angle': 45, 'rightori': 45, 'leftori': 0, 'same': 'y'},
      {'angle': 90, 'rightori': 90, 'leftori': 0, 'same': 'n'},
      {'angle': 90, 'rightori': 90, 'leftori': 0, 'same': 'y'},
      {'angle': 135, 'rightori': 135, 'leftori': 0, 'same': 'n'},
      {'angle': 135, 'rightori': 135, 'leftori': 0, 'same': 'y'},
      {'angle': 180, 'rightori': 180, 'leftori': 0, 'same': 'n'},
      {'angle': 180, 'rightori': 180, 'leftori': 0, 'same': 'y'},
      {'angle': 225, 'rightori': 225, 'leftori': 0, 'same': 'n'},
      {'angle': 225, 'rightori': 225, 'leftori': 0, 'same': 'y'},
      {'angle': 270, 'rightori': 270, 'leftori': 0, 'same': 'n'},
      {'angle': 270, 'rightori': 270, 'leftori': 0, 'same': 'y'},
      {'angle': 315, 'rightori': 315, 'leftori': 0, 'same': 'n'},
      {'angle': 315, 'rightori': 315, 'leftori': 0, 'same': 'y'}]
    Routine Trial
    Routine pause
  LoopTerminator trials
  Routine the_end
  Routine plot_data
