PsychoPy2experiment version="1.65.01"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  Save excel file = True
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent fixate
      color = $[1, 1, 1]
      text = +
      duration = 1.0
      letterHeight = 2
      startTime = 1.0
      units = cm
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    PatchComponent stimulus
      image [set every repeat] = $stimFile
      mask = none
      pos [set every repeat] = $[xPos, yPos]
      duration = 0.2
      startTime = 2.0
      units = pix
      sf = None
      size = [200,200]
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    PatchComponent mask
      image = mask.png
      mask = none
      pos [set every repeat] = $[xPos, yPos]
      duration = 5.0
      startTime = 2.2
      units = pix
      sf = None
      size = [200,200]
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = $corrAns
      startTime = 2.0
      allowedKeys = ['s','h']
      duration = 7.0
      storeResponseTime = True
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  Routine instrMain
    TextComponent instr2
      letterHeight = 0.075
      startTime = 0.0
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndTrial = True
      startTime = 0.0
      storeResponseTime = False
      store = nothing
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      duration = 1.0
      letterHeight = 0.1
      startTime = 0.0
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  Routine thanks
    TextComponent thanksMsg
      text = You're done! Fun, wasn't it!? ;-)
      duration = 2.0
      letterHeight = 0.1
      startTime = 0.0
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  Routine instrPractice
    TextComponent instruct1
      letterHeight = 0.075
      startTime = 0.0
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      text:
        In this experiment you will be presented with a large letter made up of smaller letters. Your task is to

        Respond by pressing;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        There will be a number of practice trials in which you will be given feedback.

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndTrial = True
      startTime = 0.0
      storeResponseTime = False
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Flow
  Routine instrPractice
  LoopInitiator practiceTrials loopType="TrialHandler"
    endPoints = [1, 2]
    loopType = random
    nReps = 1
    trialList = [{'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'}, {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'}, {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}, {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'}, {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'}, {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'}, {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}, {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'}, {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'}, {'xPos': 200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'}, {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}, {'xPos': 200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'}, {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_left', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'}, {'xPos': -200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_left', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'}, {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_left', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}, {'xPos': -200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_left', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'}]
    trialListFile = trialTypes.xlsx
    Routine trial
    Routine feedback
  LoopTerminator practiceTrials
  Routine instrMain
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 4
    trialList = [{'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'}, {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'}, {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}, {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_right', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'}, {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'}, {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'}, {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}, {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'location': 'up_left', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'}, {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'}, {'xPos': 200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'}, {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}, {'xPos': 200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_right', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'}, {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_left', 'stimFile': 'bigHsmallH.png', 'corrAns': 'h'}, {'xPos': -200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_left', 'stimFile': 'bigHsmallS.png', 'corrAns': 's'}, {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'location': 'down_left', 'stimFile': 'bigSsmallS.png', 'corrAns': 's'}, {'xPos': -200.0, 'congruence': 'consistent', 'yPos': -200.0, 'location': 'down_left', 'stimFile': 'bigSsmallH.png', 'corrAns': 'h'}]
    trialListFile = trialTypes.xlsx
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    Routine trial
  LoopTerminator trials
  Routine thanks
