PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [800, 600]
  expName = NoiseExample
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Routines
  Routine trial
    NoiseStimComponent BinaryNoise
      interpolate = nearest
      mask = raisedCos
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 2
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
      noiseType = Binary
      pos = (-246, 246)
      sf = 1/256
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
      units = pix
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    NoiseStimComponent GaborNoise
      mask = raisedCos
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 4.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
      noiseType = Gabor
      ori = 45
      pos = (7, 7)
      sf = 1/7
      size = (7, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
      units = deg
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    NoiseStimComponent PinkNoise
      mask = raisedCos
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = -1
      noiseImage = None
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
      noiseType = Filtered
      pos = (-7, -7)
      sf = 1/7
      size = (7, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
      units = deg
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    NoiseStimComponent FilteredNoise
      mask = raisedCos
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 2.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
      noiseType = Filtered
      pos = (7, -7)
      sf = 1/7
      size = (7, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
      units = deg
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    NoiseStimComponent ImageNoise
      mask = raisedCos
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = face.jpg
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
      noiseType = Image
      sf = 1/7
      size = (7, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 256
      units = deg
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    TextComponent BinaryText
      letterHeight = 1
      pos = (-7, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Binary noise
      units = deg
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    TextComponent FilteredText
      letterHeight = 1
      pos = (7, -3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Filtered noise
      units = deg
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    TextComponent PinkText
      letterHeight = 1
      pos = (-7, -3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Pink noise
      units = deg
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    TextComponent GaborText
      letterHeight = 1
      pos = (7, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Gabor noise
      units = deg
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    TextComponent ImageText
      letterHeight = 1
      pos = (0, 6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
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      text:
        Noise
        spectrum
        from an
        image
    StaticComponent ISI
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 0.25
  Routine Intro
    TextComponent Intro_text
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = This demo shows examples of 5 different types of visual noise. New random samples are chosen after each repeat.
      units = deg
      wrapWidth = 10
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
