PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {u'session': u'001', u'participant': u'', u'side': u'1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1.000,-1.000,-1.000]
  expName = IAT
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Routines
  Routine Block_6
    TextComponent Practical_6
      color = skyblue
      letterHeight = 0.15
      pos = [-0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent or_6
      color = gray
      letterHeight = 0.1
      pos = [-0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Bad_6
      color = limegreen
      letterHeight = 0.15
      pos = [-0.8,0.6]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Creative_6
      color = skyblue
      letterHeight = 0.15
      pos = [0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent or_2_6
      color = gray
      letterHeight = 0.1
      pos = [0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Good_6
      color = limegreen
      letterHeight = 0.15
      pos = [0.8,0.6]
      startVal [time (s)] = 0.0
      text = Good
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    TextComponent Word_6
      color [set every repeat] = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent Response_6
      allowedKeys = 'e','i'
      correctAns = $corr(key, side, condition)
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [condition] = Wrong_6.status==STARTED
      store = first key
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Py
      Each Frame:
        if Response_6.status==STARTED:
            if len(theseKeys)>0:
                if Response_6.corr ==1:
                    continueRoutine=False
                else:
                    Wrong_6.setAutoDraw(True)
                    Wrong_6.status=STARTED
    KeyboardComponent Keys_6
      allowedKeys = 'e','i'
      correctAns = $corr(key, side, condition)
      forceEndRoutine = True
      startVal [condition] = Wrong_6.status==STARTED
      store = first key
      storeCorrect = True
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    TextComponent Wrong_6
      color = red
      letterHeight = 0.1
      pos = [0, -.3]
      startVal [condition] = len(theseKeys)>5
      text = X
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  Routine Instr_3
    TextComponent Instr3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        The four categories you saw separately now appear together. Remember that each item belongs to only one group. For example, if the categories 'creative' and 'good' appeared on separate sides above, picutres or words meaning 'creative' would go in the 'creative' category, not the 'good' category.

        Creative/Practical are labeled blue and Good/Bad are labeled green to help you identify the appropriate category.

        Press the spacebar to begin the next set of trials.
    TextComponent Instr_Creat_3
      color = skyblue
      letterHeight = 0.15
      pos = [-.8*side, 0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent Instr_or_3
      color = gray
      letterHeight = 0.1
      pos = [-.8, 0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Instr_Bad_3
      color = limegreen
      letterHeight = 0.15
      pos = [-.8, 0.6]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Instr_Prac_3
      color = skyblue
      letterHeight = 0.15
      pos = [.8*side, 0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent Instr_or_3_2
      color = gray
      letterHeight = 0.1
      pos = [.8, 0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Instr_Good_3
      color = limegreen
      letterHeight = 0.15
      pos = [.8, 0.6]
      startVal [time (s)] = 0.0
      text = Good
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    KeyboardComponent Instr_key_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent Instr
      letterHeight = 0.08
      pos = [0.03, 0]
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        In the next task, you will be presented with a set of words or images. Your job is to classify each word as quickly as you can, while making as few mistakes as possible.

        Keep your index fingers on the 'e' and 'i' keys. Press the 'e' key to indicate that the word belongs in the category on the left, and press the 'i' key to indicate the category on the right.

        The four categories and the words that go in each category are described on the next screen.

        Press the spacebar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent side_code
      Code Type = Py
      Begin Experiment:
        if expInfo['side'] == '1': expInfo['side'] = 1
        else: expInfo['side'] = -1
        side = expInfo['side']
        # side flips categories R/L, affects scoring

        def corr(letter, side, condition):
            # reverse e/i if side is -1
            if side == 1:
              return letter
            else:
                if condition == 'bad' or condition == 'good':
                    return letter
                else:
                    if letter == 'e': return 'i'
                    if letter == 'i': return 'e'
  Routine Block_7
    TextComponent Practical_7
      color = skyblue
      letterHeight = 0.15
      pos = [-0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent or_7
      color = gray
      letterHeight = 0.1
      pos = [-0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Bad_7
      color = limegreen
      letterHeight = 0.15
      pos = [-0.8,0.6]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Creative_7
      color = skyblue
      letterHeight = 0.15
      pos = [0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent or_2_7
      color = gray
      letterHeight = 0.1
      pos = [0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Good_7
      color = limegreen
      letterHeight = 0.15
      pos = [0.8,0.6]
      startVal [time (s)] = 0.0
      text = Good
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    TextComponent Word_7
      color [set every repeat] = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent Response_7
      allowedKeys = 'e','i'
      correctAns = $corr(key, side, condition)
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [condition] = Wrong_7.status==STARTED
      store = first key
      storeCorrect = True
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    CodeComponent code_7
      Code Type = Py
      Each Frame:
        if Response_7.status == STARTED:
            if len(theseKeys) > 0:
                if Response_7.corr == 1:
                    continueRoutine=False
                else:
                    Wrong_7.setAutoDraw(True)
                    Wrong_7.status=STARTED
    KeyboardComponent Keys_7
      allowedKeys = 'e','i'
      correctAns = $corr(key, side, condition)
      forceEndRoutine = True
      startVal [condition] = Wrong_7.status==STARTED
      store = first key
      storeCorrect = True
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    TextComponent Wrong_7
      color = red
      letterHeight = 0.1
      pos = [0, -.3]
      startVal [condition] = len(theseKeys)>5
      text = X
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  Routine Instr_4
    TextComponent Instr4
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Sort the same four categories again. The same rules still apply.

        Press the spacebar to begin the next set of trials.
    KeyboardComponent Instr_key_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Instr_Creat_4
      color = skyblue
      letterHeight = 0.15
      pos = [-0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent Instr_or_4
      color = gray
      letterHeight = 0.1
      pos = [-0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Instr_Bad_4
      color = limegreen
      letterHeight = 0.15
      pos = [-0.8,0.6]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Instr_Prac_4
      color = skyblue
      letterHeight = 0.15
      pos = [0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent Instr_or_4_2
      color = gray
      letterHeight = 0.1
      pos = [0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Instr_Good_4
      color = limegreen
      letterHeight = 0.15
      pos = [0.8,0.6]
      startVal [time (s)] = 0.0
      text = Good
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  Routine Instr_2
    KeyboardComponent Instr_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Instru2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        In this next set, you will be determining if a word is "good" or "bad" as follows:

        "Good": Rainbow, Cake, Sunshine, Laughter, Peace, Heaven

        "Bad": Agony, Hell, Ugly, Vomit, Poison, Rotten

        Remember to press 'e' to sort the word into the category on the left, and 'i' to sort it into the category on the right.

        Press the spacebar to begin the trials
    TextComponent Instr_Bad
      color = limegreen
      letterHeight = 0.15
      pos = [-.8, 0.8]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Instr_Good
      color = limegreen
      letterHeight = 0.15
      pos = [.8, 0.8]
      startVal [time (s)] = 0.0
      text = Good
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  Routine thanks
    TextComponent Thanks
      color = gray
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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      text:
        End of this part.

        Press space to end.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr_5
    TextComponent Instr5
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Notice above that there are only two categories and they have switched positions. The category that was previously on the right is now on the left, and the category that was on the left is now on the right. Sort the words into their appropriate categories based on these new positions.

        Press the spacebar to begin the next set of trials.
    TextComponent Instr_Prac_5
      color = skyblue
      letterHeight = 0.15
      pos = [-0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent Instr_Creat_5
      color = skyblue
      letterHeight = 0.15
      pos = [0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    KeyboardComponent Instr_key_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block_5
    TextComponent Practical_5
      color = skyblue
      letterHeight = 0.15
      pos = [-0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent Creative_5
      color = skyblue
      letterHeight = 0.15
      pos = [0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent Word_5
      color [set every repeat] = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent Response_5
      allowedKeys = 'e','i'
      correctAns = $corr(thisTrial_5.key, side, thisTrial_5.condition)
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [condition] = Wrong_5.status==STARTED
      storeCorrect = True
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    CodeComponent code_5
      Code Type = Py
      Each Frame:
        if Response_5.status==STARTED:
            if len(theseKeys)>0:
                if Response_5.corr ==1:
                    continueRoutine=False
                else:
                    Wrong_5.setAutoDraw(True)
                    Wrong_5.status=STARTED
    KeyboardComponent Keys_5
      allowedKeys = 'e','i'
      correctAns = $corr(thisTrial_5.key, side, thisTrial_5.condition)
      forceEndRoutine = True
      startVal [condition] = Wrong_5.status==STARTED
      store = first key
      storeCorrect = True
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    TextComponent Wrong_5
      color = red
      letterHeight = 0.1
      pos = [0, -.3]
      startVal [condition] = len(theseKeys)>5
      text = X
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  Routine Block_4
    TextComponent Creative_4
      color = skyblue
      letterHeight = 0.15
      pos = [-.8*side, 0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent or_4
      color = gray
      letterHeight = 0.1
      pos = [-.8, 0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Bad_4
      color = limegreen
      letterHeight = 0.15
      pos = [-.8, 0.6]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Practical_4
      color = skyblue
      letterHeight = 0.15
      pos = [.8*side, 0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent or_2_4
      color = gray
      letterHeight = 0.1
      pos = [0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Good_4
      color = limegreen
      letterHeight = 0.15
      pos = [0.8,0.6]
      startVal [time (s)] = 0.0
      text = Good
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    TextComponent Word_4
      color [set every repeat] = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent Response_4
      allowedKeys = 'e','i'
      correctAns = $corr(key, side, condition)
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [condition] = Wrong_4.status==STARTED
      store = first key
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Py
      Each Frame:
        if Response_4.status == STARTED:
            if len(theseKeys) > 0:
                if Response_4.corr ==1:
                    continueRoutine = False
                else:
                    Wrong_4.setAutoDraw(True)
                    Wrong_4.status = STARTED
    KeyboardComponent Keys_4
      allowedKeys = 'e','i'
      correctAns = $corr(key, side, condition)
      forceEndRoutine = True
      startVal [condition] = Wrong_4.status==STARTED
      store = first key
      storeCorrect = True
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    TextComponent Wrong_4
      color = red
      letterHeight = 0.1
      pos = [0, -.3]
      startVal [condition] = len(theseKeys)>5
      text = X
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  Routine Instr_6
    TextComponent Instr6
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = See above, the four categories now appear together in a new configuration. Remember that each item belongs to only one group.
      wrapWidth = 1.2
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    TextComponent Instr_Prac_6
      color = skyblue
      letterHeight = 0.15
      pos = [-0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent Instr_or_6
      color = gray
      letterHeight = 0.1
      pos = [-0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Instr_Bad_6
      color = limegreen
      letterHeight = 0.15
      pos = [-0.8,0.6]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Instr_Creat_6
      color = skyblue
      letterHeight = 0.15
      pos = [0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent Instr_or_6_2
      color = gray
      letterHeight = 0.1
      pos = [0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Instr_Good_6
      color = limegreen
      letterHeight = 0.15
      pos = [0.8,0.6]
      startVal [time (s)] = 0.0
      text = Good
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    KeyboardComponent Instr_key_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_7
    TextComponent Instr7
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Sort the same four categories again. The same rules still apply.

        Press the spacebar to begin the next set of trials.
    KeyboardComponent Instr_key_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Instr_Prac_7
      color = skyblue
      letterHeight = 0.15
      pos = [-0.8*expInfo['side'],0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent Instr_or_7
      color = gray
      letterHeight = 0.1
      pos = [-0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Instr_Bad_7
      color = limegreen
      letterHeight = 0.15
      pos = [-0.8,0.6]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Instr_Creat_7
      color = skyblue
      letterHeight = 0.15
      pos = [0.8*side,0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent Instr_or_7_2
      color = gray
      letterHeight = 0.1
      pos = [0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Instr_Good_7
      color = limegreen
      letterHeight = 0.15
      pos = [0.8,0.6]
      startVal [time (s)] = 0.0
      text = Good
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  Routine Block_1
    TextComponent Creative
      color = skyblue
      letterHeight = 0.15
      pos [set every repeat] = [-.65*side, 0.65]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent Practical
      color = skyblue
      letterHeight = 0.15
      pos [set every repeat] = [.65*side, 0.65]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent Word_1
      color [set every repeat] = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent Response_1
      allowedKeys = 'e','i'
      correctAns = $corr(thisTrial.key, side, thisTrial.condition)
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [condition] = Wrong_1.status == STARTED
      store = first key
      storeCorrect = True
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    CodeComponent code_1
      Code Type = Py
      Each Frame:
        if Response_1.status == STARTED:
            if len(theseKeys) > 0:
                if Response_1.corr == 1:
                    continueRoutine = False
                else:
                    Wrong_1.setAutoDraw(True)
                    Wrong_1.status = STARTED
    KeyboardComponent Keys_1
      allowedKeys = 'e','i'
      correctAns = $corr(thisTrial.key, side, thisTrial.condition)
      forceEndRoutine = True
      startVal [condition] = Wrong_1.status==STARTED
      store = first key
      storeCorrect = True
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    TextComponent Wrong_1
      color = red
      letterHeight = 0.1
      pos = [0, -.3]
      startVal [condition] = len(theseKeys)>5
      text = X
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  Routine Instr_1
    TextComponent Instr_1x
      letterHeight = 0.08
      pos = [0.03, 0]
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        In the first set, you will be determining if a word is "creative" or "practical" as follows:

        "Creative": Creative, Novel, Inventive, Newfangled, Original, Different

        "Practical": Practical, Applied, Useful, Functional, Efficient, Constructive

        Press 'e' to sort the word into the category on the left, and 'i' to sort it into the category on the right.

        If you press the wrong key, an 'X' will appear on the screen. You should then press the other key.

        Position your index fingers over the 'e' and 'i' keys. Press the spacebar with your thumb to begin the trials.
    KeyboardComponent Instr_key_resp_1x
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Instr_Creat_1
      color = skyblue
      letterHeight = 0.15
      pos [set every repeat] = [-.8*side, 0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent Instr_Prac_1
      color = skyblue
      letterHeight = 0.15
      pos [set every repeat] = [0.8*side, 0.8]
      startVal [time (s)] = 0.0
      text = Practical
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  Routine Block_3
    TextComponent Creative_3
      color = skyblue
      letterHeight = 0.15
      pos = [-.8*side, 0.8]
      startVal [time (s)] = 0.0
      text = Creative
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    TextComponent or_3
      color = gray
      letterHeight = 0.1
      pos = [-.8, 0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Bad_3
      color = limegreen
      letterHeight = 0.15
      pos = [-.8, 0.6]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Practical_3
      color = skyblue
      letterHeight = 0.15
      pos = [.8*side, 0.8]
      startVal [time (s)] = 0.0
      text = Practical
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    TextComponent or_2_3
      color = gray
      letterHeight = 0.1
      pos = [0.8,0.7]
      startVal [time (s)] = 0.0
      text = or
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    TextComponent Good_3
      color = limegreen
      letterHeight = 0.15
      pos = [0.8,0.6]
      startVal [time (s)] = 0.0
      text = Good
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    TextComponent Word_3
      color [set every repeat] = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent Response_3
      allowedKeys = 'e','i'
      correctAns = $corr(key, side, condition)
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [condition] = Wrong_3.status==STARTED
      store = first key
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Py
      Each Frame:
        if Response_3.status == STARTED:
            if len(theseKeys) > 0:
                if Response_3.corr == 1:
                    continueRoutine=False
                else:
                    Wrong_3.setAutoDraw(True)
                    Wrong_3.status = STARTED
    KeyboardComponent Keys_3
      allowedKeys = 'e','i'
      correctAns = $corr(key, side, condition)
      forceEndRoutine = True
      startVal [condition] = Wrong_3.status==STARTED
      store = first key
      storeCorrect = True
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    TextComponent Wrong_3
      color = red
      letterHeight = 0.1
      pos = [0, -.3]
      startVal [condition] = len(theseKeys)>5
      text = X
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  Routine Block_2
    TextComponent Bad
      color = limegreen
      letterHeight = 0.15
      pos = [-.8, 0.8]
      startVal [time (s)] = 0.0
      text = Bad
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    TextComponent Good
      color = limegreen
      letterHeight = 0.15
      pos = [.8, 0.8]
      startVal [time (s)] = 0.0
      text = Good
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    TextComponent Word_2
      color [set every repeat] = $color
      letterHeight = 0.15
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent Response_2
      allowedKeys = 'e','i'
      correctAns = $thisTrial_2.key
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [condition] = Wrong_2.status==STARTED
      store = first key
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if Response_2.status==STARTED:
            if len(theseKeys)>0:
                if Response_2.corr ==1:
                    continueRoutine=False
                else:
                    Wrong_2.setAutoDraw(True)
                    Wrong_2.status=STARTED
    KeyboardComponent Keys_2
      allowedKeys = 'e','i'
      correctAns = $thisTrial_2.key
      forceEndRoutine = True
      startVal [condition] = Wrong_2.status==STARTED
      store = first key
      storeCorrect = True
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    TextComponent Wrong_2
      color = red
      letterHeight = 0.1
      pos = [0, -.3]
      startVal [condition] = len(theseKeys)>5
      text = X
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Flow
  Routine Instructions
  Routine Instr_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Creat_Prac.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'color': u'skyblue', 'word': u'Creative', 'condition': u'creative', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Novel', 'condition': u'creative', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Inventive', 'condition': u'creative', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Newfangled', 'condition': u'creative', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Original', 'condition': u'creative', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Different', 'condition': u'creative', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Practical', 'condition': u'practical', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Applied', 'condition': u'practical', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Useful', 'condition': u'practical', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Functional', 'condition': u'practical', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Efficient', 'condition': u'practical', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Constructive', 'condition': u'practical', 'key': u'i'}]
    Routine Block_1
  LoopTerminator trials
  Routine Instr_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Good_Bad.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'color': u'limegreen', 'word': u'Rainbow', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Cake', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Sunshine', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Laughter', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Peace', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Heaven', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Agony', 'condition': u'bad', 'key': u'e'},
      {'color': u'limegreen', 'word': u'Hell', 'condition': u'bad', 'key': u'e'},
      {'color': u'limegreen', 'word': u'Ugly', 'condition': u'bad', 'key': u'e'},
      {'color': u'limegreen', 'word': u'Vomit', 'condition': u'bad', 'key': u'e'},
      {'color': u'limegreen', 'word': u'Poison', 'condition': u'bad', 'key': u'e'},
      {'color': u'limegreen', 'word': u'Rotten', 'condition': u'bad', 'key': u'e'}]
    Routine Block_2
  LoopTerminator trials_2
  Routine Instr_3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = All.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'color': u'white', 'word': u'Creative', 'key': u'e', 'condition': u'creative'},
      {'color': u'white', 'word': u'Novel', 'key': u'e', 'condition': u'creative'},
      {'color': u'white', 'word': u'Inventive', 'key': u'e', 'condition': u'creative'},
      {'color': u'white', 'word': u'Newfangled', 'key': u'e', 'condition': u'creative'},
      {'color': u'white', 'word': u'Original', 'key': u'e', 'condition': u'creative'},
      {'color': u'white', 'word': u'Different', 'key': u'e', 'condition': u'creative'},
      {'color': u'white', 'word': u'Practical', 'key': u'i', 'condition': u'practical'},
      {'color': u'white', 'word': u'Applied', 'key': u'i', 'condition': u'practical'},
      {'color': u'white', 'word': u'Useful', 'key': u'i', 'condition': u'practical'},
      {'color': u'white', 'word': u'Functional', 'key': u'i', 'condition': u'practical'},
      {'color': u'white', 'word': u'Efficient', 'key': u'i', 'condition': u'practical'},
      {'color': u'white', 'word': u'Constructive', 'key': u'i', 'condition': u'practical'},
      {'color': u'limegreen', 'word': u'Rainbow', 'key': u'i', 'condition': u'good'},
      {'color': u'limegreen', 'word': u'Cake', 'key': u'i', 'condition': u'good'},
      {'color': u'limegreen', 'word': u'Sunshine', 'key': u'i', 'condition': u'good'},
      {'color': u'limegreen', 'word': u'Laughter', 'key': u'i', 'condition': u'good'},
      {'color': u'limegreen', 'word': u'Peace', 'key': u'i', 'condition': u'good'},
      {'color': u'limegreen', 'word': u'Heaven', 'key': u'i', 'condition': u'good'},
      {'color': u'limegreen', 'word': u'Agony', 'key': u'e', 'condition': u'bad'}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
    Routine Block_3
  LoopTerminator trials_3
  Routine Instr_4
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = All.csv
    loopType = random
    nReps = 2
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    conditions:
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    Routine Block_4
  LoopTerminator trials_4
  Routine Instr_5
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = Creat_Prac_rev.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'color': u'white', 'word': u'Creative', 'condition': u'creative', 'key': u'i'},
      {'color': u'white', 'word': u'Novel', 'condition': u'creative', 'key': u'i'},
      {'color': u'white', 'word': u'Inventive', 'condition': u'creative', 'key': u'i'},
      {'color': u'white', 'word': u'Newfangled', 'condition': u'creative', 'key': u'i'},
      {'color': u'white', 'word': u'Original', 'condition': u'creative', 'key': u'i'},
      {'color': u'white', 'word': u'Different', 'condition': u'creative', 'key': u'i'},
      {'color': u'white', 'word': u'Practical', 'condition': u'practical', 'key': u'e'},
      {'color': u'white', 'word': u'Applied', 'condition': u'practical', 'key': u'e'},
      {'color': u'white', 'word': u'Useful', 'condition': u'practical', 'key': u'e'},
      {'color': u'white', 'word': u'Functional', 'condition': u'practical', 'key': u'e'},
      {'color': u'white', 'word': u'Efficient', 'condition': u'practical', 'key': u'e'},
      {'color': u'white', 'word': u'Constructive', 'condition': u'practical', 'key': u'e'}]
    Routine Block_5
  LoopTerminator trials_5
  Routine Instr_6
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = All_rev.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'color': u'skyblue', 'word': u'Creative', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Novel', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Inventive', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Newfangled', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Original', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Different', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Practical', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Applied', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Useful', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Functional', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Efficient', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Constructive', 'condition': u'practical', 'key': u'e'},
      {'color': u'limegreen', 'word': u'Rainbow', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Cake', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Sunshine', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Laughter', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Peace', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Heaven', 'condition': u'good', 'key': u'i'}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
    Routine Block_6
  LoopTerminator trials_6
  Routine Instr_7
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = All_rev.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'color': u'skyblue', 'word': u'Creative', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Novel', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Inventive', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Newfangled', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Original', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Different', 'condition': u'creative', 'key': u'i'},
      {'color': u'skyblue', 'word': u'Practical', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Applied', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Useful', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Functional', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Efficient', 'condition': u'practical', 'key': u'e'},
      {'color': u'skyblue', 'word': u'Constructive', 'condition': u'practical', 'key': u'e'},
      {'color': u'limegreen', 'word': u'Rainbow', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Cake', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Sunshine', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Laughter', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Peace', 'condition': u'good', 'key': u'i'},
      {'color': u'limegreen', 'word': u'Heaven', 'condition': u'good', 'key': u'i'}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
    Routine Block_7
  LoopTerminator trials_7
  Routine thanks
