PsychoPy2experiment version="1.70.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'s_001', 'ori':10}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PatchComponent fixation
      color = [1, 1, 1]
      stopVal [duration (s)] = 1.0
      mask = none
      sf = 1
      units = pix
      startVal [time (s)] = 0.0
      image = none
      size = [3, 3]
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    PatchComponent gabor
      color [set every repeat] = $[level, level, level]
      stopVal [duration (s)] = 0.5
      mask = gauss
      sf = 0.1
      units = pix
      phase [set every frame] = $trialClock.getTime()*2
      ori = $expInfo['ori']
      startVal [time (s)] = 0.5
      image = sin
      size = [128,128]
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    KeyboardComponent resp
      correctAns = up
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'up', 'down'
      startVal [time (s)] = 0.5
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  Routine instr
    TextComponent instructions
      color = [1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        This exp measures your detection threshold using a staircase procedure.

        Press 'up' if you see the stimulus, 'down' if you didn't.

        Any key to start
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
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Flow
  Routine instr
  LoopInitiator trials loopType="StairHandler"
    min value = 0
    N reversals = 0
    loopType = staircase
    nReps = 30
    start value = 0.5
    N up = 1
    max value = 1
    N down = 3
    step type = log
    step sizes = [0.8,0.8,0.4,0.4,0.2]
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    Routine trial
  LoopTerminator trials
