PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = buble_cycle_2
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Routines
  Routine instruction_1
    TextComponent instruction_start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Remove the spray head if attached, and insert the inlet tubes into stimulus their respective stimulus reservoir.

        Press the spacebar when done.
    KeyboardComponent keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instruction_2
    TextComponent instruction_air
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Remove tubes from stimulus reservoir to aspirate air.

        Press the spacebar when done
    KeyboardComponent keyboard_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instruction_3
    TextComponent instruction_liquid
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Insert tubes into the stimulus reservoir again to aspirate liquid.

        Press the spacebar when done
    KeyboardComponent keyboard_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine finished
    TextComponent instruction_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The pumps should now be filled and bubble-free! You may now attach the spray head if desired.

        Press space to quit.
    KeyboardComponent keyboard_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine aspirate_liquid_2
    UnknownComponent pump_0_2
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = aspirate
      pumpIndex = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
    UnknownComponent pump_1_2
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = aspirate
      pumpIndex = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
  Routine aspirate_air
    UnknownComponent pump_0_1
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = aspirate
      pumpIndex = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
    UnknownComponent pump_1_1
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = aspirate
      pumpIndex = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
  Routine aspirate_liquid_1
    UnknownComponent pump_0_0
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = aspirate
      pumpIndex = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
    UnknownComponent pump_1_0
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = aspirate
      pumpIndex = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
  Routine empty
    UnknownComponent pump_0_3
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = dispense
      pumpIndex = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
    UnknownComponent pump_1_3
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = dispense
      pumpIndex = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
  Routine fill
    UnknownComponent pump_0_4
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = aspirate
      pumpIndex = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
    UnknownComponent pump_1_4
      flowRate = 1.0
      flowRateUnit = mL/s
      pumpAction = aspirate
      pumpIndex = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      switchValveWhenDone = True
      syncToScreen = True
      syringeType = 50 mL glass
Flow
  Routine instruction_1
  Routine aspirate_liquid_1
  Routine instruction_2
  Routine aspirate_air
  Routine instruction_3
  Routine aspirate_liquid_2
  LoopInitiator repeats loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine empty
    Routine fill
  LoopTerminator repeats
  Routine finished
