PsychoPy2experiment version="3.0.1"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u'demo'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1000, 700]
  expName = ratingScaleBuilder
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Routines
  Routine trial
    RatingScaleComponent rating
      forceEndRoutine = True
      scaleDescription = 1=not much ... 7=great
      size = 1.2
      startVal [time (s)] = 0.4
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    TextComponent stimulus_to_rate
      letterHeight = 0.1
      pos = [0, 0.35]
      startVal [time (s)] = 0.4
      text [set every repeat] = $thing
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  Routine feedback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        # uses data from `rating` obtained on the previous routine:
        result = "You pressed " + str(rating.getRating())
        if rating.getRT() < 1:
            result += ', quickly.'
        else:
            result += ', slowly.'
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $result
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  Routine instr
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        This demo will show a rating scale for each of four things-to-be-rated, and then show the rating.

        Hit any key to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.pkl
    loopType = sequential
    nReps = 1
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    conditions:
      [{'thing': u'thing-1'},
      {'thing': u'thing-2'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
