PsychoPy2experiment version="3.0.0b6"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [800, 600]
  expName = ratingsNew
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Routines
  Routine rate_a_fruit
    TextComponent fruit
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fruitName
      units = norm
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    SliderComponent sourness
      forceEndRoutine = False
      granularity = 0.5
      labels = ('sour','','neutral','','sweet')
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = [u'rating', u'triangleMarker']
      ticks = (1, 2, 3, 4, 5)
      units = norm
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    SliderComponent yumminess
      forceEndRoutine = False
      granularity = 0.5
      labels = 'yucky','yummy'
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = [u'rating', u'triangleMarker']
      ticks = (1, 2, 3, 4, 5)
      units = norm
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    TextComponent intruct1
      letterHeight = 0.1
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press a key to confirm and move on
      units = norm
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    KeyboardComponent fruitDone
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dynamicStim
    SliderComponent ori
      forceEndRoutine = False
      granularity = 0
      labels = 0, 180
      pos = (-0.7, 0)
      size = (0.1, 1.0)
      startVal [time (s)] = 0.0
      styles = (u'slider',)
      ticks = (0, 45, 90, 135, 180)
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    TextComponent oriLabel
      letterHeight = 0.1
      pos = (-0.7, -0.7)
      startVal [time (s)] = 0.0
      text = Ori
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    SliderComponent pos
      forceEndRoutine = False
      granularity = 0
      labels = 0.1, 0.5
      pos = (-0.3, 0)
      size = (0.1, 1.0)
      startVal [time (s)] = 0.0
      styles = (u'slider',)
      ticks = 0.1, 0.2, 0.3, 0.4, 0.5
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    TextComponent xPosLabel
      letterHeight = 0.1
      pos = (-0.3, -0.7)
      startVal [time (s)] = 0.0
      text = xPos
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    KeyboardComponent dynamicDone
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent checkSliderVals
      Code Type = Py
      Begin Routine:
        # setting marker pos is not the same as rating
        # marker pos gets updated during a drag whereas
        # rating is only updated on a mouse button release

        pos.markerPos = 0
        ori.markerPos = 0
    GratingComponent testStim
      mask = circle
      ori [set every frame] = ori.markerPos
      pos [set every frame] = (pos.markerPos, 0)
      sf = 8
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 256
      units = height
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    TextComponent instruct2
      letterHeight = 0.05
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        slider markerPos can update other things.

        Press a key to move on
  Routine sliderStyles
    KeyboardComponent endStyles
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruct3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Click on some sldiers to see their markers

        Press any key to finalise ratings
    SliderComponent categScale
      forceEndRoutine = False
      granularity = 1
      labels = 'red', 'orange', 'green', 'salmon'
      pos = (0.5, -0.7)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = (u'rating',)
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    PolygonComponent categFeedback
      fillColor [set every frame] = $categScale.getRating()
      pos = (0.5, -0.5)
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    SliderComponent leftLabels
      forceEndRoutine = False
      granularity = 0
      labels = ('left','hand','labels')
      pos = (-0.7, -0.0)
      size = (0.05, 0.6)
      startVal [time (s)] = 0.0
      styles = (u'labels45', u'whiteOnBlack')
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent rightLabels
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('flip', 'for', 'right-hand')
      pos = (-0.6, 0)
      size = (0.05, 0.6)
      startVal [time (s)] = 0.0
      styles = (u'labels45', u'triangleMarker')
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    CodeComponent oneClickCheck
      Code Type = Py
      Each Frame:
        if oneClickOnly.getRating() is not None:
            oneClickOnly.readOnly = True
    SliderComponent oneClickOnly
      forceEndRoutine = False
      granularity = 0
      pos = (0.5, 0.5)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = (u'whiteOnBlack',)
      ticks = 0, 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fruitConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([(u'fruitName', u'apple')]),
      OrderedDict([(u'fruitName', u'grapefruit')]),
      OrderedDict([(u'fruitName', u'banana')]),
      OrderedDict([(u'fruitName', u'satsuma')])]
    Routine rate_a_fruit
  LoopTerminator trials
  Routine dynamicStim
  Routine sliderStyles
