PsychoPy2experiment version="1.65.01"
Settings
  Monitor = testMonitor
  color = $[0, 0, 0]
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Save log file = False
  Experiment info = {'participant':'', 'session':02}
  Save excel file = True
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent fixation
      text = +
      duration = 1.0
      letterHeight = 0.05
      startTime = 0.0
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    TextComponent presentSet
      text [set every repeat] = $numberSet
      duration = 1.5
      letterHeight = 0.1
      startTime = 1.2
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    TextComponent presentTarget
      text [set every repeat] = $target
      duration = 2
      letterHeight = 0.1
      startTime = 4.7
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = $corrAns
      startTime = 4.7
      allowedKeys = ['left','right']
      storeResponseTime = True
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  Routine practInstruct
    TextComponent instr1
      letterHeight = 0.05
      startTime = 0.0
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      text:
        In this experiment you will be presented with a sequence of between 1 and 6 randomly ordered numbers.

        Following a short delay you will then be presented with a single number and you will have to decide whether this new number was a member of the sequence.

        Respond with the keys;
         - LEFT CURSOR if the number was NOT in the sequence
         - RIGHT CURSOR if the number WAS in the sequence

        There will be a number of practice trials in which you will be given feedback.  Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK1
      forceEndTrial = True
      startTime = 0.0
      storeResponseTime = False
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      duration = 1.0
      letterHeight = 0.1
      startTime = 0.0
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  Routine mainInstruct
    TextComponent instr2
      color = $[1, 1, 1]
      letterHeight = 0.05
      startTime = 0.0
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      text:
        OK, ready to start the main experiment?

        Remember:
         - LEFT CURSOR for NOT in the sequence
         - RIGHT CURSOR for IN the sequence
        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK2
      forceEndTrial = True
      startTime = 0.0
      storeResponseTime = False
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  Routine thanks
    TextComponent thanksMsg
      text = Thanks for taking part!
      duration = 4.0
      letterHeight = 0.1
      startTime = 0.0
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Flow
  Routine practInstruct
  LoopInitiator pracTrials loopType="TrialHandler"
    loopType = random
    nReps = 1
    trialList = [{u'numberSet': 6, u'target': 6, u'corrAns': 9, u'posInSet': 1, u'setSize': 1, u'present': u'y'}, {u'numberSet': 5, u'target': 3, u'corrAns': 1, u'posInSet': u'--', u'setSize': 1, u'present': u'n'}, {u'numberSet': u'4 8', u'target': 4, u'corrAns': 9, u'posInSet': 1, u'setSize': 2, u'present': u'y'}, {u'numberSet': u'2 1', u'target': 5, u'corrAns': 1, u'posInSet': u'--', u'setSize': 2, u'present': u'n'}, {u'numberSet': u'2 9 4', u'target': 4, u'corrAns': 9, u'posInSet': 3, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'4 1 5', u'target': 2, u'corrAns': 1, u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'1 5 2 9', u'target': 5, u'corrAns': 9, u'posInSet': 2, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'3 1 9 4', u'target': 6, u'corrAns': 1, u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'1 7 9 8 5', u'target': 8, u'corrAns': 9, u'posInSet': 4, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'9 6 7 4 5', u'target': 3, u'corrAns': 1, u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'4 3 1 7 9 8', u'target': 4, u'corrAns': 9, u'posInSet': 1, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'5 7 8 4 1 2', u'target': 6, u'corrAns': 1, u'posInSet': u'--', u'setSize': 6, u'present': u'n'}]
    trialListFile = pracTrials.xlsx
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    Routine trial
    Routine feedback
  LoopTerminator pracTrials
  Routine mainInstruct
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
    trialList = [{u'numberSet': 5, u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 1, u'present': u'n'}, {u'numberSet': 9, u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 1, u'present': u'n'}, {u'numberSet': 1, u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 1, u'present': u'n'}, {u'numberSet': 4, u'target': 4, u'corrAns': u'right', u'posInSet': 1, u'setSize': 1, u'present': u'y'}, {u'numberSet': 7, u'target': 7, u'corrAns': u'right', u'posInSet': 1, u'setSize': 1, u'present': u'y'}, {u'numberSet': 8, u'target': 8, u'corrAns': u'right', u'posInSet': 1, u'setSize': 1, u'present': u'y'}, {u'numberSet': u'8 9', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'}, {u'numberSet': u'6 8', u'target': 9, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'}, {u'numberSet': u'7 9', u'target': 1, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'}, {u'numberSet': u'6 2', u'target': 6, u'corrAns': u'right', u'posInSet': 1, u'setSize': 2, u'present': u'y'}, {u'numberSet': u'2 3', u'target': 2, u'corrAns': u'right', u'posInSet': 1, u'setSize': 2, u'present': u'y'}, {u'numberSet': u'3 4', u'target': 3, u'corrAns': u'right', u'posInSet': 1, u'setSize': 2, u'present': u'y'}, {u'numberSet': u'7 1', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'}, {u'numberSet': u'4 1', u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'}, {u'numberSet': u'5 2', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'}, {u'numberSet': u'8 3', u'target': 3, u'corrAns': u'right', u'posInSet': 2, u'setSize': 2, u'present': u'y'}, {u'numberSet': u'6 5', u'target': 5, u'corrAns': u'right', u'posInSet': 2, u'setSize': 2, u'present': u'y'}, {u'numberSet': u'7 6', u'target': 6, u'corrAns': u'right', u'posInSet': 2, u'setSize': 2, u'present': u'y'}, {u'numberSet': u'6 9 5', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'2 8 9', u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'3 9 1', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'9 4 2', u'target': 9, u'corrAns': u'right', u'posInSet': 1, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'8 7 3', u'target': 8, u'corrAns': u'right', u'posInSet': 1, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'9 8 4', u'target': 9, u'corrAns': u'right', u'posInSet': 1, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'3 4 2', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'5 7 3', u'target': 9, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'6 8 4', u'target': 1, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'7 1 3', u'target': 1, u'corrAns': u'right', u'posInSet': 2, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'4 1 5', u'target': 1, u'corrAns': u'right', u'posInSet': 2, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'5 2 6', u'target': 2, u'corrAns': u'right', u'posInSet': 2, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'1 8 7', u'target': 4, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'1 6 4', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'2 7 5', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 3, u'present': u'n'}, {u'numberSet': u'8 1 6', u'target': 6, u'corrAns': u'right', u'posInSet': 3, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'6 1 2', u'target': 2, u'corrAns': u'right', u'posInSet': 3, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'7 2 3', u'target': 3, u'corrAns': u'right', u'posInSet': 3, u'setSize': 3, u'present': u'y'}, {u'numberSet': u'4 2 6 9', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'7 3 2 8', u'target': 4, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'8 4 3 9', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'2 3 7 4', u'target': 2, u'corrAns': u'right', u'posInSet': 1, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'3 5 4 7', u'target': 3, u'corrAns': u'right', u'posInSet': 1, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'4 6 5 8', u'target': 4, u'corrAns': u'right', u'posInSet': 1, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'8 4 3 5', u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'6 7 5 9', u'target': 2, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'7 8 6 1', u'target': 3, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'9 5 8 1', u'target': 5, u'corrAns': u'right', u'posInSet': 2, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'8 9 6 1', u'target': 9, u'corrAns': u'right', u'posInSet': 2, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'9 1 7 2', u'target': 1, u'corrAns': u'right', u'posInSet': 2, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'1 7 5 2', u'target': 3, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'1 4 9 3', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'2 5 1 4', u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'6 7 8 5', u'target': 8, u'corrAns': u'right', u'posInSet': 3, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'2 4 6 9', u'target': 6, u'corrAns': u'right', u'posInSet': 3, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'3 5 7 1', u'target': 7, u'corrAns': u'right', u'posInSet': 3, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'7 9 1 6', u'target': 4, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'4 8 1 2', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'5 9 2 3', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 4, u'present': u'n'}, {u'numberSet': u'6 9 3 1', u'target': 1, u'corrAns': u'right', u'posInSet': 4, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'2 8 5 1', u'target': 1, u'corrAns': u'right', u'posInSet': 4, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'3 9 6 2', u'target': 2, u'corrAns': u'right', u'posInSet': 4, u'setSize': 4, u'present': u'y'}, {u'numberSet': u'1 4 3 6 5', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'1 7 5 2 9', u'target': 3, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'2 8 6 3 1', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'9 5 3 8 4', u'target': 9, u'corrAns': u'right', u'posInSet': 1, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'8 9 5 6 7', u'target': 8, u'corrAns': u'right', u'posInSet': 1, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'9 1 6 7 8', u'target': 9, u'corrAns': u'right', u'posInSet': 1, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'9 8 2 7 4', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'8 6 3 4 7', u'target': 1, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'9 7 4 5 8', u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'2 6 1 7 4', u'target': 6, u'corrAns': u'right', u'posInSet': 2, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'3 2 1 4 7', u'target': 2, u'corrAns': u'right', u'posInSet': 2, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'4 3 2 5 8', u'target': 3, u'corrAns': u'right', u'posInSet': 2, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'1 3 2 6 9', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'1 5 3 2 8', u'target': 4, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'2 6 4 3 9', u'target': 1, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'2 5 4 8 7', u'target': 4, u'corrAns': u'right', u'posInSet': 3, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'3 9 7 6 4', u'target': 7, u'corrAns': u'right', u'posInSet': 3, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'4 1 8 7 5', u'target': 8, u'corrAns': u'right', u'posInSet': 3, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'8 5 7 3 6', u'target': 9, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'6 9 4 5 2', u'target': 1, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'7 1 5 6 3', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'9 3 1 2 5', u'target': 2, u'corrAns': u'right', u'posInSet': 4, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'8 5 1 3 9', u'target': 3, u'corrAns': u'right', u'posInSet': 4, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'9 6 2 4 1', u'target': 4, u'corrAns': u'right', u'posInSet': 4, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'1 4 9 2 5', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'1 7 8 3 9', u'target': 2, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'2 8 9 4 1', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 5, u'present': u'n'}, {u'numberSet': u'7 8 6 3 1', u'target': 1, u'corrAns': u'right', u'posInSet': 5, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'4 6 2 5 1', u'target': 1, u'corrAns': u'right', u'posInSet': 5, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'5 7 3 6 2', u'target': 2, u'corrAns': u'right', u'posInSet': 5, u'setSize': 5, u'present': u'y'}, {u'numberSet': u'5 3 2 6 9 8', u'target': 4, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'9 5 3 2 8 6', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'1 6 4 3 9 7', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'6 7 9 3 1 2', u'target': 6, u'corrAns': u'right', u'posInSet': 1, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'2 4 8 5 1 3', u'target': 2, u'corrAns': u'right', u'posInSet': 1, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'3 5 9 6 2 4', u'target': 3, u'corrAns': u'right', u'posInSet': 1, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'6 2 9 3 8 4', u'target': 1, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'2 3 8 5 6 7', u'target': 1, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'3 4 9 6 7 8', u'target': 2, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'8 5 4 7 3 1', u'target': 5, u'corrAns': u'right', u'posInSet': 2, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'6 9 7 4 5 1', u'target': 9, u'corrAns': u'right', u'posInSet': 2, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'7 1 8 5 6 2', u'target': 1, u'corrAns': u'right', u'posInSet': 2, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'8 2 1 4 5 9', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'6 3 1 7 9 8', u'target': 4, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'7 4 2 8 1 9', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'5 2 9 6 1 7', u'target': 9, u'corrAns': u'right', u'posInSet': 3, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'9 3 8 2 1 4', u'target': 8, u'corrAns': u'right', u'posInSet': 3, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'1 4 9 3 2 5', u'target': 9, u'corrAns': u'right', u'posInSet': 3, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'6 9 4 5 3 2', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'2 8 7 9 5 3', u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'3 9 8 1 6 4', u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'4 9 7 8 5 3', u'target': 8, u'corrAns': u'right', u'posInSet': 4, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'7 8 4 6 9 5', u'target': 6, u'corrAns': u'right', u'posInSet': 4, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'8 9 5 7 1 6', u'target': 7, u'corrAns': u'right', u'posInSet': 4, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'8 5 4 2 9 6', u'target': 3, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'6 9 7 3 8 2', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'7 1 8 4 9 3', u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'3 4 9 6 2 9', u'target': 2, u'corrAns': u'right', u'posInSet': 5, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'5 7 8 2 3 8', u'target': 3, u'corrAns': u'right', u'posInSet': 5, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'6 8 9 3 4 9', u'target': 4, u'corrAns': u'right', u'posInSet': 5, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'7 6 4 8 1 2', u'target': 9, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'4 2 7 6 1 3', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'5 3 8 7 2 4', u'target': 9, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 6, u'present': u'n'}, {u'numberSet': u'4 7 6 8 2 3', u'target': 3, u'corrAns': u'right', u'posInSet': 6, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'7 4 2 6 3 5', u'target': 5, u'corrAns': u'right', u'posInSet': 6, u'setSize': 6, u'present': u'y'}, {u'numberSet': u'8 5 3 7 4 6', u'target': 6, u'corrAns': u'right', u'posInSet': 6, u'setSize': 6, u'present': u'y'}]
    trialListFile = mainTrials.xlsx
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    Routine trial
  LoopTerminator trials
