PsychoPy2experiment version="1.70.00"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'01'}
  Save excel file = True
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, don't worry about the letter colour, read the WORD. Press:
        Left for the WORD 'red'
        Down for the WORD 'green'
        Right for the WORD 'blue'

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Don't worry about the colour of the letters now. Please press:
        Left for the WORD 'red'
        Down for the WORD 'green'
        Right for the WORD 'blue'

        Let's start with a few practice trials

        Press any key to continue
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = trialTypesReverse.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'green'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'blue'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'red'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'red'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'green'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypesReverse.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
    conditions:
      [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'green'},
      {u'text': u'red', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'blue'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'red'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'red'},
      {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'green'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
