PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {'participant':'demo', 'session':'001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [800,600]
  expName = voiceCapture
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Routines
  Routine trial
    TextComponent say_something
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = say something
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    MicrophoneComponent mic
      startVal [time (s)] = .5
      stereo = False
      stopVal [duration (s)] = 2
    TextComponent show_filename
      letterHeight = 0.07
      startVal [time (s)] = 03.
      text [set every frame] = $"saved file = %s\nhit any key to playback, then continue" % (mic.savedFile)
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    KeyboardComponent any_key_cont
      forceEndRoutine = True
      startVal [time (s)] = 4
      store = nothing
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  Routine playback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        mic.playback()
  Routine instr
    TextComponent instructions
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = $"this is a microphone test. ready?\n(please turn on your microphone)\npress any key to start"
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine trial
    Routine playback
  LoopTerminator trials
