PsychoPy2experiment version="1.83.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  expName = vvk
  Units = use prefs
  Screen = 1
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Routines
  Routine show_playback_time
    TextComponent text
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text [set every repeat]:
        $"""vocal RT at %.3f while recording\vocal RT at %.3f during play-back\n\nany key to continue"""
          % (vpvk.event_onset, vpvk2.event_onset)
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    CodeComponent init_pyo
      Begin Experiment:
        # The import and pyo_init should always come early on:
        import psychopy.voicekey as vk
        vk.pyo_init(rate=44100, buffersize=32)

        # What signaler class to use? Here just the demo signaler:
        from psychopy.voicekey.demo_vks import DemoVoiceKeySignal as Signaler

        # To use a LabJack as a signaling device:
        #from voicekey.signal.labjack_vks import LabJackU3VoiceKeySignal as Signaler
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        Task: Read each word out loud.
        There will be 3 trials.

        Press any key to start.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine get_speech
    TextComponent say_something
      text [set every repeat] = $word
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent record
      Begin Routine:
        # Create a voice-key to be used:
        vpvk = vk.OnsetVoiceKey(
            sec=2,
            # msPerChunk=2,  # default
            # proportion=0.7,
            #signaler=Signaler(),
            file_out='data/trial_'+str(trials.thisN).zfill(3)+'_'+word+'.wav')

        # Start it recording (and detecting):
        vpvk.start()  # non-blocking; don't block when using Builder
      End Routine:
        # The recorded sound is saved upon .stop() by default. But
        # its a good idea to call .stop() explicitly, eg, if there's much slippage:

        vpvk.stop()

        # Add the detected time into the PsychoPy data file:
        thisExp.addData('vk_event_onset', round(vpvk.event_onset, 3))
        thisExp.addData('vk_file_onset', vpvk.filename)
        thisExp.nextEntry()
      Each Frame:
        # Nothing needed every frame for this demo
  Routine the_end
    TextComponent text_3
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        The end.

        Data + recordings are in folder data/
  Routine playback_speech
    CodeComponent playback
      Begin Routine:
        # Create another instance to use for play-back:
        vpvk2 = vk.OnsetVoiceKey(
            proportion=0.7,
            #signaler=Signaler(),
            file_in=vpvk.filename)  # the input file here is output of the prior trial

        vpvk2.start()  # non-blocking
      End Routine:
        thisExp.addData('vk_event_onset', round(vpvk2.event_onset, 3))
        thisExp.addData('vk_file_name', vpvk.filename)

        # only needed if no other event will make this happen:
        thisExp.nextEntry()  # otherwise data is not saved
      Each Frame:
        # nothing needed here
    TextComponent play_message
      text [set every repeat] = $"playing {0}".format(vpvk.filename)
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'vowel_plosive': 'ah pa'},
      {'vowel_plosive': 'ee ka'},
      {'vowel_plosive': 'oo ta'}]
    Routine get_speech
    Routine playback_speech
    Routine show_playback_time
  LoopTerminator trials
  Routine the_end
