PsychoPy2experiment version="1.50.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'s_001', 'session':001}
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine ready
    TextComponent readyText
      text = "Press a key when ready"
      colour = [1, 1, 1]
      times = [0, 1000]
      letterHeight = 1
      colourSpace = rgb
      font = arial
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    KeyboardComponent startTrials
      forceEndTrial = True
      times = [0, 1000]
      storeResponseTime = True
      correctIf = resp.keys==str(thisTrial.corrAns)
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  Routine trial
    TextComponent testWord
      text = "Hint: Use double quotes for text (or this looks like a variable)"
      colour = [1, 1, 1]
      times = [0, 1]
      letterHeight = 1
      colourSpace = rgb
      font = arial
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    KeyboardComponent resp
      forceEndTrial = True
      times = [0, 1]
      allowedKeys = ["left","right"]
      storeResponseTime = True
      correctIf = resp.keys==str(thisTrial.corrAns)
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Flow
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
    trialList = [{'text': 'red', 'rgb': [1, 0, 0], 'congruent': 1, 'corrAns': 1}, {'text': 'red', 'rgb': [0, 1, 0], 'congruent': 0, 'corrAns': 1}, {'text': 'green', 'rgb': [0, 1, 0], 'congruent': 1, 'corrAns': 2}, {'text': 'green', 'rgb': [0, 0, 1], 'congruent': 0, 'corrAns': 2}, {'text': 'blue', 'rgb': [0, 0, 1], 'congruent': 1, 'corrAns': 3}, {'text': 'blue', 'rgb': [1, 0, 0], 'congruent': 0, 'corrAns': 3}]
    trialListFile = /Users/jwp...troop/trialTypes.csv
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    Routine trial
  LoopTerminator trials
